PrintOut

SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\localizer *
TA: 0:28 PM: ISO Voxelgröße: 0.8×0.8×6.0 mmPAT: Aus Rel. SNR: 1.00  : fl
Eigenschaften
  Prio Rekonstr.: Aus
  Bilder in den Viewer laden: Ein
  Automatischer Kinostart: Aus
  Automatische Bildspeicherung: Ein
  Bilder in die Mini-Segmente laden: Aus
  Bilder in großes Bildsegment laden: Ein
  Inline-Anzeige automatisch öffnen: Aus
  Inline-Anzeige automatisch schließen: Aus
  Start measurement without further preparation: Ein
  Auf Start duch Benutzer warten: Aus
  Start measurements: Einmal messen
Routine
  Schichtgruppe: 1
  Schichten: 5
  Distanzfaktor: 150 %
  Position: Isozentrum
  Orientierung: Transversal
  Phasenkod.-Richt.: A >> P
  Schichtgruppe: 2
  Schichten: 7
  Distanzfaktor: 30 %
  Position: L0.0 P30.0 H0.0 mm
  Orientierung: Coronal
  Phasenkod.-Richt.: R >> L
  Schichtgruppe: 3
  Schichten: 3
  Distanzfaktor: 150 %
  Position: Isozentrum
  Orientierung: Sagittal
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Phasen-Oversampling: 25 %
  FoV Auslese: 400 mm
  FoV Phase: 100,0 %
  Schichtdicke: 6,0 mm
  TR: 7,8 ms
  TE: 3,69 ms
  Mittelungen: 1
  Verknüpfungen: 15
  Filter: Verzeichn. Korr.(2D), Elliptischer Filter
  Spulenelemente: BO1-3;SP1-4
Kontrast - Allgemein
  TR: 7,8 ms
  TE: 3,69 ms
  TD: 0 ms
  MTC: Aus
  Magn. Präparation: Keine
  Flipwinkel: 20 Grad
  Fettunterdr.: Keine
  Wasserunterdr.: Keine
  SWI: Aus
Kontrast - Dynamisch
  Mittelungen: 1
  Mittelungsmodus: Kurzzeit
  Rekonstruktion: Betrag
  Messungen: 1
  Mehrere Serien: Jede Messung
Auflösung - Allgemein
  FoV Auslese: 400 mm
  FoV Phase: 100,0 %
  Schichtdicke: 6,0 mm
  Basis-Auflösung: 256
  Phasen-Auflösung: 80 %
  Phasen Partial Fourier: 7/8
  Interpolation: Ein
Auflösung - iPAT
  PAT Modus: Keiner
Auflösung - Filter Bild
  Image Filter: Aus
  Verzeichn. Korr.: Ein
  Modus: 2D
  Ungefilterte Bilder: Aus
  Prescan Normalisierung: Aus
  Normalisierung: Aus
  B1-Filter: Aus
Auflösung - Filter Rohdaten
  Rohdaten: Aus
  Elliptischer Filter: Ein
Geometrie - Allgemein
  Schichtgruppe: 1
  Schichten: 5
  Distanzfaktor: 150 %
  Position: Isozentrum
  Orientierung: Transversal
  Phasenkod.-Richt.: A >> P
  Schichtgruppe: 2
  Schichten: 7
  Distanzfaktor: 30 %
  Position: L0.0 P30.0 H0.0 mm
  Orientierung: Coronal
  Phasenkod.-Richt.: R >> L
  Schichtgruppe: 3
  Schichten: 3
  Distanzfaktor: 150 %
  Position: Isozentrum
  Orientierung: Sagittal
  Phasenkod.-Richt.: A >> P
  FoV Auslese: 400 mm
  FoV Phase: 100,0 %
  Schichtdicke: 6,0 mm
  TR: 7,8 ms
  Mehrschichtmodus: Sequenziell
  Serie: Verschachtelt
  Verknüpfungen: 15
Geometrie - AutoAlign
  Schichtgruppe: 1
  Position: Isozentrum
  Orientierung: Transversal
  Phasenkod.-Richt.: A >> P
  Schichtgruppe: 2
  Position: L0.0 P30.0 H0.0 mm
  Orientierung: Coronal
  Phasenkod.-Richt.: R >> L
  Schichtgruppe: 3
  Position: Isozentrum
  Orientierung: Sagittal
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Initiale Position: Isozentrum
  L: 0,0 mm
  P: 0,0 mm
  H: 0,0 mm
  Initiale Rotation: 0,00 Grad
  Initiale Orientierung: Transversal
Geometrie - Sättiger
  Sättigungsmodus: Standard
  Fettunterdr.: Keine
  Wasserunterdr.: Keine
  Spez. Sättiger: Keine
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: H
  Tischposition: 0 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: H
  Tischposition: 0 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: P >> A
  Transversal: H >> F
  Kanalkombination: Adaptive Combine
  Unkombiniert speichern: Aus
  Optimierung: Aus
  Spulenfokus: Konstant
  AutoAlign: ---
  Spulenanwahl: Ein  - AutoCoilSelect
System - Justagen
  B0-Shim-Modus: Tune-Up
  B1-Shim-Modus: TrueForm
  Mit Körperspule justieren: Aus
  Freq. Justage bestät.: Aus
  von Fett ausgehen: Aus
  von Silikon ausgehen: Aus
  Justagetoleranz: Auto
System - Justagevolumen
  Position: Isozentrum
  Orientierung: Transversal
  Rotation: 0,00 Grad
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Zurücksetzen: Aus
System - Tx/Rx
  Frequenz 1H: 123,250091 MHz
  Korrekturfaktor: 1
  Verstärkung: Groß
  Korr. Bildskal.: 1,000
  Zurücksetzen: Aus
  ? Ref. Amplitude 1H: 0,000 V
Physio - Signal 1
  1.Signal/Modus: Kein
  TR: 7,8 ms
  Verknüpfungen: 15
  Segmente: 1
Physio - Herz
  Hilfslinien: Keine
  Magn. Präparation: Keine
  Fettunterdr.: Keine
  Dark Blood: Aus
  FoV Auslese: 400 mm
  FoV Phase: 100,0 %
  Phasen-Auflösung: 80 %
Physio - PACE
  Atemkontrolle: Aus
  Verknüpfungen: 15
Inline - Allgemein
  Subtrahieren: Aus
  Messungen: 1
  StdAbw: Aus
  Leber Registrierung: Aus
  Originalbilder speichern: Ein
Inline - MIP
  MIP-Sag: Aus
  MIP-Cor: Aus
  MIP-Tra: Aus
  MIP-Zeit: Aus
  Originalbilder speichern: Ein
Inline - Mamma
  Wash - In: Aus
  Wash - Out: Aus
  TTP: Aus
  PEI: Aus
  MIP-Zeit: Aus
  Messungen: 1
Inline - Composing
  Inline Composing: Aus
  Verzeichn. Korr.: Ein
  Modus: 2D
  Ungefilterte Bilder: Aus
Sequenz - Teil 1
  Einleitung: Ein
  Dimension: 2D
  Phasenstabilisierung: Aus
  Asymmetrisches Echo: Aus
  Kontraste: 1
  Flusskomp.: Nein
  Mehrschichtmodus: Sequenziell
  Bandbreite: 320 Hz/Px
Sequenz - Teil 2
  Segmente: 1
  Lärmreduktion: Keine
  HF-Puls-Typ: Normal
  Gradientenmodus: Normal
  Anregung: Schichtsel.
  HF-Spoiler: Ein
Sequenz - Assistent
  Mode: Aus
  Erlaubte Verzögerung: 0 s

SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\localizer *
TA: 0:16 PM: ISO Voxelgröße: 0.8×0.8×6.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Eigenschaften
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  Start measurement without further preparation: Aus
  Auf Start duch Benutzer warten: Ein
  Start measurements: Einmal messen
Routine
  Schichtgruppe: 1
  Schichten: 5
  Distanzfaktor: 150 %
  Position: L3.9 P10.6 F81.0 mm
  Orientierung: Transversal
  Phasenkod.-Richt.: A >> P
  Schichtgruppe: 2
  Schichten: 7
  Distanzfaktor: 30 %
  Position: L12.6 A5.7 F84.7 mm
  Orientierung: C > T-1.2
  Phasenkod.-Richt.: R >> L
  Schichtgruppe: 3
  Schichten: 3
  Distanzfaktor: 150 %
  Position: R59.1 P52.2 F75.8 mm
  Orientierung: S > T1.4
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Phasen-Oversampling: 25 %
  FoV Auslese: 400 mm
  FoV Phase: 100,0 %
  Schichtdicke: 6,0 mm
  TR: 7,8 ms
  TE: 3,69 ms
  Mittelungen: 1
  Verknüpfungen: 15
  Filter: Verzeichn. Korr.(2D), Elliptischer Filter
  Spulenelemente: BO1-3;SP2-5
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Auflösung - iPAT
  PAT Modus: GRAPPA
  Beschl. Faktor PE: 2
  Ref. Zeilen PE: 24
  Referenzmessungsm.: Integriert
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Geometrie - Allgemein
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  Position: L3.9 P10.6 F81.0 mm
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  Position: L12.6 A5.7 F84.7 mm
  Orientierung: C > T-1.2
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  Position: R59.1 P52.2 F75.8 mm
  Orientierung: S > T1.4
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Geometrie - AutoAlign
  Schichtgruppe: 1
  Position: L3.9 P10.6 F81.0 mm
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  Position: L12.6 A5.7 F84.7 mm
  Orientierung: C > T-1.2
  Phasenkod.-Richt.: R >> L
  Schichtgruppe: 3
  Position: R59.1 P52.2 F75.8 mm
  Orientierung: S > T1.4
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Initiale Position: L3.9 P10.6 F81.0
  L: 3,9 mm
  P: 10,6 mm
  F: 81,0 mm
  Initiale Rotation: 0,00 Grad
  Initiale Orientierung: Transversal
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Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: F
  Tischposition: 80 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: F
  Tischposition: 80 mm
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
SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\t2_haste_cor *
TA: 0:56 PM: ISO Voxelgröße: 0.5×0.5×5.0 mmPAT: 2 Rel. SNR: 1.00  : h
Eigenschaften
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  Inline-Anzeige automatisch öffnen: Ein
  Inline-Anzeige automatisch schließen: Aus
  Start measurement without further preparation: Aus
  Auf Start duch Benutzer warten: Aus
  Start measurements: Einmal messen
Routine
  Schichtgruppe: 1
  Schichten: 37
  Distanzfaktor: 10 %
  Position: L17.1 P14.5 F103.5 mm
  Orientierung: C > T1.8 > S-0.4
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Phasen-Oversampling: 100 %
  FoV Auslese: 350 mm
  FoV Phase: 100,0 %
  Schichtdicke: 5,0 mm
  TR: 1200,0 ms
  TE: 95 ms
  Mittelungen: 1
  Verknüpfungen: 3
  Filter: Verzeichn. Korr.(2D), Prescan Normalisierung
  Spulenelemente: BO1-3;SP3-5
Kontrast - Allgemein
  TR: 1200,0 ms
  TE: 95 ms
  MTC: Aus
  Magn. Präparation: Keine
  Flipwinkel: 160 Grad
  Fettunterdr.: Keine
  Wasserunterdr.: Keine
  Magn. wiederherst.: Aus
Kontrast - Dynamisch
  Mittelungen: 1
  Mittelungsmodus: Langzeit
  Rekonstruktion: Betrag
  Messungen: 1
  Mehrere Serien: Aus
Auflösung - Allgemein
  FoV Auslese: 350 mm
  FoV Phase: 100,0 %
  Schichtdicke: 5,0 mm
  Basis-Auflösung: 320
  Phasen-Auflösung: 75 %
  Phasen Partial Fourier: 4/8
  Interpolation: Ein
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Auflösung - Filter Bild
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  Prescan Normalisierung: Ein
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Auflösung - Filter Rohdaten
  Rohdaten: Aus
  Elliptischer Filter: Aus
Geometrie - Allgemein
  Schichtgruppe: 1
  Schichten: 37
  Distanzfaktor: 10 %
  Position: L17.1 P14.5 F103.5 mm
  Orientierung: C > T1.8 > S-0.4
  Phasenkod.-Richt.: R >> L
  FoV Auslese: 350 mm
  FoV Phase: 100,0 %
  Schichtdicke: 5,0 mm
  TR: 1200,0 ms
  Mehrschichtmodus: Einzelmess.
  Serie: Absteigend
  Verknüpfungen: 3
Geometrie - AutoAlign
  Schichtgruppe: 1
  Position: L17.1 P14.5 F103.5 mm
  Orientierung: C > T1.8 > S-0.4
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Initiale Position: L17.1 P14.5 F103.5
  L: 17,1 mm
  P: 14,5 mm
  F: 103,5 mm
  Initiale Rotation: 0,00 Grad
  Initiale Orientierung: C > T
  C > T: 1,8
  > S: -0,4
Geometrie - Sättiger
  Fettunterdr.: Keine
  Wasserunterdr.: Keine
  Magn. wiederherst.: Aus
  Spez. Sättiger: Keine
Geometrie - Navigator
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: F
  Tischposition: 103 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: F
  Tischposition: 103 mm
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Physio - Signal 1
  1.Signal/Modus: Kein
  TR: 1200,0 ms
  Verknüpfungen: 3
Physio - Herz
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  FoV Auslese: 350 mm
  FoV Phase: 100,0 %
  Phasen-Auflösung: 75 %
Physio - PACE
  Atemkontrolle: Atemanhalten
  Verknüpfungen: 3
Inline - Allgemein
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Sequenz - Teil 1
  Einleitung: Aus
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  Mehrschichtmodus: Einzelmess.
  Echoabstand: 5,02 ms
  Bandbreite: 401 Hz/Px
Sequenz - Teil 2
  HF-Puls-Typ: Schnell
  Gradientenmodus: Schnell
  Hyperecho: Aus
  Turbo Faktor: 240
Sequenz - Assistent
  Mode: Aus
  Erlaubte Verzögerung: 30 s
