PrintOut

SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\localizer *
TA: 0:28 PM: ISO Voxelgröße: 0.8×0.8×6.0 mmPAT: Aus Rel. SNR: 1.00  : fl
Eigenschaften
  Prio Rekonstr.: Aus
  Bilder in den Viewer laden: Ein
  Automatischer Kinostart: Aus
  Automatische Bildspeicherung: Ein
  Bilder in die Mini-Segmente laden: Aus
  Bilder in großes Bildsegment laden: Ein
  Inline-Anzeige automatisch öffnen: Aus
  Inline-Anzeige automatisch schließen: Aus
  Start measurement without further preparation: Ein
  Auf Start duch Benutzer warten: Aus
  Start measurements: Einmal messen
Routine
  Schichtgruppe: 1
  Schichten: 5
  Distanzfaktor: 150 %
  Position: Isozentrum
  Orientierung: Transversal
  Phasenkod.-Richt.: A >> P
  Schichtgruppe: 2
  Schichten: 7
  Distanzfaktor: 30 %
  Position: L0.0 P30.0 H0.0 mm
  Orientierung: Coronal
  Phasenkod.-Richt.: R >> L
  Schichtgruppe: 3
  Schichten: 3
  Distanzfaktor: 150 %
  Position: Isozentrum
  Orientierung: Sagittal
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Phasen-Oversampling: 25 %
  FoV Auslese: 400 mm
  FoV Phase: 100,0 %
  Schichtdicke: 6,0 mm
  TR: 7,8 ms
  TE: 3,69 ms
  Mittelungen: 1
  Verknüpfungen: 15
  Filter: Verzeichn. Korr.(2D), Elliptischer Filter
  Spulenelemente: BO1-3;SP1-4
Kontrast - Allgemein
  TR: 7,8 ms
  TE: 3,69 ms
  TD: 0 ms
  MTC: Aus
  Magn. Präparation: Keine
  Flipwinkel: 20 Grad
  Fettunterdr.: Keine
  Wasserunterdr.: Keine
  SWI: Aus
Kontrast - Dynamisch
  Mittelungen: 1
  Mittelungsmodus: Kurzzeit
  Rekonstruktion: Betrag
  Messungen: 1
  Mehrere Serien: Jede Messung
Auflösung - Allgemein
  FoV Auslese: 400 mm
  FoV Phase: 100,0 %
  Schichtdicke: 6,0 mm
  Basis-Auflösung: 256
  Phasen-Auflösung: 80 %
  Phasen Partial Fourier: 7/8
  Interpolation: Ein
Auflösung - iPAT
  PAT Modus: Keiner
Auflösung - Filter Bild
  Image Filter: Aus
  Verzeichn. Korr.: Ein
  Modus: 2D
  Ungefilterte Bilder: Aus
  Prescan Normalisierung: Aus
  Normalisierung: Aus
  B1-Filter: Aus
Auflösung - Filter Rohdaten
  Rohdaten: Aus
  Elliptischer Filter: Ein
Geometrie - Allgemein
  Schichtgruppe: 1
  Schichten: 5
  Distanzfaktor: 150 %
  Position: Isozentrum
  Orientierung: Transversal
  Phasenkod.-Richt.: A >> P
  Schichtgruppe: 2
  Schichten: 7
  Distanzfaktor: 30 %
  Position: L0.0 P30.0 H0.0 mm
  Orientierung: Coronal
  Phasenkod.-Richt.: R >> L
  Schichtgruppe: 3
  Schichten: 3
  Distanzfaktor: 150 %
  Position: Isozentrum
  Orientierung: Sagittal
  Phasenkod.-Richt.: A >> P
  FoV Auslese: 400 mm
  FoV Phase: 100,0 %
  Schichtdicke: 6,0 mm
  TR: 7,8 ms
  Mehrschichtmodus: Sequenziell
  Serie: Verschachtelt
  Verknüpfungen: 15
Geometrie - AutoAlign
  Schichtgruppe: 1
  Position: Isozentrum
  Orientierung: Transversal
  Phasenkod.-Richt.: A >> P
  Schichtgruppe: 2
  Position: L0.0 P30.0 H0.0 mm
  Orientierung: Coronal
  Phasenkod.-Richt.: R >> L
  Schichtgruppe: 3
  Position: Isozentrum
  Orientierung: Sagittal
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Initiale Position: Isozentrum
  L: 0,0 mm
  P: 0,0 mm
  H: 0,0 mm
  Initiale Rotation: 0,00 Grad
  Initiale Orientierung: Transversal
Geometrie - Sättiger
  Sättigungsmodus: Standard
  Fettunterdr.: Keine
  Wasserunterdr.: Keine
  Spez. Sättiger: Keine
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: H
  Tischposition: 0 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: H
  Tischposition: 0 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: P >> A
  Transversal: H >> F
  Kanalkombination: Adaptive Combine
  Unkombiniert speichern: Aus
  Optimierung: Aus
  Spulenfokus: Konstant
  AutoAlign: ---
  Spulenanwahl: Ein  - AutoCoilSelect
System - Justagen
  B0-Shim-Modus: Tune-Up
  B1-Shim-Modus: TrueForm
  Mit Körperspule justieren: Aus
  Freq. Justage bestät.: Aus
  von Fett ausgehen: Aus
  von Silikon ausgehen: Aus
  Justagetoleranz: Auto
System - Justagevolumen
  Position: Isozentrum
  Orientierung: Transversal
  Rotation: 0,00 Grad
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Zurücksetzen: Aus
System - Tx/Rx
  Frequenz 1H: 123,250091 MHz
  Korrekturfaktor: 1
  Verstärkung: Groß
  Korr. Bildskal.: 1,000
  Zurücksetzen: Aus
  ? Ref. Amplitude 1H: 0,000 V
Physio - Signal 1
  1.Signal/Modus: Kein
  TR: 7,8 ms
  Verknüpfungen: 15
  Segmente: 1
Physio - Herz
  Hilfslinien: Keine
  Magn. Präparation: Keine
  Fettunterdr.: Keine
  Dark Blood: Aus
  FoV Auslese: 400 mm
  FoV Phase: 100,0 %
  Phasen-Auflösung: 80 %
Physio - PACE
  Atemkontrolle: Aus
  Verknüpfungen: 15
Inline - Allgemein
  Subtrahieren: Aus
  Messungen: 1
  StdAbw: Aus
  Leber Registrierung: Aus
  Originalbilder speichern: Ein
Inline - MIP
  MIP-Sag: Aus
  MIP-Cor: Aus
  MIP-Tra: Aus
  MIP-Zeit: Aus
  Originalbilder speichern: Ein
Inline - Mamma
  Wash - In: Aus
  Wash - Out: Aus
  TTP: Aus
  PEI: Aus
  MIP-Zeit: Aus
  Messungen: 1
Inline - Composing
  Inline Composing: Aus
  Verzeichn. Korr.: Ein
  Modus: 2D
  Ungefilterte Bilder: Aus
Sequenz - Teil 1
  Einleitung: Ein
  Dimension: 2D
  Phasenstabilisierung: Aus
  Asymmetrisches Echo: Aus
  Kontraste: 1
  Flusskomp.: Nein
  Mehrschichtmodus: Sequenziell
  Bandbreite: 320 Hz/Px
Sequenz - Teil 2
  Segmente: 1
  Lärmreduktion: Keine
  HF-Puls-Typ: Normal
  Gradientenmodus: Normal
  Anregung: Schichtsel.
  HF-Spoiler: Ein
Sequenz - Assistent
  Mode: Aus
  Erlaubte Verzögerung: 0 s

SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\localizer *
TA: 0:16 PM: ISO Voxelgröße: 0.8×0.8×6.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Eigenschaften
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  Start measurement without further preparation: Aus
  Auf Start duch Benutzer warten: Ein
  Start measurements: Einmal messen
Routine
  Schichtgruppe: 1
  Schichten: 5
  Distanzfaktor: 150 %
  Position: L3.9 P10.6 F81.0 mm
  Orientierung: Transversal
  Phasenkod.-Richt.: A >> P
  Schichtgruppe: 2
  Schichten: 7
  Distanzfaktor: 30 %
  Position: L12.6 A5.7 F84.7 mm
  Orientierung: C > T-1.2
  Phasenkod.-Richt.: R >> L
  Schichtgruppe: 3
  Schichten: 3
  Distanzfaktor: 150 %
  Position: R59.1 P52.2 F75.8 mm
  Orientierung: S > T1.4
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Phasen-Oversampling: 25 %
  FoV Auslese: 400 mm
  FoV Phase: 100,0 %
  Schichtdicke: 6,0 mm
  TR: 7,8 ms
  TE: 3,69 ms
  Mittelungen: 1
  Verknüpfungen: 15
  Filter: Verzeichn. Korr.(2D), Elliptischer Filter
  Spulenelemente: BO1-3;SP2-5
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Auflösung - iPAT
  PAT Modus: GRAPPA
  Beschl. Faktor PE: 2
  Ref. Zeilen PE: 24
  Referenzmessungsm.: Integriert
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Geometrie - Allgemein
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  Position: L3.9 P10.6 F81.0 mm
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  Position: L12.6 A5.7 F84.7 mm
  Orientierung: C > T-1.2
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  Position: R59.1 P52.2 F75.8 mm
  Orientierung: S > T1.4
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Geometrie - AutoAlign
  Schichtgruppe: 1
  Position: L3.9 P10.6 F81.0 mm
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  Position: L12.6 A5.7 F84.7 mm
  Orientierung: C > T-1.2
  Phasenkod.-Richt.: R >> L
  Schichtgruppe: 3
  Position: R59.1 P52.2 F75.8 mm
  Orientierung: S > T1.4
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Initiale Position: L3.9 P10.6 F81.0
  L: 3,9 mm
  P: 10,6 mm
  F: 81,0 mm
  Initiale Rotation: 0,00 Grad
  Initiale Orientierung: Transversal
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Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: F
  Tischposition: 80 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: F
  Tischposition: 80 mm
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
SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\t2_haste_cor *
TA: 0:56 PM: ISO Voxelgröße: 0.5×0.5×5.0 mmPAT: 2 Rel. SNR: 1.00  : h
Eigenschaften
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  Inline-Anzeige automatisch öffnen: Ein
  Inline-Anzeige automatisch schließen: Aus
  Start measurement without further preparation: Aus
  Auf Start duch Benutzer warten: Aus
  Start measurements: Einmal messen
Routine
  Schichtgruppe: 1
  Schichten: 37
  Distanzfaktor: 10 %
  Position: L17.1 P14.5 F103.5 mm
  Orientierung: C > T1.8 > S-0.4
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Phasen-Oversampling: 100 %
  FoV Auslese: 350 mm
  FoV Phase: 100,0 %
  Schichtdicke: 5,0 mm
  TR: 1200,0 ms
  TE: 95 ms
  Mittelungen: 1
  Verknüpfungen: 3
  Filter: Verzeichn. Korr.(2D), Prescan Normalisierung
  Spulenelemente: BO1-3;SP3-5
Kontrast - Allgemein
  TR: 1200,0 ms
  TE: 95 ms
  MTC: Aus
  Magn. Präparation: Keine
  Flipwinkel: 160 Grad
  Fettunterdr.: Keine
  Wasserunterdr.: Keine
  Magn. wiederherst.: Aus
Kontrast - Dynamisch
  Mittelungen: 1
  Mittelungsmodus: Langzeit
  Rekonstruktion: Betrag
  Messungen: 1
  Mehrere Serien: Aus
Auflösung - Allgemein
  FoV Auslese: 350 mm
  FoV Phase: 100,0 %
  Schichtdicke: 5,0 mm
  Basis-Auflösung: 320
  Phasen-Auflösung: 75 %
  Phasen Partial Fourier: 4/8
  Interpolation: Ein
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Auflösung - Filter Bild
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  Prescan Normalisierung: Ein
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Auflösung - Filter Rohdaten
  Rohdaten: Aus
  Elliptischer Filter: Aus
Geometrie - Allgemein
  Schichtgruppe: 1
  Schichten: 37
  Distanzfaktor: 10 %
  Position: L17.1 P14.5 F103.5 mm
  Orientierung: C > T1.8 > S-0.4
  Phasenkod.-Richt.: R >> L
  FoV Auslese: 350 mm
  FoV Phase: 100,0 %
  Schichtdicke: 5,0 mm
  TR: 1200,0 ms
  Mehrschichtmodus: Einzelmess.
  Serie: Absteigend
  Verknüpfungen: 3
Geometrie - AutoAlign
  Schichtgruppe: 1
  Position: L17.1 P14.5 F103.5 mm
  Orientierung: C > T1.8 > S-0.4
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Initiale Position: L17.1 P14.5 F103.5
  L: 17,1 mm
  P: 14,5 mm
  F: 103,5 mm
  Initiale Rotation: 0,00 Grad
  Initiale Orientierung: C > T
  C > T: 1,8
  > S: -0,4
Geometrie - Sättiger
  Fettunterdr.: Keine
  Wasserunterdr.: Keine
  Magn. wiederherst.: Aus
  Spez. Sättiger: Keine
Geometrie - Navigator
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: F
  Tischposition: 103 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: F
  Tischposition: 103 mm
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Physio - Signal 1
  1.Signal/Modus: Kein
  TR: 1200,0 ms
  Verknüpfungen: 3
Physio - Herz
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  FoV Auslese: 350 mm
  FoV Phase: 100,0 %
  Phasen-Auflösung: 75 %
Physio - PACE
  Atemkontrolle: Atemanhalten
  Verknüpfungen: 3
Inline - Allgemein
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Sequenz - Teil 1
  Einleitung: Aus
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  Mehrschichtmodus: Einzelmess.
  Echoabstand: 5,02 ms
  Bandbreite: 401 Hz/Px
Sequenz - Teil 2
  HF-Puls-Typ: Schnell
  Gradientenmodus: Schnell
  Hyperecho: Aus
  Turbo Faktor: 240
Sequenz - Assistent
  Mode: Aus
  Erlaubte Verzögerung: 30 s

SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\trufi_sag_ loc *
TA: 9.4 s PM: ISO Voxelgröße: 1.4×1.4×8.0 mmPAT: Aus Rel. SNR: 1.00  : tfi
Eigenschaften
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  Inline-Anzeige automatisch öffnen: Aus
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Routine
  Schichtgruppe: 1
  Schichten: 1
  Distanzfaktor: 20 %
  Position: R61.8 P21.6 F81.9 mm
  Orientierung: S > C0.7 > T0.2
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Phasen-Oversampling: 0 %
  FoV Auslese: 370 mm
  FoV Phase: 84,4 %
  Schichtdicke: 8,0 mm
  TR: 3,47 ms
  TE: 1,51 ms
  Mittelungen: 1
  Filter: Verzeichn. Korr.(2D)
  Spulenelemente: BO1-3;SP2-5
Kontrast - Allgemein
  TR: 3,47 ms
  TE: 1,51 ms
  Magn. Präparation: Keine
  Flipwinkel: 42 Grad
  Fettunterdr.: Keine
Kontrast - Dynamisch
  Mittelungen: 1
  Mittelungsmodus: Kurzzeit
  Rekonstruktion: Betrag
  Messungen: 10
  Pause nach Mess.. 1: 0,0 s
  Pause nach Mess.. 2: 0,0 s
  Pause nach Mess.. 3: 0,0 s
  Pause nach Mess.. 4: 0,0 s
  Pause nach Mess.. 5: 0,0 s
  Pause nach Mess.. 6: 0,0 s
  Pause nach Mess.. 7: 0,0 s
  Pause nach Mess.. 8: 0,0 s
  Pause nach Mess.. 9: 0,0 s
  Mehrere Serien: Aus
Auflösung - Allgemein
  FoV Auslese: 370 mm
  FoV Phase: 84,4 %
  Schichtdicke: 8,0 mm
  Basis-Auflösung: 256
  Phasen-Auflösung: 100 %
  Phasen Partial Fourier: Aus
  Interpolation: Aus
Auflösung - iPAT
  PAT Modus: Keiner
Auflösung - Filter Bild
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  Prescan Normalisierung: Aus
  Normalisierung: Aus
  B1-Filter: Aus
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Geometrie - Allgemein
  Schichtgruppe: 1
  Schichten: 1
  Distanzfaktor: 20 %
  Position: R61.8 P21.6 F81.9 mm
  Orientierung: S > C0.7 > T0.2
  Phasenkod.-Richt.: A >> P
  FoV Auslese: 370 mm
  FoV Phase: 84,4 %
  Schichtdicke: 8,0 mm
  TR: 3,47 ms
  Mehrschichtmodus: Sequenziell
  Serie: Verschachtelt
Geometrie - AutoAlign
  Schichtgruppe: 1
  Position: R61.8 P21.6 F81.9 mm
  Orientierung: S > C0.7 > T0.2
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Initiale Position: R61.8 P21.6 F81.9
  R: 61,8 mm
  P: 21,6 mm
  F: 81,9 mm
  Initiale Rotation: 0,00 Grad
  Initiale Orientierung: S > C
  S > C: 0,7
  > T: 0,2
Geometrie - Navigator
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: F
  Tischposition: 82 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: F
  Tischposition: 82 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: F >> H
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System - Justagen
  B0-Shim-Modus: Standard
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System - Justagevolumen
  Position: R61.8 P21.6 F81.9 mm
  Orientierung: S > C0.7 > T0.2
  Rotation: 0,00 Grad
  A >> P: 313 mm
  F >> H: 370 mm
  R >> L: 8 mm
  Zurücksetzen: Aus
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Physio - Signal 1
  1.Signal/Modus: Kein
  TR: 3,47 ms
  Segmente: 1
Physio - PACE
  Atemkontrolle: Aus
Inline - Allgemein
  Subtrahieren: Aus
  Messungen: 10
  StdAbw: Aus
  Originalbilder speichern: Ein
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Sequenz - Teil 1
  Einleitung: Ein
  Dimension: 2D
  Sortierung: Linear
  Asymmetrisches Echo: Erlaubt
  Flusskomp.: Nein
  Mehrschichtmodus: Sequenziell
  Bandbreite: 781 Hz/Px
Sequenz - Teil 2
  Segmente: 1
  HF-Puls-Typ: Normal
  Gradientenmodus: Schnell
  Anregung: Schichtsel.
Sequenz - Assistent
  Mode: Aus

SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\trufi_cor_ loc *
TA: 0:11 PM: ISO Voxelgröße: 1.4×1.4×8.0 mmPAT: Aus Rel. SNR: 1.00  : tfi
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Routine
  Schichtgruppe: 1
  Schichten: 1
  Distanzfaktor: 20 %
  Position: L6.6 P18.0 F74.7 mm
  Orientierung: C > T1.1 > S0.1
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Phasen-Oversampling: 0 %
  FoV Auslese: 370 mm
  FoV Phase: 100,0 %
  Schichtdicke: 8,0 mm
  TR: 3,47 ms
  TE: 1,51 ms
  Mittelungen: 1
  Filter: Verzeichn. Korr.(2D)
  Spulenelemente: BO1-3;SP2-5
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Auflösung - Allgemein
  FoV Auslese: 370 mm
  FoV Phase: 100,0 %
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Geometrie - Allgemein
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  Position: L6.6 P18.0 F74.7 mm
  Orientierung: C > T1.1 > S0.1
  Phasenkod.-Richt.: R >> L
  FoV Auslese: 370 mm
  FoV Phase: 100,0 %
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Geometrie - AutoAlign
  Schichtgruppe: 1
  Position: L6.6 P18.0 F74.7 mm
  Orientierung: C > T1.1 > S0.1
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Initiale Position: L6.6 P18.0 F74.7
  L: 6,6 mm
  P: 18,0 mm
  F: 74,7 mm
  Initiale Rotation: 0,00 Grad
  Initiale Orientierung: C > T
  C > T: 1,1
  > S: 0,1
Geometrie - Navigator
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: F
  Tischposition: 75 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: F
  Tischposition: 75 mm
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System - Justagevolumen
  Position: L6.6 P18.0 F74.7 mm
  Orientierung: C > T1.1 > S0.1
  Rotation: 0,00 Grad
  R >> L: 370 mm
  F >> H: 370 mm
  A >> P: 8 mm
  Zurücksetzen: Aus
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
SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\t2_haste_tra_mbh *
TA: 1:13 PM: ISO Voxelgröße: 1.1×1.1×5.0 mmPAT: 2 Rel. SNR: 1.00  : h
Eigenschaften
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  Bilder in großes Bildsegment laden: Aus
  Inline-Anzeige automatisch öffnen: Ein
  Inline-Anzeige automatisch schließen: Ein
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Routine
  Schichtgruppe: 1
  Schichten: 38
  Distanzfaktor: 10 %
  Position: R10.2 P8.7 H6.1 mm
  Orientierung: T > S-3.0 > C2.6
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Phasen-Oversampling: 97 %
  FoV Auslese: 350 mm
  FoV Phase: 100,0 %
  Schichtdicke: 5,0 mm
  TR: 1600,0 ms
  TE: 105 ms
  Mittelungen: 1
  Verknüpfungen: 3
  Filter: Verzeichn. Korr.(2D), Prescan Normalisierung
  Spulenelemente: BO1-3;SP4,5
Kontrast - Allgemein
  TR: 1600,0 ms
  TE: 105 ms
  MTC: Aus
  Magn. Präparation: Keine
  Flipwinkel: 160 Grad
  Fettunterdr.: Keine
  Wasserunterdr.: Keine
  Magn. wiederherst.: Aus
Kontrast - Dynamisch
  Mittelungen: 1
  Mittelungsmodus: Langzeit
  Rekonstruktion: Betrag
  Messungen: 1
  Mehrere Serien: Aus
Auflösung - Allgemein
  FoV Auslese: 350 mm
  FoV Phase: 100,0 %
  Schichtdicke: 5,0 mm
  Basis-Auflösung: 320
  Phasen-Auflösung: 81 %
  Phasen Partial Fourier: 4/8
  Interpolation: Aus
Auflösung - iPAT
  PAT Modus: GRAPPA
  Beschl. Faktor PE: 2
  Ref. Zeilen PE: 42
  Referenzmessungsm.: Integriert
Auflösung - Filter Bild
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  Prescan Normalisierung: Ein
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Geometrie - Allgemein
  Schichtgruppe: 1
  Schichten: 38
  Distanzfaktor: 10 %
  Position: R10.2 P8.7 H6.1 mm
  Orientierung: T > S-3.0 > C2.6
  Phasenkod.-Richt.: A >> P
  FoV Auslese: 350 mm
  FoV Phase: 100,0 %
  Schichtdicke: 5,0 mm
  TR: 1600,0 ms
  Mehrschichtmodus: Einzelmess.
  Serie: Absteigend
  Verknüpfungen: 3
Geometrie - AutoAlign
  Schichtgruppe: 1
  Position: R10.2 P8.7 H6.1 mm
  Orientierung: T > S-3.0 > C2.6
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Initiale Position: R10.2 P8.7 H6.1
  R: 10,2 mm
  P: 8,7 mm
  H: 6,1 mm
  Initiale Rotation: 0,80 Grad
  Initiale Orientierung: T > S
  T > S: -3,0
  > C: 2,6
Geometrie - Sättiger
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  Spez. Sättiger: Parallel F/H
  Lücke: 10 mm
  Dicke: 60 mm
Geometrie - Navigator
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: H
  Tischposition: 6 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: H
  Tischposition: 6 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: P >> A
  Transversal: H >> F
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  Spulenanwahl: Default
System - Justagen
  B0-Shim-Modus: Tune-Up
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System - Justagevolumen
  Position: Isozentrum
  Orientierung: Transversal
  Rotation: 0,00 Grad
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Zurücksetzen: Aus
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Physio - Signal 1
  1.Signal/Modus: Kein
  TR: 1600,0 ms
  Verknüpfungen: 3
Physio - Herz
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  Phasen-Auflösung: 81 %
Physio - PACE
  Atemkontrolle: Atemanhalten
  Verknüpfungen: 3
Inline - Allgemein
  Subtrahieren: Aus
  Messungen: 1
  StdAbw: Aus
  Originalbilder speichern: Ein
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Sequenz - Teil 1
  Einleitung: Aus
  Dimension: 2D
  Kontraste: 1
  Flusskomp.: Nein
  Mehrschichtmodus: Einzelmess.
  Echoabstand: 5,02 ms
  Bandbreite: 401 Hz/Px
Sequenz - Teil 2
  HF-Puls-Typ: Schnell
  Gradientenmodus: Schnell
  Hyperecho: Aus
  Turbo Faktor: 259
Sequenz - Assistent
  Mode: Min. Flipwinkel
  Min. Flipwinkel: 140 Grad
  Erlaubte Verzögerung: 30 s

SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\t1_fl2d_in-opp_tra *
TA: 1:15 PM: ISO Voxelgröße: 0.5×0.5×5.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Eigenschaften
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  Bilder in großes Bildsegment laden: Ein
  Inline-Anzeige automatisch öffnen: Ein
  Inline-Anzeige automatisch schließen: Aus
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Routine
  Schichtgruppe: 1
  Schichten: 38
  Distanzfaktor: 10 %
  Position: R7.8 P31.9 H105.3 mm
  Orientierung: T > C2.7 > S-0.7
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Phasen-Oversampling: 0 %
  FoV Auslese: 350 mm
  FoV Phase: 100,0 %
  Schichtdicke: 5,0 mm
  TR: 149,0 ms
  TE 1: 2,46 ms
  TE 2: 6,15 ms
  Mittelungen: 1
  Verknüpfungen: 3
  Filter: Verzeichn. Korr.(2D), Prescan Normalisierung
  Spulenelemente: BO1,2;SP3,4
Kontrast - Allgemein
  TR: 149,0 ms
  TE 1: 2,46 ms
  TE 2: 6,15 ms
  MTC: Aus
  Magn. Präparation: Keine
  Flipwinkel: 70 Grad
  Fettunterdr.: Keine
  Wasserunterdr.: Keine
  SWI: Aus
Kontrast - Dynamisch
  Mittelungen: 1
  Mittelungsmodus: Kurzzeit
  Rekonstruktion: Betrag
  Messungen: 1
  Mehrere Serien: Jede Messung
Auflösung - Allgemein
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  Phasen-Auflösung: 80 %
  Phasen Partial Fourier: Aus
  Interpolation: Ein
Auflösung - iPAT
  PAT Modus: GRAPPA
  Beschl. Faktor PE: 2
  Ref. Zeilen PE: 24
  Referenzmessungsm.: Integriert
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Geometrie - Allgemein
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  Position: R7.8 P31.9 H105.3 mm
  Orientierung: T > C2.7 > S-0.7
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  TR: 149,0 ms
  Mehrschichtmodus: Verschachtelt
  Serie: Verschacht. in A. A.
  Verknüpfungen: 3
Geometrie - AutoAlign
  Schichtgruppe: 1
  Position: R7.8 P31.9 H105.3 mm
  Orientierung: T > C2.7 > S-0.7
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Initiale Position: R7.8 P31.9 H105.3
  R: 7,8 mm
  P: 31,9 mm
  H: 105,3 mm
  Initiale Rotation: 0,80 Grad
  Initiale Orientierung: T > C
  T > C: 2,7
  > S: -0,7
Geometrie - Sättiger
  Sättigungsmodus: Quick
  Fettunterdr.: Keine
  Wasserunterdr.: Keine
  Spez. Sättiger: Q-parallel F/H
  Lücke: 10,0 mm
  Dicke: 60 mm
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: H
  Tischposition: 105 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: H
  Tischposition: 105 mm
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  Spulenanwahl: Ein  - AutoCoilSelect
System - Justagen
  B0-Shim-Modus: Standard
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System - Justagevolumen
  Position: R7.8 P31.9 H105.3 mm
  Orientierung: T > C2.7 > S-0.7
  Rotation: 0,80 Grad
  A >> P: 350 mm
  R >> L: 350 mm
  F >> H: 209 mm
  Zurücksetzen: Aus
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Physio - Signal 1
  1.Signal/Modus: Kein
  TR: 149,0 ms
  Verknüpfungen: 3
  Segmente: 1
Physio - Herz
  Hilfslinien: Keine
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  Phasen-Auflösung: 80 %
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Inline - Allgemein
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  Leber Registrierung: Aus
  Originalbilder speichern: Ein
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Sequenz - Teil 1
  Einleitung: Aus
  Dimension: 2D
  Phasenstabilisierung: Aus
  Asymmetrisches Echo: Erlaubt
  Kontraste: 2
  Flusskomp. 1: Nein
  Auslese Modus: Bipolar
  Mehrschichtmodus: Verschachtelt
  Bandbreite 1: 300 Hz/Px
  Bandbreite 2: 290 Hz/Px
Sequenz - Teil 2
  Segmente: 1
  Lärmreduktion: Keine
  HF-Puls-Typ: Schnell
  Gradientenmodus: Schnell
  Anregung: Schichtsel.
  HF-Spoiler: Ein
Sequenz - Assistent
  Mode: Aus
  Erlaubte Verzögerung: 60 s

SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\ep2d_diff_b50_400_800_tra_p3 *
TA: 3:27 PM: ISO Voxelgröße: 2.1×2.1×5.0 mmPAT: 3 Rel. SNR: 1.00  : epse
Eigenschaften
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  Bilder in großes Bildsegment laden: Aus
  Inline-Anzeige automatisch öffnen: Aus
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Routine
  Schichtgruppe: 1
  Schichten: 38
  Distanzfaktor: 20 %
  Position: L10.6 P17.3 F7.9 mm
  Orientierung: T > S-1.8 > C1.5
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Phasen-Oversampling: 0 %
  FoV Auslese: 380 mm
  FoV Phase: 100,0 %
  Schichtdicke: 5,0 mm
  TR: 6300 ms
  TE: 69,0 ms
  Verknüpfungen: 1
  Filter: Rohdaten, Korr. Dynamischer Felder, Verzeichn. Korr.(2D), Prescan Normalisierung
  Spulenelemente: BO1-3;SP3,4
Kontrast - Allgemein
  TR: 6300 ms
  TE: 69,0 ms
  MTC: Aus
  Magn. Präparation: Keine
  Fettunterdr.: SPAIR
  Fettsät. Art: Stark
Kontrast - Dynamisch
  Mittelungsmodus: Langzeit
  Rekonstruktion: Betrag
  Messungen: 1
  Verzögerung in TR: 0 ms
Auflösung - Allgemein
  FoV Auslese: 380 mm
  FoV Phase: 100,0 %
  Schichtdicke: 5,0 mm
  Basis-Auflösung: 184
  Phasen-Auflösung: 100 %
  Phasen Partial Fourier: Aus
  Interpolation: Aus
Auflösung - iPAT
  Beschl. Modus: GRAPPA
  Beschl. Faktor PE: 3
  Ref. Zeilen PE: 48
  Referenzmessungsm.: GRE/separate
Auflösung - Filter Bild
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  Korr. Dynamischer Felder: Ein
  Ungefilterte Bilder: Aus
Auflösung - Filter Rohdaten
  Rohdaten: Ein
  Elliptischer Filter: Aus
Geometrie - Allgemein
  Schichtgruppe: 1
  Schichten: 38
  Distanzfaktor: 20 %
  Position: L10.6 P17.3 F7.9 mm
  Orientierung: T > S-1.8 > C1.5
  Phasenkod.-Richt.: R >> L
  FoV Auslese: 380 mm
  FoV Phase: 100,0 %
  Schichtdicke: 5,0 mm
  TR: 6300 ms
  Mehrschichtmodus: Verschachtelt
  Serie: Aufsteigend
  Verknüpfungen: 1
Geometrie - AutoAlign
  Schichtgruppe: 1
  Position: L10.6 P17.3 F7.9 mm
  Orientierung: T > S-1.8 > C1.5
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Initiale Position: L10.6 P17.3 F7.9
  L: 10,6 mm
  P: 17,3 mm
  F: 7,9 mm
  Initiale Rotation: 89,30 Grad
  Initiale Orientierung: T > S
  T > S: -1,8
  > C: 1,5
Geometrie - Sättiger
  Fettunterdr.: SPAIR
  Fettsät. Art: Stark
  Spez. Sättiger: Keine
Geometrie - Navigator
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: F
  Tischposition: 8 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: F
  Tischposition: 8 mm
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  Spulenanwahl: Default
System - Justagen
  B0-Shim-Modus: Standard
  B1-Shim-Modus: TrueForm C
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System - Justagevolumen
  Position: L10.6 P17.3 F7.9 mm
  Orientierung: T > S-1.8 > C1.5
  Rotation: 89,30 Grad
  R >> L: 380 mm
  A >> P: 380 mm
  F >> H: 227 mm
  Zurücksetzen: Aus
System - Tx/Rx
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  Korr. Bildskal.: 3,000
  Zurücksetzen: Aus
  ? Ref. Amplitude 1H: 0,000 V
Physio - Signal 1
  1.Signal/Modus: Kein
  TR: 6300 ms
  Verknüpfungen: 1
Physio - PACE
  Atemkontrolle: Aus
  Verknüpfungen: 1
Diff - Neuro
  Diffusionsmodus: 4-Scan Trace
  Diff.-Richtungen: 4
  Diffusionsschema: Monopolar
  Diffusions-Wichtungen: 3
  b-Wert 1: 50 s/mm²
  b-Wert 2: 400 s/mm²
  b-Wert 3: 800 s/mm²
  b-Wert 1: 1
  b-Wert 2: 2
  b-Wert 3: 4
  Diffusionsgew. Bilder: Aus
  Tracegew. Bilder: Ein
  ADC Karten: Ein
  FA Karten: Aus
  Mosaik: Aus
  Tensor: Aus
  Rauschpegel: 10
Diff - Körper
  Diffusionsmodus: 4-Scan Trace
  Diff.-Richtungen: 4
  Diffusionsschema: Monopolar
  Diffusions-Wichtungen: 3
  b-Wert 1: 50 s/mm²
  b-Wert 2: 400 s/mm²
  b-Wert 3: 800 s/mm²
  b-Wert 1: 1
  b-Wert 2: 2
  b-Wert 3: 4
  Diffusionsgew. Bilder: Aus
  Tracegew. Bilder: Ein
  ADC Karten: Ein
  Exponentielle ADC Maps: Aus
  FA Karten: Aus
  Graustufen invertieren: Aus
  Berechnetes Bild: Aus
  b-Wert >=: 50 s/mm²
  Rauschpegel: 10
Diff - Composing
  Inline Composing: Aus
  Verzeichn. Korr.: Ein
  Modus: 2D
Sequenz - Teil 1
  Einleitung: Ein
  Optimierung: Min. TE
  Mehrschichtmodus: Verschachtelt
  Freier Echoabstand: Aus
  Echoabstand: 0,71 ms
  Bandbreite: 2090 Hz/Px
Sequenz - Teil 2
  EPI Faktor: 184
  HF-Puls-Typ: Normal
  Gradientenmodus: Schnell

SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\t2_space_cor_p3_trig_ *
TA: 3:58 PM: ISO Voxelgröße: 0.3×0.3×0.9 mmPAT: 3 Rel. SNR: 1.00  : spcR
Eigenschaften
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  Inline-Anzeige automatisch öffnen: Ein
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Routine
  3D-Block-Gruppe: 1
  3D-Blöcke: 1
  Position: L3.6 A35.0 H30.2 mm
  Orientierung: C > S12.1 > T0.1
  Phasenkod.-Richt.: F >> H
  AutoAlign: ---
  Phasen-Oversampling: 70 %
  Schicht-Oversampling: 11,1 %
  Schichten im 3D-Block: 72
  FoV Auslese: 220 mm
  FoV Phase: 100,0 %
  Schichtdicke: 0,90 mm
  TR: 2400 ms
  TE: 499 ms
  Mittelungen: 1,8
  Verknüpfungen: 1
  Filter: Rohdaten, Verzeichn. Korr.(2D), Prescan Normalisierung
  Spulenelemente: BO1-3;SP2-5
Kontrast - Allgemein
  TR: 2400 ms
  TE: 499 ms
  MTC: Aus
  Magn. Präparation: Keine
  Flip angle: 100 Grad
  Fettunterdr.: SPAIR
  Fettsät. Art: Stark
  Blutunterdr.: Aus
  Magn. wiederherst.: Ein
Kontrast - Dynamisch
  Mittelungen: 1,8
  Rekonstruktion: Betrag
  Messungen: 1
  Mehrere Serien: Jede Messung
Auflösung - Allgemein
  FoV Auslese: 220 mm
  FoV Phase: 100,0 %
  Schichtdicke: 0,90 mm
  Basis-Auflösung: 320
  Phasen-Auflösung: 100 %
  Schicht-Auflösung: 75 %
  Phasen Partial Fourier: Erlaubt
  Schicht Partial Fourier: 5/8
  Interpolation: Ein
Auflösung - iPAT
  PAT Modus: GRAPPA
  Beschl. Faktor PE: 3
  Ref. Zeilen PE: 24
  Beschl. Faktor 3D: 1
  Referenzmessungsm.: Integriert
Auflösung - Filter Bild
  Image Filter: Aus
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  Normalisierung: Aus
  B1-Filter: Aus
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Geometrie - Allgemein
  3D-Block-Gruppe: 1
  3D-Blöcke: 1
  Position: L3.6 A35.0 H30.2 mm
  Orientierung: C > S12.1 > T0.1
  Phasenkod.-Richt.: F >> H
  Schicht-Oversampling: 11,1 %
  Schichten im 3D-Block: 72
  FoV Auslese: 220 mm
  FoV Phase: 100,0 %
  Schichtdicke: 0,90 mm
  TR: 2400 ms
  Serie: Verschachtelt
  Verknüpfungen: 1
Geometrie - AutoAlign
  3D-Block-Gruppe: 1
  Position: L3.6 A35.0 H30.2 mm
  Orientierung: C > S12.1 > T0.1
  Phasenkod.-Richt.: F >> H
  AutoAlign: ---
  Initiale Position: L3.6 A35.0 H30.2
  L: 3,6 mm
  A: 35,0 mm
  H: 30,2 mm
  Initiale Rotation: 90,00 Grad
  Initiale Orientierung: C > S
  C > S: 12,1
  > T: 0,1
Geometrie - Sättiger
  Fettunterdr.: SPAIR
  Fettsät. Art: Stark
  Magn. wiederherst.: Ein
  Spez. Sättiger: Keine
Geometrie - Navigator
  Navigator: 1
  Position: R64.9 A46.4 H159.6 mm
  Orientierung: C > T3.6
  Rotation: -0,04 Grad
  FoV Phase: 32 mm
  FoV Auslese: 96 mm
  Dicke: 10,0 mm
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: H
  Tischposition: 30 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: H
  Tischposition: 30 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: H >> F
  Kanalkombination: Adaptive Combine
  Unkombiniert speichern: Aus
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System - Justagen
  B0-Shim-Modus: Standard
  B1-Shim-Modus: TrueForm
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System - Justagevolumen
  Position: L3.6 A35.0 H30.2 mm
  Orientierung: C > S12.1 > T0.1
  Rotation: 90,00 Grad
  F >> H: 220 mm
  R >> L: 220 mm
  A >> P: 65 mm
  Zurücksetzen: Aus
System - Tx/Rx
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  Korr. Bildskal.: 1,000
  Zurücksetzen: Aus
  ? Ref. Amplitude 1H: 0,000 V
Physio - Signal 1
  1.Signal/Modus: Kein
  Trigger-Verzögerung: 0 ms
  TR: 2400 ms
  Verknüpfungen: 1
Physio - Herz
  Magn. Präparation: Keine
  Fettunterdr.: SPAIR
  Dark Blood: Aus
  FoV Auslese: 220 mm
  FoV Phase: 100,0 %
  Phasen-Auflösung: 100 %
Physio - PACE
  Atemkontrolle: Trigger
  Scout Modus: Aus
  Scout TR: 150 ms
  Akzeptanzfenster ±: 2,0 mm
  Setze Akzeptanzfenster: Automatisch
  Akquisitionsfenster: 1200 ms
  Trigger-Puls: 1
  Scout-Typ: Leberkuppen-Scout
  Verknüpfungen: 1
  Profil speichern: Ein
Inline - Allgemein
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Inline - MIP
  MIP-Sag: Aus
  MIP-Cor: Ein
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Sequenz - Teil 1
  Einleitung: Ein
  Dimension: 3D
  Elliptische Abtastung: Aus
  Sortierung: Linear
  Flusskomp.: Nein
  Echoabstand: 5,44 ms
  Adiabat. Modus: Aus
  Bandbreite: 355 Hz/Px
Sequenz - Teil 2
  Echozugdauer: 979 ms
  HF-Puls-Typ: SAR klein
  Gradientenmodus: Schnell
  Anregung: 3D-Block sel.
  Flipwinkel Modus: Konstant
  Turbo Faktor: 180
Sequenz - Assistent
  Erlaubte Verzögerung: 30 s

SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\t2_tse3d_cor_p2_trig_384 testen *
TA: 6:50 PM: ISO Voxelgröße: 0.5×0.5×2.0 mmPAT: 2 Rel. SNR: 1.00  : tseR
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Routine
  3D-Block-Gruppe: 1
  3D-Blöcke: 1
  Distanzfaktor: 50 %
  Position: Isozentrum
  Orientierung: Coronal
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Phasen-Oversampling: 30 %
  Schicht-Oversampling: 10,0 %
  Schichten im 3D-Block: 40
  FoV Auslese: 380 mm
  FoV Phase: 100,0 %
  Schichtdicke: 2,00 mm
  TR: 2500,0 ms
  TE: 716 ms
  Mittelungen: 1
  Verknüpfungen: 1
  Filter: Verzeichn. Korr.(2D)
  Spulenelemente: BO1-3;SP1-3
Kontrast - Allgemein
  TR: 2500,0 ms
  TE: 716 ms
  MTC: Aus
  Magn. Präparation: Keine
  Flipwinkel: 160 Grad
  Fettunterdr.: SPAIR
  Fettsät. Art: Stark
  Wasserunterdr.: Keine
  Magn. wiederherst.: Ein
Kontrast - Dynamisch
  Mittelungen: 1
  Mittelungsmodus: Langzeit
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Auflösung - Allgemein
  FoV Auslese: 380 mm
  FoV Phase: 100,0 %
  Schichtdicke: 2,00 mm
  Basis-Auflösung: 384
  Phasen-Auflösung: 98 %
  Schicht-Auflösung: 82 %
  Phasen Partial Fourier: Erlaubt
  Schicht Partial Fourier: 6/8
  Trajektorie: Kartesisch
  Interpolation: Ein
Auflösung - iPAT
  PAT Modus: GRAPPA
  Beschl. Faktor PE: 2
  Ref. Zeilen PE: 259
  Beschl. Faktor 3D: 1
  Referenzmessungsm.: Integriert
Auflösung - Filter Bild
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  Prescan Normalisierung: Aus
  Normalisierung: Aus
  B1-Filter: Aus
Auflösung - Filter Rohdaten
  Rohdaten: Aus
  Elliptischer Filter: Aus
Geometrie - Allgemein
  3D-Block-Gruppe: 1
  3D-Blöcke: 1
  Distanzfaktor: 50 %
  Position: Isozentrum
  Orientierung: Coronal
  Phasenkod.-Richt.: R >> L
  Schicht-Oversampling: 10,0 %
  Schichten im 3D-Block: 40
  FoV Auslese: 380 mm
  FoV Phase: 100,0 %
  Schichtdicke: 2,00 mm
  TR: 2500,0 ms
  Mehrschichtmodus: Verschachtelt
  Serie: Verschachtelt
  Verknüpfungen: 1
Geometrie - AutoAlign
  3D-Block-Gruppe: 1
  Position: Isozentrum
  Orientierung: Coronal
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Initiale Position: Isozentrum
  L: 0,0 mm
  P: 0,0 mm
  H: 0,0 mm
  Initiale Rotation: 0,00 Grad
  Initiale Orientierung: Coronal
Geometrie - Sättiger
  Fettunterdr.: SPAIR
  Fettsät. Art: Stark
  Wasserunterdr.: Keine
  Magn. wiederherst.: Ein
  Spez. Sättiger: Keine
Geometrie - Navigator
  Navigator: 1
  Position: Isozentrum
  Orientierung: Coronal
  Rotation: 0,00 Grad
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Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: H
  Tischposition: 0 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: H
  Tischposition: 0 mm
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System - Justagevolumen
  Position: Isozentrum
  Orientierung: Coronal
  Rotation: 0,00 Grad
  R >> L: 380 mm
  F >> H: 380 mm
  A >> P: 80 mm
  Zurücksetzen: Aus
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Physio - Signal 1
  1.Signal/Modus: Kein
  TR: 2500,0 ms
  Verknüpfungen: 1
Physio - Herz
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  FoV Auslese: 380 mm
  FoV Phase: 100,0 %
  Phasen-Auflösung: 98 %
  Trajektorie: Kartesisch
Physio - PACE
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  Wähle Aquisitionsfenster: Manuell
  Akquisitionsfenster: 1509 ms
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Sequenz - Teil 1
  Einleitung: Ein
  Dimension: 3D
  Kompensiere T2 Zerfall: Aus
  Reduz. Bewegungsempf.: Aus
  Kontraste: 1
  Flusskomp.: Nein
  Mehrschichtmodus: Verschachtelt
  Freier Echoabstand: Aus
  Echoabstand: 10,7 ms
  Bandbreite: 260 Hz/Px
Sequenz - Teil 2
  Definiere: Turbo Faktor
  Echozüge pro Schicht: 3
  Phasenkorrektur: Automatisch
  Lärmreduktion: Keine
  HF-Puls-Typ: Normal
  Gradientenmodus: Schnell
  Hyperecho: Aus
  WARP: Aus
  Red. EC Sensitivität: Aus
  Turbo Faktor: 125
Sequenz - Assistent
  Mode: Aus
  Erlaubte Verzögerung: 60 s

SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\t2_haste_fs_cor_thick_sl *
TA: 6.0 s PM: ISO Voxelgröße: 0.7×0.7×50.0 mmPAT: 2 Rel. SNR: 1.00  : h
Eigenschaften
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  Bilder in großes Bildsegment laden: Ein
  Inline-Anzeige automatisch öffnen: Aus
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Routine
  Schichtgruppe: 1
  Schichten: 1
  Distanzfaktor: 50 %
  Position: L15.9 A19.5 F102.2 mm
  Orientierung: C > S-0.5 > T-0.1
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Phasen-Oversampling: 80 %
  FoV Auslese: 280 mm
  FoV Phase: 100,0 %
  Schichtdicke: 50,0 mm
  TR: 6000,0 ms
  TE: 737 ms
  Mittelungen: 1
  Verknüpfungen: 1
  Filter: Verzeichn. Korr.(2D)
  Spulenelemente: BO1-3;SP3-5
Kontrast - Allgemein
  TR: 6000,0 ms
  TE: 737 ms
  MTC: Aus
  Magn. Präparation: Keine
  Flipwinkel: 180 Grad
  Fettunterdr.: Fettsättig.
  Fettsät. Art: Stark
  Wasserunterdr.: Keine
  Magn. wiederherst.: Aus
Kontrast - Dynamisch
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  Mehrere Serien: Aus
Auflösung - Allgemein
  FoV Auslese: 280 mm
  FoV Phase: 100,0 %
  Schichtdicke: 50,0 mm
  Basis-Auflösung: 384
  Phasen-Auflösung: 70 %
  Phasen Partial Fourier: 7/8
  Interpolation: Aus
Auflösung - iPAT
  PAT Modus: GRAPPA
  Beschl. Faktor PE: 2
  Ref. Zeilen PE: 24
  Referenzmessungsm.: Integriert
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Geometrie - Allgemein
  Schichtgruppe: 1
  Schichten: 1
  Distanzfaktor: 50 %
  Position: L15.9 A19.5 F102.2 mm
  Orientierung: C > S-0.5 > T-0.1
  Phasenkod.-Richt.: R >> L
  FoV Auslese: 280 mm
  FoV Phase: 100,0 %
  Schichtdicke: 50,0 mm
  TR: 6000,0 ms
  Mehrschichtmodus: Einzelmess.
  Serie: Verschacht. in A. A.
  Verknüpfungen: 1
Geometrie - AutoAlign
  Schichtgruppe: 1
  Position: L15.9 A19.5 F102.2 mm
  Orientierung: C > S-0.5 > T-0.1
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Initiale Position: L15.9 A19.5 F102.2
  L: 15,9 mm
  A: 19,5 mm
  F: 102,2 mm
  Initiale Rotation: 0,00 Grad
  Initiale Orientierung: C > S
  C > S: -0,5
  > T: -0,1
Geometrie - Sättiger
  Fettunterdr.: Fettsättig.
  Fettsät. Art: Stark
  Wasserunterdr.: Keine
  Magn. wiederherst.: Aus
  Spez. Sättiger: Keine
Geometrie - Navigator
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: F
  Tischposition: 102 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: F
  Tischposition: 102 mm
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  Spulenanwahl: Ein  - AutoCoilSelect
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System - Justagevolumen
  Position: L15.9 A19.5 F102.2 mm
  Orientierung: C > S-0.5 > T-0.1
  Rotation: 0,00 Grad
  R >> L: 280 mm
  F >> H: 280 mm
  A >> P: 50 mm
  Zurücksetzen: Aus
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Physio - Signal 1
  1.Signal/Modus: Kein
  TR: 6000,0 ms
  Verknüpfungen: 1
Physio - Herz
  Magn. Präparation: Keine
  Fettunterdr.: Fettsättig.
  Dark Blood: Aus
  FoV Auslese: 280 mm
  FoV Phase: 100,0 %
  Phasen-Auflösung: 70 %
Physio - PACE
  Atemkontrolle: Atemanhalten
  Verknüpfungen: 1
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Inline - MIP
  MIP-Sag: Aus
  MIP-Cor: Aus
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Sequenz - Teil 1
  Einleitung: Aus
  Dimension: 2D
  Kontraste: 1
  Flusskomp.: Nein
  Mehrschichtmodus: Einzelmess.
  Echoabstand: 6,64 ms
  Bandbreite: 352 Hz/Px
Sequenz - Teil 2
  HF-Puls-Typ: Normal
  Gradientenmodus: Normal
  Hyperecho: Aus
  Turbo Faktor: 269
Sequenz - Assistent
  Mode: Aus
  Erlaubte Verzögerung: 30 s

SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\t2_haste_fs_cor_thick_sl *
TA: 6.0 s PM: ISO Voxelgröße: 0.7×0.7×50.0 mmPAT: 2 Rel. SNR: 1.00  : h
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Routine
  Schichtgruppe: 1
  Schichten: 1
  Distanzfaktor: 50 %
  Position: L31.8 A13.3 F94.5 mm
  Orientierung: C > S23.2 > T0.1
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Phasen-Oversampling: 80 %
  FoV Auslese: 280 mm
  FoV Phase: 100,0 %
  Schichtdicke: 50,0 mm
  TR: 6000,0 ms
  TE: 737 ms
  Mittelungen: 1
  Verknüpfungen: 1
  Filter: Verzeichn. Korr.(2D)
  Spulenelemente: BO1-3;SP3-5
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Geometrie - Allgemein
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  Position: L31.8 A13.3 F94.5 mm
  Orientierung: C > S23.2 > T0.1
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Geometrie - AutoAlign
  Schichtgruppe: 1
  Position: L31.8 A13.3 F94.5 mm
  Orientierung: C > S23.2 > T0.1
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Initiale Position: L31.8 A13.3 F94.5
  L: 31,8 mm
  A: 13,3 mm
  F: 94,5 mm
  Initiale Rotation: 0,00 Grad
  Initiale Orientierung: C > S
  C > S: 23,2
  > T: 0,1
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Geometrie - Navigator
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: F
  Tischposition: 95 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: F
  Tischposition: 95 mm
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System - Justagevolumen
  Position: L31.8 A13.3 F94.5 mm
  Orientierung: C > S23.2 > T0.1
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
SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\t2_haste_fs_cor_thick_sl *
TA: 6.0 s PM: ISO Voxelgröße: 0.7×0.7×50.0 mmPAT: 2 Rel. SNR: 1.00  : h
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Routine
  Schichtgruppe: 1
  Schichten: 1
  Distanzfaktor: 50 %
  Position: L10.6 A13.8 F72.4 mm
  Orientierung: C > S-24.0 > T-0.3
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Phasen-Oversampling: 80 %
  FoV Auslese: 280 mm
  FoV Phase: 100,0 %
  Schichtdicke: 50,0 mm
  TR: 6000,0 ms
  TE: 737 ms
  Mittelungen: 1
  Verknüpfungen: 1
  Filter: Verzeichn. Korr.(2D)
  Spulenelemente: BO1-3;SP3-5
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Geometrie - Allgemein
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  Position: L10.6 A13.8 F72.4 mm
  Orientierung: C > S-24.0 > T-0.3
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Geometrie - AutoAlign
  Schichtgruppe: 1
  Position: L10.6 A13.8 F72.4 mm
  Orientierung: C > S-24.0 > T-0.3
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Initiale Position: L10.6 A13.8 F72.4
  L: 10,6 mm
  A: 13,8 mm
  F: 72,4 mm
  Initiale Rotation: 0,00 Grad
  Initiale Orientierung: C > S
  C > S: -24,0
  > T: -0,3
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Geometrie - Navigator
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: F
  Tischposition: 72 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: F
  Tischposition: 72 mm
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System - Justagevolumen
  Position: L10.6 A13.8 F72.4 mm
  Orientierung: C > S-24.0 > T-0.3
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
SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\t1_vibe_fs_tra_bh_384 *
TA: 0:18 PM: ISO Voxelgröße: 0.5×0.5×3.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Eigenschaften
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  Bilder in großes Bildsegment laden: Aus
  Inline-Anzeige automatisch öffnen: Ein
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  Start measurements: Mehrfach messen
Routine
  3D-Block-Gruppe: 1
  3D-Blöcke: 1
  Distanzfaktor: 20 %
  Position: L19.2 P8.6 F108.5 mm
  Orientierung: T > S0.5 > C-0.4
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Phasen-Oversampling: 0 %
  Schicht-Oversampling: 11,1 %
  Schichten im 3D-Block: 72
  FoV Auslese: 350 mm
  FoV Phase: 75,0 %
  Schichtdicke: 3,0 mm
  TR: 4,36 ms
  TE: 1,97 ms
  Mittelungen: 1
  Verknüpfungen: 1
  Filter: Verzeichn. Korr.(2D), Prescan Normalisierung
  Spulenelemente: BO2,3;SP3-5
Kontrast - Allgemein
  TR: 4,36 ms
  TE: 1,97 ms
  Flipwinkel: 9,0 Grad
  Fettunterdr.: Q-fettsätt.
  Lines Per Shot: 40
  Wasserunterdr.: Keine
  Dixon: Aus
Kontrast - Dynamisch
  Mittelungen: 1
  Mittelungsmodus: Kurzzeit
  Rekonstruktion: Betrag
  Messungen: 1
  Mehrere Serien: Jede Messung
Auflösung - Allgemein
  FoV Auslese: 350 mm
  FoV Phase: 75,0 %
  Schichtdicke: 3,0 mm
  Basis-Auflösung: 384
  Phasen-Auflösung: 71 %
  Schicht-Auflösung: 63 %
  Phasen Partial Fourier: 6/8
  Schicht Partial Fourier: 6/8
  Trajektorie: Kartesisch
  Gemeins. Daten: Aus
  Interpolation: Ein
Auflösung - iPAT
  PAT Modus: GRAPPA
  Beschl. Faktor PE: 2
  Ref. Zeilen PE: 26
  Beschl. Faktor 3D: 1
  Referenzmessungsm.: Integriert
Auflösung - Filter Bild
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  Prescan Normalisierung: Ein
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Auflösung - Filter Rohdaten
  Rohdaten: Aus
  Elliptischer Filter: Aus
  POCS: Aus
Geometrie - Allgemein
  3D-Block-Gruppe: 1
  3D-Blöcke: 1
  Distanzfaktor: 20 %
  Position: L19.2 P8.6 F108.5 mm
  Orientierung: T > S0.5 > C-0.4
  Phasenkod.-Richt.: A >> P
  Schicht-Oversampling: 11,1 %
  Schichten im 3D-Block: 72
  FoV Auslese: 350 mm
  FoV Phase: 75,0 %
  Schichtdicke: 3,0 mm
  TR: 4,36 ms
  Mehrschichtmodus: Sequenziell
  Serie: Aufsteigend
  Verknüpfungen: 1
Geometrie - AutoAlign
  3D-Block-Gruppe: 1
  Position: L19.2 P8.6 F108.5 mm
  Orientierung: T > S0.5 > C-0.4
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Initiale Position: L19.2 P8.6 F108.5
  L: 19,2 mm
  P: 8,6 mm
  F: 108,5 mm
  Initiale Rotation: 0,00 Grad
  Initiale Orientierung: T > S
  T > S: 0,5
  > C: -0,4
Geometrie - Sättiger
  Fettunterdr.: Q-fettsätt.
  Wasserunterdr.: Keine
  Dixon: Aus
  Spez. Sättiger: Parallel F/H
  Lücke: 10,0 mm
  Dicke: 60 mm
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: F
  Tischposition: 109 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: F
  Tischposition: 109 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: P >> A
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System - Justagevolumen
  Position: L19.2 P8.6 F108.5 mm
  Orientierung: T > S0.5 > C-0.4
  Rotation: 0,00 Grad
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 216 mm
  Zurücksetzen: Aus
System - Tx/Rx
  Frequenz 1H: 123,250091 MHz
  Korrekturfaktor: 1
  Verstärkung: Klein
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Physio - PACE
  Atemkontrolle: Aus
  Verknüpfungen: 1
Inline - Allgemein
  Gemeins. Daten: Aus
  Flipwinkel: 9,0 Grad
  Messungen: 1
  Zeitstempel im Bild: Aus
  Zeitliche Interpolation: 1
  3D zentr. Sortierung: Aus
  Zeit bis k-Raummitte: 6,4 s
Inline - Inline
  Subtrahieren: Aus
  Messungen: 1
  StdAbw: Aus
  Leber Registrierung: Aus
  Originalbilder speichern: Ein
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Sequenz - Teil 1
  Einleitung: Aus
  Dimension: 3D
  Elliptische Abtastung: Aus
  Sortierung: Linear
  Asymmetrisches Echo: Aus
  Kontraste: 1
  Optimierung: Min. TE
  Mehrschichtmodus: Sequenziell
  Bandbreite: 480 Hz/Px
Sequenz - Teil 2
  HF-Puls-Typ: Schnell
  Gradientenmodus: Schnell
  Anregung: 3D-Block sel.
  HF-Spoiler: Ein
  Erh. Gradienten-Spoiler: Aus
Sequenz - Assistent
  Mode: Aus
  Erlaubte Verzögerung: 60 s

SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\t1_vibe_fs_tra_bh_384_KM *
TA: 0:18 PM: ISO Voxelgröße: 0.5×0.5×3.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Eigenschaften
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  Auf Start duch Benutzer warten: Ein
  Start measurements: Mehrfach messen
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System - Verschiedenes
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  Spulenanwahl: Aus - Beide
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
SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\t1_vibe_fs_cor_KM *
TA: 0:21 PM: ISO Voxelgröße: 0.5×0.5×2.5 mmPAT: 2 Rel. SNR: 1.00  : fl
Eigenschaften
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  Bilder in großes Bildsegment laden: Ein
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  Auf Start duch Benutzer warten: Aus
  Start measurements: Einmal messen
Routine
  3D-Block-Gruppe: 1
  3D-Blöcke: 1
  Distanzfaktor: 20 %
  Position: L17.1 P14.5 F103.5 mm
  Orientierung: C > T1.8 > S-0.4
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Phasen-Oversampling: 29 %
  Schicht-Oversampling: 10,0 %
  Schichten im 3D-Block: 80
  FoV Auslese: 350 mm
  FoV Phase: 99,4 %
  Schichtdicke: 2,5 mm
  TR: 3,62 ms
  TE: 1,33 ms
  Mittelungen: 1
  Verknüpfungen: 1
  Filter: Verzeichn. Korr.(2D), Prescan Normalisierung
  Spulenelemente: BO1-3;SP3-5
Kontrast - Allgemein
  TR: 3,62 ms
  TE: 1,33 ms
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Auflösung - Allgemein
  FoV Auslese: 350 mm
  FoV Phase: 99,4 %
  Schichtdicke: 2,5 mm
  Basis-Auflösung: 320
  Phasen-Auflösung: 76 %
  Schicht-Auflösung: 57 %
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Auflösung - iPAT
  PAT Modus: GRAPPA
  Beschl. Faktor PE: 2
  Ref. Zeilen PE: 24
  Beschl. Faktor 3D: 1
  Referenzmessungsm.: Integriert
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Geometrie - Allgemein
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  Position: L17.1 P14.5 F103.5 mm
  Orientierung: C > T1.8 > S-0.4
  Phasenkod.-Richt.: R >> L
  Schicht-Oversampling: 10,0 %
  Schichten im 3D-Block: 80
  FoV Auslese: 350 mm
  FoV Phase: 99,4 %
  Schichtdicke: 2,5 mm
  TR: 3,62 ms
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Geometrie - AutoAlign
  3D-Block-Gruppe: 1
  Position: L17.1 P14.5 F103.5 mm
  Orientierung: C > T1.8 > S-0.4
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Initiale Position: L17.1 P14.5 F103.5
  L: 17,1 mm
  P: 14,5 mm
  F: 103,5 mm
  Initiale Rotation: 0,00 Grad
  Initiale Orientierung: C > T
  C > T: 1,8
  > S: -0,4
Geometrie - Sättiger
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  Spez. Sättiger: Keine
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: F
  Tischposition: 103 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: F
  Tischposition: 103 mm
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  Spulenanwahl: Ein  - AutoCoilSelect
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System - Justagevolumen
  Position: L17.1 P14.5 F103.5 mm
  Orientierung: C > T1.8 > S-0.4
  Rotation: 0,00 Grad
  R >> L: 348 mm
  F >> H: 350 mm
  A >> P: 200 mm
  Zurücksetzen: Aus
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Inline - Allgemein
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  Zeit bis k-Raummitte: 7,3 s
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Sequenz - Teil 1
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  Asymmetrisches Echo: Schwach
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  Bandbreite: 450 Hz/Px
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
SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\t1_vibe_fs_tra_bh_384_dyn test *
TA: 1:36 PM: ISO Voxelgröße: 0.5×0.5×3.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Eigenschaften
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  Bilder in großes Bildsegment laden: Aus
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  Auf Start duch Benutzer warten: Ein
  Start measurements: Einmal messen
Routine
  3D-Block-Gruppe: 1
  3D-Blöcke: 1
  Distanzfaktor: 20 %
  Position: L19.2 P8.6 F108.5 mm
  Orientierung: T > S0.5 > C-0.4
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Phasen-Oversampling: 0 %
  Schicht-Oversampling: 11,1 %
  Schichten im 3D-Block: 72
  FoV Auslese: 350 mm
  FoV Phase: 75,0 %
  Schichtdicke: 3,0 mm
  TR: 4,36 ms
  TE: 1,97 ms
  Mittelungen: 1
  Verknüpfungen: 1
  Filter: Verzeichn. Korr.(2D), Prescan Normalisierung
  Spulenelemente: SP4-6
Kontrast - Allgemein
  TR: 4,36 ms
  TE: 1,97 ms
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Kontrast - Dynamisch
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  Messungen: 3
  Pause nach Mess.. 1: 4,0 s
  Pause nach Mess.. 2: 30,0 s
  Mehrere Serien: Jede Messung
Auflösung - Allgemein
  FoV Auslese: 350 mm
  FoV Phase: 75,0 %
  Schichtdicke: 3,0 mm
  Basis-Auflösung: 384
  Phasen-Auflösung: 70 %
  Schicht-Auflösung: 63 %
  Phasen Partial Fourier: 7/8
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Auflösung - iPAT
  PAT Modus: GRAPPA
  Beschl. Faktor PE: 2
  Ref. Zeilen PE: 26
  Beschl. Faktor 3D: 1
  Referenzmessungsm.: Integriert
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Geometrie - Allgemein
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  Position: L19.2 P8.6 F108.5 mm
  Orientierung: T > S0.5 > C-0.4
  Phasenkod.-Richt.: A >> P
  Schicht-Oversampling: 11,1 %
  Schichten im 3D-Block: 72
  FoV Auslese: 350 mm
  FoV Phase: 75,0 %
  Schichtdicke: 3,0 mm
  TR: 4,36 ms
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Geometrie - AutoAlign
  3D-Block-Gruppe: 1
  Position: L19.2 P8.6 F108.5 mm
  Orientierung: T > S0.5 > C-0.4
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Initiale Position: L19.2 P8.6 F108.5
  L: 19,2 mm
  P: 8,6 mm
  F: 108,5 mm
  Initiale Rotation: 0,00 Grad
  Initiale Orientierung: T > S
  T > S: 0,5
  > C: -0,4
Geometrie - Sättiger
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  Spez. Sättiger: Parallel F/H
  Lücke: 10,0 mm
  Dicke: 60 mm
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: F
  Tischposition: 109 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: F
  Tischposition: 109 mm
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System - Justagevolumen
  Position: L19.2 P8.6 F108.5 mm
  Orientierung: T > S0.5 > C-0.4
  Rotation: 0,00 Grad
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 216 mm
  Zurücksetzen: Aus
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Inline - Allgemein
  Gemeins. Daten: Aus
  Flipwinkel: 9,0 Grad
  Messungen: 3
  Pause nach Mess.. 1: 4,0 s
  Pause nach Mess.. 2: 30,0 s
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  Zeit bis k-Raummitte: 8,9 s
Inline - Inline
  Subtrahieren: Aus
  Messungen: 3
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Inline - Mamma
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  Messungen: 3
  Pause nach Mess.. 1: 4,0 s
  Pause nach Mess.. 2: 30,0 s
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Sequenz - Teil 1
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  Asymmetrisches Echo: Aus
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  Bandbreite: 480 Hz/Px
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
SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\t1_vibe_fs_tra_bh_384 *
TA: 0:18 PM: ISO Voxelgröße: 0.5×0.5×3.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Eigenschaften
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  Auf Start duch Benutzer warten: Aus
  Start measurements: Mehrfach messen
Routine
  3D-Block-Gruppe: 1
  3D-Blöcke: 1
  Distanzfaktor: 20 %
  Position: L19.2 P8.6 F108.5 mm
  Orientierung: T > S0.5 > C-0.4
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Phasen-Oversampling: 0 %
  Schicht-Oversampling: 11,1 %
  Schichten im 3D-Block: 72
  FoV Auslese: 350 mm
  FoV Phase: 75,0 %
  Schichtdicke: 3,0 mm
  TR: 4,36 ms
  TE: 1,97 ms
  Mittelungen: 1
  Verknüpfungen: 1
  Filter: Verzeichn. Korr.(2D), Prescan Normalisierung
  Spulenelemente: BO2,3;SP3-5
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Kontrast - Dynamisch
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  Messungen: 1
  Mehrere Serien: Jede Messung
Auflösung - Allgemein
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  Phasen-Auflösung: 71 %
  Schicht-Auflösung: 63 %
  Phasen Partial Fourier: 6/8
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Inline - Allgemein
  Gemeins. Daten: Aus
  Flipwinkel: 9,0 Grad
  Messungen: 1
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  Zeit bis k-Raummitte: 6,4 s
Inline - Inline
  Subtrahieren: Aus
  Messungen: 1
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Inline - Mamma
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  Messungen: 1
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
SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\t1_vibe_fs_tra_bh_384_KM *
TA: 0:18 PM: ISO Voxelgröße: 0.5×0.5×3.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Eigenschaften
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  Auf Start duch Benutzer warten: Ein
  Start measurements: Mehrfach messen
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System - Verschiedenes
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  Spulenanwahl: Aus - Beide
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
SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\t1_vibe_fs_cor_KM *
TA: 0:22 PM: ISO Voxelgröße: 0.5×0.5×2.5 mmPAT: 2 Rel. SNR: 1.00  : fl
Eigenschaften
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  Bilder in großes Bildsegment laden: Ein
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  Auf Start duch Benutzer warten: Aus
  Start measurements: Mehrfach messen
Routine
  3D-Block-Gruppe: 1
  3D-Blöcke: 1
  Distanzfaktor: 20 %
  Position: L17.1 P14.5 F103.5 mm
  Orientierung: C > T1.8 > S-0.4
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Phasen-Oversampling: 29 %
  Schicht-Oversampling: 10,0 %
  Schichten im 3D-Block: 80
  FoV Auslese: 350 mm
  FoV Phase: 99,4 %
  Schichtdicke: 2,5 mm
  TR: 3,62 ms
  TE: 1,3 ms
  Mittelungen: 1
  Verknüpfungen: 1
  Filter: Verzeichn. Korr.(2D), Prescan Normalisierung
  Spulenelemente: BO1-3;SP3-5
Kontrast - Allgemein
  TR: 3,62 ms
  TE: 1,3 ms
  Flipwinkel: 9,0 Grad
  Fettunterdr.: Q-fettsätt.
  Lines Per Shot: 45
  Wasserunterdr.: Keine
  Dixon: Aus
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Auflösung - Allgemein
  FoV Auslese: 350 mm
  FoV Phase: 99,4 %
  Schichtdicke: 2,5 mm
  Basis-Auflösung: 352
  Phasen-Auflösung: 64 %
  Schicht-Auflösung: 61 %
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Auflösung - iPAT
  PAT Modus: GRAPPA
  Beschl. Faktor PE: 2
  Ref. Zeilen PE: 24
  Beschl. Faktor 3D: 1
  Referenzmessungsm.: Integriert
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Geometrie - Allgemein
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  Position: L17.1 P14.5 F103.5 mm
  Orientierung: C > T1.8 > S-0.4
  Phasenkod.-Richt.: R >> L
  Schicht-Oversampling: 10,0 %
  Schichten im 3D-Block: 80
  FoV Auslese: 350 mm
  FoV Phase: 99,4 %
  Schichtdicke: 2,5 mm
  TR: 3,62 ms
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Geometrie - AutoAlign
  3D-Block-Gruppe: 1
  Position: L17.1 P14.5 F103.5 mm
  Orientierung: C > T1.8 > S-0.4
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Initiale Position: L17.1 P14.5 F103.5
  L: 17,1 mm
  P: 14,5 mm
  F: 103,5 mm
  Initiale Rotation: 0,00 Grad
  Initiale Orientierung: C > T
  C > T: 1,8
  > S: -0,4
Geometrie - Sättiger
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  Spez. Sättiger: Keine
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: F
  Tischposition: 103 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: F
  Tischposition: 103 mm
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  Spulenanwahl: Ein  - AutoCoilSelect
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System - Justagevolumen
  Position: L17.1 P14.5 F103.5 mm
  Orientierung: C > T1.8 > S-0.4
  Rotation: 0,00 Grad
  R >> L: 349 mm
  F >> H: 350 mm
  A >> P: 200 mm
  Zurücksetzen: Aus
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Inline - Allgemein
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  Zeit bis k-Raummitte: 7,7 s
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Sequenz - Teil 1
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  Asymmetrisches Echo: Schwach
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  Bandbreite: 510 Hz/Px
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
SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\localizer *
TA: 0:28 PM: ISO Voxelgröße: 0.8×0.8×6.0 mmPAT: Aus Rel. SNR: 1.00  : fl
Eigenschaften
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  Inline-Anzeige automatisch öffnen: Aus
  Inline-Anzeige automatisch schließen: Aus
  Start measurement without further preparation: Ein
  Auf Start duch Benutzer warten: Aus
  Start measurements: Einmal messen
Routine
  Schichtgruppe: 1
  Schichten: 5
  Distanzfaktor: 150 %
  Position: Isozentrum
  Orientierung: Transversal
  Phasenkod.-Richt.: A >> P
  Schichtgruppe: 2
  Schichten: 7
  Distanzfaktor: 30 %
  Position: L0.0 P30.0 H0.0 mm
  Orientierung: Coronal
  Phasenkod.-Richt.: R >> L
  Schichtgruppe: 3
  Schichten: 3
  Distanzfaktor: 150 %
  Position: Isozentrum
  Orientierung: Sagittal
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Phasen-Oversampling: 25 %
  FoV Auslese: 400 mm
  FoV Phase: 100,0 %
  Schichtdicke: 6,0 mm
  TR: 7,8 ms
  TE: 3,69 ms
  Mittelungen: 1
  Verknüpfungen: 15
  Filter: Verzeichn. Korr.(2D), Elliptischer Filter
  Spulenelemente: BO1-3;SP1-4
Kontrast - Allgemein
  TR: 7,8 ms
  TE: 3,69 ms
  TD: 0 ms
  MTC: Aus
  Magn. Präparation: Keine
  Flipwinkel: 20 Grad
  Fettunterdr.: Keine
  Wasserunterdr.: Keine
  SWI: Aus
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Auflösung - Allgemein
  FoV Auslese: 400 mm
  FoV Phase: 100,0 %
  Schichtdicke: 6,0 mm
  Basis-Auflösung: 256
  Phasen-Auflösung: 80 %
  Phasen Partial Fourier: 7/8
  Interpolation: Ein
Auflösung - iPAT
  PAT Modus: Keiner
Auflösung - Filter Bild
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  Prescan Normalisierung: Aus
  Normalisierung: Aus
  B1-Filter: Aus
Auflösung - Filter Rohdaten
  Rohdaten: Aus
  Elliptischer Filter: Ein
Geometrie - Allgemein
  Schichtgruppe: 1
  Schichten: 5
  Distanzfaktor: 150 %
  Position: Isozentrum
  Orientierung: Transversal
  Phasenkod.-Richt.: A >> P
  Schichtgruppe: 2
  Schichten: 7
  Distanzfaktor: 30 %
  Position: L0.0 P30.0 H0.0 mm
  Orientierung: Coronal
  Phasenkod.-Richt.: R >> L
  Schichtgruppe: 3
  Schichten: 3
  Distanzfaktor: 150 %
  Position: Isozentrum
  Orientierung: Sagittal
  Phasenkod.-Richt.: A >> P
  FoV Auslese: 400 mm
  FoV Phase: 100,0 %
  Schichtdicke: 6,0 mm
  TR: 7,8 ms
  Mehrschichtmodus: Sequenziell
  Serie: Verschachtelt
  Verknüpfungen: 15
Geometrie - AutoAlign
  Schichtgruppe: 1
  Position: Isozentrum
  Orientierung: Transversal
  Phasenkod.-Richt.: A >> P
  Schichtgruppe: 2
  Position: L0.0 P30.0 H0.0 mm
  Orientierung: Coronal
  Phasenkod.-Richt.: R >> L
  Schichtgruppe: 3
  Position: Isozentrum
  Orientierung: Sagittal
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Initiale Position: Isozentrum
  L: 0,0 mm
  P: 0,0 mm
  H: 0,0 mm
  Initiale Rotation: 0,00 Grad
  Initiale Orientierung: Transversal
Geometrie - Sättiger
  Sättigungsmodus: Standard
  Fettunterdr.: Keine
  Wasserunterdr.: Keine
  Spez. Sättiger: Keine
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: H
  Tischposition: 0 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: H
  Tischposition: 0 mm
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System - Justagen
  B0-Shim-Modus: Tune-Up
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System - Justagevolumen
  Position: Isozentrum
  Orientierung: Transversal
  Rotation: 0,00 Grad
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Zurücksetzen: Aus
System - Tx/Rx
  Frequenz 1H: 123,250091 MHz
  Korrekturfaktor: 1
  Verstärkung: Groß
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Physio - Signal 1
  1.Signal/Modus: Kein
  TR: 7,8 ms
  Verknüpfungen: 15
  Segmente: 1
Physio - Herz
  Hilfslinien: Keine
  Magn. Präparation: Keine
  Fettunterdr.: Keine
  Dark Blood: Aus
  FoV Auslese: 400 mm
  FoV Phase: 100,0 %
  Phasen-Auflösung: 80 %
Physio - PACE
  Atemkontrolle: Aus
  Verknüpfungen: 15
Inline - Allgemein
  Subtrahieren: Aus
  Messungen: 1
  StdAbw: Aus
  Leber Registrierung: Aus
  Originalbilder speichern: Ein
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Sequenz - Teil 1
  Einleitung: Ein
  Dimension: 2D
  Phasenstabilisierung: Aus
  Asymmetrisches Echo: Aus
  Kontraste: 1
  Flusskomp.: Nein
  Mehrschichtmodus: Sequenziell
  Bandbreite: 320 Hz/Px
Sequenz - Teil 2
  Segmente: 1
  Lärmreduktion: Keine
  HF-Puls-Typ: Normal
  Gradientenmodus: Normal
  Anregung: Schichtsel.
  HF-Spoiler: Ein
Sequenz - Assistent
  Mode: Aus
  Erlaubte Verzögerung: 0 s

SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\localizer *
TA: 0:16 PM: ISO Voxelgröße: 0.8×0.8×6.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Eigenschaften
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  Start measurement without further preparation: Aus
  Auf Start duch Benutzer warten: Ein
  Start measurements: Einmal messen
Routine
  Schichtgruppe: 1
  Schichten: 5
  Distanzfaktor: 150 %
  Position: L3.9 P10.6 F81.0 mm
  Orientierung: Transversal
  Phasenkod.-Richt.: A >> P
  Schichtgruppe: 2
  Schichten: 7
  Distanzfaktor: 30 %
  Position: L12.6 A5.7 F84.7 mm
  Orientierung: C > T-1.2
  Phasenkod.-Richt.: R >> L
  Schichtgruppe: 3
  Schichten: 3
  Distanzfaktor: 150 %
  Position: R59.1 P52.2 F75.8 mm
  Orientierung: S > T1.4
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Phasen-Oversampling: 25 %
  FoV Auslese: 400 mm
  FoV Phase: 100,0 %
  Schichtdicke: 6,0 mm
  TR: 7,8 ms
  TE: 3,69 ms
  Mittelungen: 1
  Verknüpfungen: 15
  Filter: Verzeichn. Korr.(2D), Elliptischer Filter
  Spulenelemente: BO1-3;SP2-5
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Auflösung - iPAT
  PAT Modus: GRAPPA
  Beschl. Faktor PE: 2
  Ref. Zeilen PE: 24
  Referenzmessungsm.: Integriert
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Geometrie - Allgemein
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  Position: L3.9 P10.6 F81.0 mm
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  Position: L12.6 A5.7 F84.7 mm
  Orientierung: C > T-1.2
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  Position: R59.1 P52.2 F75.8 mm
  Orientierung: S > T1.4
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Geometrie - AutoAlign
  Schichtgruppe: 1
  Position: L3.9 P10.6 F81.0 mm
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  Position: L12.6 A5.7 F84.7 mm
  Orientierung: C > T-1.2
  Phasenkod.-Richt.: R >> L
  Schichtgruppe: 3
  Position: R59.1 P52.2 F75.8 mm
  Orientierung: S > T1.4
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Initiale Position: L3.9 P10.6 F81.0
  L: 3,9 mm
  P: 10,6 mm
  F: 81,0 mm
  Initiale Rotation: 0,00 Grad
  Initiale Orientierung: Transversal
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Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: F
  Tischposition: 80 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: F
  Tischposition: 80 mm
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
SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\t2_haste_cor *
TA: 0:56 PM: ISO Voxelgröße: 0.5×0.5×5.0 mmPAT: 2 Rel. SNR: 1.00  : h
Eigenschaften
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  Inline-Anzeige automatisch öffnen: Ein
  Inline-Anzeige automatisch schließen: Aus
  Start measurement without further preparation: Aus
  Auf Start duch Benutzer warten: Aus
  Start measurements: Einmal messen
Routine
  Schichtgruppe: 1
  Schichten: 37
  Distanzfaktor: 10 %
  Position: L17.1 P14.5 F103.5 mm
  Orientierung: C > T1.8 > S-0.4
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Phasen-Oversampling: 100 %
  FoV Auslese: 350 mm
  FoV Phase: 100,0 %
  Schichtdicke: 5,0 mm
  TR: 1200,0 ms
  TE: 95 ms
  Mittelungen: 1
  Verknüpfungen: 3
  Filter: Verzeichn. Korr.(2D), Prescan Normalisierung
  Spulenelemente: BO1-3;SP3-5
Kontrast - Allgemein
  TR: 1200,0 ms
  TE: 95 ms
  MTC: Aus
  Magn. Präparation: Keine
  Flipwinkel: 160 Grad
  Fettunterdr.: Keine
  Wasserunterdr.: Keine
  Magn. wiederherst.: Aus
Kontrast - Dynamisch
  Mittelungen: 1
  Mittelungsmodus: Langzeit
  Rekonstruktion: Betrag
  Messungen: 1
  Mehrere Serien: Aus
Auflösung - Allgemein
  FoV Auslese: 350 mm
  FoV Phase: 100,0 %
  Schichtdicke: 5,0 mm
  Basis-Auflösung: 320
  Phasen-Auflösung: 75 %
  Phasen Partial Fourier: 4/8
  Interpolation: Ein
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Auflösung - Filter Bild
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  Prescan Normalisierung: Ein
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Auflösung - Filter Rohdaten
  Rohdaten: Aus
  Elliptischer Filter: Aus
Geometrie - Allgemein
  Schichtgruppe: 1
  Schichten: 37
  Distanzfaktor: 10 %
  Position: L17.1 P14.5 F103.5 mm
  Orientierung: C > T1.8 > S-0.4
  Phasenkod.-Richt.: R >> L
  FoV Auslese: 350 mm
  FoV Phase: 100,0 %
  Schichtdicke: 5,0 mm
  TR: 1200,0 ms
  Mehrschichtmodus: Einzelmess.
  Serie: Absteigend
  Verknüpfungen: 3
Geometrie - AutoAlign
  Schichtgruppe: 1
  Position: L17.1 P14.5 F103.5 mm
  Orientierung: C > T1.8 > S-0.4
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Initiale Position: L17.1 P14.5 F103.5
  L: 17,1 mm
  P: 14,5 mm
  F: 103,5 mm
  Initiale Rotation: 0,00 Grad
  Initiale Orientierung: C > T
  C > T: 1,8
  > S: -0,4
Geometrie - Sättiger
  Fettunterdr.: Keine
  Wasserunterdr.: Keine
  Magn. wiederherst.: Aus
  Spez. Sättiger: Keine
Geometrie - Navigator
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: F
  Tischposition: 103 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: F
  Tischposition: 103 mm
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Physio - Signal 1
  1.Signal/Modus: Kein
  TR: 1200,0 ms
  Verknüpfungen: 3
Physio - Herz
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  FoV Auslese: 350 mm
  FoV Phase: 100,0 %
  Phasen-Auflösung: 75 %
Physio - PACE
  Atemkontrolle: Atemanhalten
  Verknüpfungen: 3
Inline - Allgemein
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Sequenz - Teil 1
  Einleitung: Aus
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  Mehrschichtmodus: Einzelmess.
  Echoabstand: 5,02 ms
  Bandbreite: 401 Hz/Px
Sequenz - Teil 2
  HF-Puls-Typ: Schnell
  Gradientenmodus: Schnell
  Hyperecho: Aus
  Turbo Faktor: 240
Sequenz - Assistent
  Mode: Aus
  Erlaubte Verzögerung: 30 s

SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\trufi_sag_ loc *
TA: 9.4 s PM: ISO Voxelgröße: 1.4×1.4×8.0 mmPAT: Aus Rel. SNR: 1.00  : tfi
Eigenschaften
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  Inline-Anzeige automatisch öffnen: Aus
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Routine
  Schichtgruppe: 1
  Schichten: 1
  Distanzfaktor: 20 %
  Position: R61.8 P21.6 F81.9 mm
  Orientierung: S > C0.7 > T0.2
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Phasen-Oversampling: 0 %
  FoV Auslese: 370 mm
  FoV Phase: 84,4 %
  Schichtdicke: 8,0 mm
  TR: 3,47 ms
  TE: 1,51 ms
  Mittelungen: 1
  Filter: Verzeichn. Korr.(2D)
  Spulenelemente: BO1-3;SP2-5
Kontrast - Allgemein
  TR: 3,47 ms
  TE: 1,51 ms
  Magn. Präparation: Keine
  Flipwinkel: 42 Grad
  Fettunterdr.: Keine
Kontrast - Dynamisch
  Mittelungen: 1
  Mittelungsmodus: Kurzzeit
  Rekonstruktion: Betrag
  Messungen: 10
  Pause nach Mess.. 1: 0,0 s
  Pause nach Mess.. 2: 0,0 s
  Pause nach Mess.. 3: 0,0 s
  Pause nach Mess.. 4: 0,0 s
  Pause nach Mess.. 5: 0,0 s
  Pause nach Mess.. 6: 0,0 s
  Pause nach Mess.. 7: 0,0 s
  Pause nach Mess.. 8: 0,0 s
  Pause nach Mess.. 9: 0,0 s
  Mehrere Serien: Aus
Auflösung - Allgemein
  FoV Auslese: 370 mm
  FoV Phase: 84,4 %
  Schichtdicke: 8,0 mm
  Basis-Auflösung: 256
  Phasen-Auflösung: 100 %
  Phasen Partial Fourier: Aus
  Interpolation: Aus
Auflösung - iPAT
  PAT Modus: Keiner
Auflösung - Filter Bild
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  Prescan Normalisierung: Aus
  Normalisierung: Aus
  B1-Filter: Aus
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Geometrie - Allgemein
  Schichtgruppe: 1
  Schichten: 1
  Distanzfaktor: 20 %
  Position: R61.8 P21.6 F81.9 mm
  Orientierung: S > C0.7 > T0.2
  Phasenkod.-Richt.: A >> P
  FoV Auslese: 370 mm
  FoV Phase: 84,4 %
  Schichtdicke: 8,0 mm
  TR: 3,47 ms
  Mehrschichtmodus: Sequenziell
  Serie: Verschachtelt
Geometrie - AutoAlign
  Schichtgruppe: 1
  Position: R61.8 P21.6 F81.9 mm
  Orientierung: S > C0.7 > T0.2
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Initiale Position: R61.8 P21.6 F81.9
  R: 61,8 mm
  P: 21,6 mm
  F: 81,9 mm
  Initiale Rotation: 0,00 Grad
  Initiale Orientierung: S > C
  S > C: 0,7
  > T: 0,2
Geometrie - Navigator
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: F
  Tischposition: 82 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: F
  Tischposition: 82 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: F >> H
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System - Justagen
  B0-Shim-Modus: Standard
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System - Justagevolumen
  Position: R61.8 P21.6 F81.9 mm
  Orientierung: S > C0.7 > T0.2
  Rotation: 0,00 Grad
  A >> P: 313 mm
  F >> H: 370 mm
  R >> L: 8 mm
  Zurücksetzen: Aus
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Physio - Signal 1
  1.Signal/Modus: Kein
  TR: 3,47 ms
  Segmente: 1
Physio - PACE
  Atemkontrolle: Aus
Inline - Allgemein
  Subtrahieren: Aus
  Messungen: 10
  StdAbw: Aus
  Originalbilder speichern: Ein
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Sequenz - Teil 1
  Einleitung: Ein
  Dimension: 2D
  Sortierung: Linear
  Asymmetrisches Echo: Erlaubt
  Flusskomp.: Nein
  Mehrschichtmodus: Sequenziell
  Bandbreite: 781 Hz/Px
Sequenz - Teil 2
  Segmente: 1
  HF-Puls-Typ: Normal
  Gradientenmodus: Schnell
  Anregung: Schichtsel.
Sequenz - Assistent
  Mode: Aus

SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\trufi_cor_ loc *
TA: 0:11 PM: ISO Voxelgröße: 1.4×1.4×8.0 mmPAT: Aus Rel. SNR: 1.00  : tfi
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Routine
  Schichtgruppe: 1
  Schichten: 1
  Distanzfaktor: 20 %
  Position: L6.6 P18.0 F74.7 mm
  Orientierung: C > T1.1 > S0.1
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Phasen-Oversampling: 0 %
  FoV Auslese: 370 mm
  FoV Phase: 100,0 %
  Schichtdicke: 8,0 mm
  TR: 3,47 ms
  TE: 1,51 ms
  Mittelungen: 1
  Filter: Verzeichn. Korr.(2D)
  Spulenelemente: BO1-3;SP2-5
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Auflösung - Allgemein
  FoV Auslese: 370 mm
  FoV Phase: 100,0 %
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Geometrie - Allgemein
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  Position: L6.6 P18.0 F74.7 mm
  Orientierung: C > T1.1 > S0.1
  Phasenkod.-Richt.: R >> L
  FoV Auslese: 370 mm
  FoV Phase: 100,0 %
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Geometrie - AutoAlign
  Schichtgruppe: 1
  Position: L6.6 P18.0 F74.7 mm
  Orientierung: C > T1.1 > S0.1
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Initiale Position: L6.6 P18.0 F74.7
  L: 6,6 mm
  P: 18,0 mm
  F: 74,7 mm
  Initiale Rotation: 0,00 Grad
  Initiale Orientierung: C > T
  C > T: 1,1
  > S: 0,1
Geometrie - Navigator
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: F
  Tischposition: 75 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: F
  Tischposition: 75 mm
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System - Justagevolumen
  Position: L6.6 P18.0 F74.7 mm
  Orientierung: C > T1.1 > S0.1
  Rotation: 0,00 Grad
  R >> L: 370 mm
  F >> H: 370 mm
  A >> P: 8 mm
  Zurücksetzen: Aus
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
SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\t2_haste_tra_mbh *
TA: 1:30 PM: ISO Voxelgröße: 1.1×1.1×4.0 mmPAT: 2 Rel. SNR: 1.00  : h
Eigenschaften
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  Bilder in großes Bildsegment laden: Aus
  Inline-Anzeige automatisch öffnen: Ein
  Inline-Anzeige automatisch schließen: Ein
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Routine
  Schichtgruppe: 1
  Schichten: 45
  Distanzfaktor: 10 %
  Position: R10.2 P8.7 H6.1 mm
  Orientierung: T > S-3.0 > C2.6
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Phasen-Oversampling: 97 %
  FoV Auslese: 350 mm
  FoV Phase: 100,0 %
  Schichtdicke: 4,0 mm
  TR: 1600,0 ms
  TE: 107 ms
  Mittelungen: 1
  Verknüpfungen: 4
  Filter: Verzeichn. Korr.(2D), Prescan Normalisierung
  Spulenelemente: BO1-3;SP4,5
Kontrast - Allgemein
  TR: 1600,0 ms
  TE: 107 ms
  MTC: Aus
  Magn. Präparation: Keine
  Flipwinkel: 160 Grad
  Fettunterdr.: Keine
  Wasserunterdr.: Keine
  Magn. wiederherst.: Aus
Kontrast - Dynamisch
  Mittelungen: 1
  Mittelungsmodus: Langzeit
  Rekonstruktion: Betrag
  Messungen: 1
  Mehrere Serien: Aus
Auflösung - Allgemein
  FoV Auslese: 350 mm
  FoV Phase: 100,0 %
  Schichtdicke: 4,0 mm
  Basis-Auflösung: 320
  Phasen-Auflösung: 81 %
  Phasen Partial Fourier: 4/8
  Interpolation: Aus
Auflösung - iPAT
  PAT Modus: GRAPPA
  Beschl. Faktor PE: 2
  Ref. Zeilen PE: 42
  Referenzmessungsm.: Integriert
Auflösung - Filter Bild
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  Prescan Normalisierung: Ein
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Geometrie - Allgemein
  Schichtgruppe: 1
  Schichten: 45
  Distanzfaktor: 10 %
  Position: R10.2 P8.7 H6.1 mm
  Orientierung: T > S-3.0 > C2.6
  Phasenkod.-Richt.: A >> P
  FoV Auslese: 350 mm
  FoV Phase: 100,0 %
  Schichtdicke: 4,0 mm
  TR: 1600,0 ms
  Mehrschichtmodus: Einzelmess.
  Serie: Absteigend
  Verknüpfungen: 4
Geometrie - AutoAlign
  Schichtgruppe: 1
  Position: R10.2 P8.7 H6.1 mm
  Orientierung: T > S-3.0 > C2.6
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Initiale Position: R10.2 P8.7 H6.1
  R: 10,2 mm
  P: 8,7 mm
  H: 6,1 mm
  Initiale Rotation: 0,80 Grad
  Initiale Orientierung: T > S
  T > S: -3,0
  > C: 2,6
Geometrie - Sättiger
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  Spez. Sättiger: Parallel F/H
  Lücke: 10 mm
  Dicke: 60 mm
Geometrie - Navigator
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: H
  Tischposition: 6 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: H
  Tischposition: 6 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: P >> A
  Transversal: H >> F
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  Spulenanwahl: Default
System - Justagen
  B0-Shim-Modus: Tune-Up
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System - Justagevolumen
  Position: Isozentrum
  Orientierung: Transversal
  Rotation: 0,00 Grad
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Zurücksetzen: Aus
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Physio - Signal 1
  1.Signal/Modus: Kein
  TR: 1600,0 ms
  Verknüpfungen: 4
Physio - Herz
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  Phasen-Auflösung: 81 %
Physio - PACE
  Atemkontrolle: Atemanhalten
  Verknüpfungen: 4
Inline - Allgemein
  Subtrahieren: Aus
  Messungen: 1
  StdAbw: Aus
  Originalbilder speichern: Ein
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Sequenz - Teil 1
  Einleitung: Aus
  Dimension: 2D
  Kontraste: 1
  Flusskomp.: Nein
  Mehrschichtmodus: Einzelmess.
  Echoabstand: 5,08 ms
  Bandbreite: 434 Hz/Px
Sequenz - Teil 2
  HF-Puls-Typ: Schnell
  Gradientenmodus: Schnell
  Hyperecho: Aus
  Turbo Faktor: 259
Sequenz - Assistent
  Mode: Min. Flipwinkel
  Min. Flipwinkel: 140 Grad
  Erlaubte Verzögerung: 30 s

SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\t2_space_cor_p3_trig_ *
TA: 3:58 PM: ISO Voxelgröße: 0.3×0.3×0.9 mmPAT: 3 Rel. SNR: 1.00  : spcR
Eigenschaften
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  Inline-Anzeige automatisch schließen: Aus
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Routine
  3D-Block-Gruppe: 1
  3D-Blöcke: 1
  Position: L3.6 A35.0 H30.2 mm
  Orientierung: C > S12.1 > T0.1
  Phasenkod.-Richt.: F >> H
  AutoAlign: ---
  Phasen-Oversampling: 70 %
  Schicht-Oversampling: 11,1 %
  Schichten im 3D-Block: 72
  FoV Auslese: 220 mm
  FoV Phase: 100,0 %
  Schichtdicke: 0,90 mm
  TR: 2400 ms
  TE: 499 ms
  Mittelungen: 1,8
  Verknüpfungen: 1
  Filter: Rohdaten, Verzeichn. Korr.(2D), Prescan Normalisierung
  Spulenelemente: BO1-3;SP2-5
Kontrast - Allgemein
  TR: 2400 ms
  TE: 499 ms
  MTC: Aus
  Magn. Präparation: Keine
  Flip angle: 100 Grad
  Fettunterdr.: SPAIR
  Fettsät. Art: Stark
  Blutunterdr.: Aus
  Magn. wiederherst.: Ein
Kontrast - Dynamisch
  Mittelungen: 1,8
  Rekonstruktion: Betrag
  Messungen: 1
  Mehrere Serien: Jede Messung
Auflösung - Allgemein
  FoV Auslese: 220 mm
  FoV Phase: 100,0 %
  Schichtdicke: 0,90 mm
  Basis-Auflösung: 320
  Phasen-Auflösung: 100 %
  Schicht-Auflösung: 75 %
  Phasen Partial Fourier: Erlaubt
  Schicht Partial Fourier: 5/8
  Interpolation: Ein
Auflösung - iPAT
  PAT Modus: GRAPPA
  Beschl. Faktor PE: 3
  Ref. Zeilen PE: 24
  Beschl. Faktor 3D: 1
  Referenzmessungsm.: Integriert
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Auflösung - Filter Rohdaten
  Rohdaten: Ein
  Elliptischer Filter: Aus
Geometrie - Allgemein
  3D-Block-Gruppe: 1
  3D-Blöcke: 1
  Position: L3.6 A35.0 H30.2 mm
  Orientierung: C > S12.1 > T0.1
  Phasenkod.-Richt.: F >> H
  Schicht-Oversampling: 11,1 %
  Schichten im 3D-Block: 72
  FoV Auslese: 220 mm
  FoV Phase: 100,0 %
  Schichtdicke: 0,90 mm
  TR: 2400 ms
  Serie: Verschachtelt
  Verknüpfungen: 1
Geometrie - AutoAlign
  3D-Block-Gruppe: 1
  Position: L3.6 A35.0 H30.2 mm
  Orientierung: C > S12.1 > T0.1
  Phasenkod.-Richt.: F >> H
  AutoAlign: ---
  Initiale Position: L3.6 A35.0 H30.2
  L: 3,6 mm
  A: 35,0 mm
  H: 30,2 mm
  Initiale Rotation: 90,00 Grad
  Initiale Orientierung: C > S
  C > S: 12,1
  > T: 0,1
Geometrie - Sättiger
  Fettunterdr.: SPAIR
  Fettsät. Art: Stark
  Magn. wiederherst.: Ein
  Spez. Sättiger: Keine
Geometrie - Navigator
  Navigator: 1
  Position: R64.9 A46.4 H159.6 mm
  Orientierung: C > T3.6
  Rotation: -0,04 Grad
  FoV Phase: 32 mm
  FoV Auslese: 96 mm
  Dicke: 10,0 mm
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: H
  Tischposition: 30 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: H
  Tischposition: 30 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
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System - Justagen
  B0-Shim-Modus: Standard
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System - Justagevolumen
  Position: L3.6 A35.0 H30.2 mm
  Orientierung: C > S12.1 > T0.1
  Rotation: 90,00 Grad
  F >> H: 220 mm
  R >> L: 220 mm
  A >> P: 65 mm
  Zurücksetzen: Aus
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Physio - Signal 1
  1.Signal/Modus: Kein
  Trigger-Verzögerung: 0 ms
  TR: 2400 ms
  Verknüpfungen: 1
Physio - Herz
  Magn. Präparation: Keine
  Fettunterdr.: SPAIR
  Dark Blood: Aus
  FoV Auslese: 220 mm
  FoV Phase: 100,0 %
  Phasen-Auflösung: 100 %
Physio - PACE
  Atemkontrolle: Trigger
  Scout Modus: Aus
  Scout TR: 150 ms
  Akzeptanzfenster ±: 2,0 mm
  Setze Akzeptanzfenster: Automatisch
  Akquisitionsfenster: 1200 ms
  Trigger-Puls: 1
  Scout-Typ: Leberkuppen-Scout
  Verknüpfungen: 1
  Profil speichern: Ein
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Inline - MIP
  MIP-Sag: Aus
  MIP-Cor: Ein
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Sequenz - Teil 1
  Einleitung: Ein
  Dimension: 3D
  Elliptische Abtastung: Aus
  Sortierung: Linear
  Flusskomp.: Nein
  Echoabstand: 5,44 ms
  Adiabat. Modus: Aus
  Bandbreite: 355 Hz/Px
Sequenz - Teil 2
  Echozugdauer: 979 ms
  HF-Puls-Typ: SAR klein
  Gradientenmodus: Schnell
  Anregung: 3D-Block sel.
  Flipwinkel Modus: Konstant
  Turbo Faktor: 180
Sequenz - Assistent
  Erlaubte Verzögerung: 30 s

SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\t2_haste_fs_cor_thick_sl *
TA: 6.0 s PM: ISO Voxelgröße: 0.7×0.7×50.0 mmPAT: 2 Rel. SNR: 1.00  : h
Eigenschaften
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  Bilder in großes Bildsegment laden: Ein
  Inline-Anzeige automatisch öffnen: Aus
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Routine
  Schichtgruppe: 1
  Schichten: 1
  Distanzfaktor: 50 %
  Position: L15.9 A19.5 F102.2 mm
  Orientierung: C > S-0.5 > T-0.1
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Phasen-Oversampling: 80 %
  FoV Auslese: 280 mm
  FoV Phase: 100,0 %
  Schichtdicke: 50,0 mm
  TR: 6000,0 ms
  TE: 737 ms
  Mittelungen: 1
  Verknüpfungen: 1
  Filter: Verzeichn. Korr.(2D)
  Spulenelemente: BO1-3;SP3-5
Kontrast - Allgemein
  TR: 6000,0 ms
  TE: 737 ms
  MTC: Aus
  Magn. Präparation: Keine
  Flipwinkel: 180 Grad
  Fettunterdr.: Fettsättig.
  Fettsät. Art: Stark
  Wasserunterdr.: Keine
  Magn. wiederherst.: Aus
Kontrast - Dynamisch
  Mittelungen: 1
  Mittelungsmodus: Langzeit
  Rekonstruktion: Betrag
  Messungen: 1
  Mehrere Serien: Aus
Auflösung - Allgemein
  FoV Auslese: 280 mm
  FoV Phase: 100,0 %
  Schichtdicke: 50,0 mm
  Basis-Auflösung: 384
  Phasen-Auflösung: 70 %
  Phasen Partial Fourier: 7/8
  Interpolation: Aus
Auflösung - iPAT
  PAT Modus: GRAPPA
  Beschl. Faktor PE: 2
  Ref. Zeilen PE: 24
  Referenzmessungsm.: Integriert
Auflösung - Filter Bild
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  Prescan Normalisierung: Aus
  Normalisierung: Aus
  B1-Filter: Aus
Auflösung - Filter Rohdaten
  Rohdaten: Aus
  Elliptischer Filter: Aus
Geometrie - Allgemein
  Schichtgruppe: 1
  Schichten: 1
  Distanzfaktor: 50 %
  Position: L15.9 A19.5 F102.2 mm
  Orientierung: C > S-0.5 > T-0.1
  Phasenkod.-Richt.: R >> L
  FoV Auslese: 280 mm
  FoV Phase: 100,0 %
  Schichtdicke: 50,0 mm
  TR: 6000,0 ms
  Mehrschichtmodus: Einzelmess.
  Serie: Verschacht. in A. A.
  Verknüpfungen: 1
Geometrie - AutoAlign
  Schichtgruppe: 1
  Position: L15.9 A19.5 F102.2 mm
  Orientierung: C > S-0.5 > T-0.1
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Initiale Position: L15.9 A19.5 F102.2
  L: 15,9 mm
  A: 19,5 mm
  F: 102,2 mm
  Initiale Rotation: 0,00 Grad
  Initiale Orientierung: C > S
  C > S: -0,5
  > T: -0,1
Geometrie - Sättiger
  Fettunterdr.: Fettsättig.
  Fettsät. Art: Stark
  Wasserunterdr.: Keine
  Magn. wiederherst.: Aus
  Spez. Sättiger: Keine
Geometrie - Navigator
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: F
  Tischposition: 102 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: F
  Tischposition: 102 mm
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  Spulenanwahl: Ein  - AutoCoilSelect
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System - Justagevolumen
  Position: L15.9 A19.5 F102.2 mm
  Orientierung: C > S-0.5 > T-0.1
  Rotation: 0,00 Grad
  R >> L: 280 mm
  F >> H: 280 mm
  A >> P: 50 mm
  Zurücksetzen: Aus
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Physio - Signal 1
  1.Signal/Modus: Kein
  TR: 6000,0 ms
  Verknüpfungen: 1
Physio - Herz
  Magn. Präparation: Keine
  Fettunterdr.: Fettsättig.
  Dark Blood: Aus
  FoV Auslese: 280 mm
  FoV Phase: 100,0 %
  Phasen-Auflösung: 70 %
Physio - PACE
  Atemkontrolle: Atemanhalten
  Verknüpfungen: 1
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Inline - MIP
  MIP-Sag: Aus
  MIP-Cor: Aus
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Sequenz - Teil 1
  Einleitung: Aus
  Dimension: 2D
  Kontraste: 1
  Flusskomp.: Nein
  Mehrschichtmodus: Einzelmess.
  Echoabstand: 6,64 ms
  Bandbreite: 352 Hz/Px
Sequenz - Teil 2
  HF-Puls-Typ: Normal
  Gradientenmodus: Normal
  Hyperecho: Aus
  Turbo Faktor: 269
Sequenz - Assistent
  Mode: Aus
  Erlaubte Verzögerung: 30 s

SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\t2_haste_fs_cor_thick_sl *
TA: 6.0 s PM: ISO Voxelgröße: 0.7×0.7×50.0 mmPAT: 2 Rel. SNR: 1.00  : h
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Routine
  Schichtgruppe: 1
  Schichten: 1
  Distanzfaktor: 50 %
  Position: L31.8 A13.3 F94.5 mm
  Orientierung: C > S23.2 > T0.1
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Phasen-Oversampling: 80 %
  FoV Auslese: 280 mm
  FoV Phase: 100,0 %
  Schichtdicke: 50,0 mm
  TR: 6000,0 ms
  TE: 737 ms
  Mittelungen: 1
  Verknüpfungen: 1
  Filter: Verzeichn. Korr.(2D)
  Spulenelemente: BO1-3;SP3-5
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Geometrie - Allgemein
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  Position: L31.8 A13.3 F94.5 mm
  Orientierung: C > S23.2 > T0.1
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Geometrie - AutoAlign
  Schichtgruppe: 1
  Position: L31.8 A13.3 F94.5 mm
  Orientierung: C > S23.2 > T0.1
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Initiale Position: L31.8 A13.3 F94.5
  L: 31,8 mm
  A: 13,3 mm
  F: 94,5 mm
  Initiale Rotation: 0,00 Grad
  Initiale Orientierung: C > S
  C > S: 23,2
  > T: 0,1
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Geometrie - Navigator
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: F
  Tischposition: 95 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: F
  Tischposition: 95 mm
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System - Justagevolumen
  Position: L31.8 A13.3 F94.5 mm
  Orientierung: C > S23.2 > T0.1
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
SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\t2_haste_fs_cor_thick_sl *
TA: 6.0 s PM: ISO Voxelgröße: 0.7×0.7×50.0 mmPAT: 2 Rel. SNR: 1.00  : h
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Routine
  Schichtgruppe: 1
  Schichten: 1
  Distanzfaktor: 50 %
  Position: L10.6 A13.8 F72.4 mm
  Orientierung: C > S-24.0 > T-0.3
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Phasen-Oversampling: 80 %
  FoV Auslese: 280 mm
  FoV Phase: 100,0 %
  Schichtdicke: 50,0 mm
  TR: 6000,0 ms
  TE: 737 ms
  Mittelungen: 1
  Verknüpfungen: 1
  Filter: Verzeichn. Korr.(2D)
  Spulenelemente: BO1-3;SP3-5
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Geometrie - Allgemein
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  Position: L10.6 A13.8 F72.4 mm
  Orientierung: C > S-24.0 > T-0.3
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Geometrie - AutoAlign
  Schichtgruppe: 1
  Position: L10.6 A13.8 F72.4 mm
  Orientierung: C > S-24.0 > T-0.3
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Initiale Position: L10.6 A13.8 F72.4
  L: 10,6 mm
  A: 13,8 mm
  F: 72,4 mm
  Initiale Rotation: 0,00 Grad
  Initiale Orientierung: C > S
  C > S: -24,0
  > T: -0,3
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Geometrie - Navigator
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: F
  Tischposition: 72 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: F
  Tischposition: 72 mm
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System - Justagevolumen
  Position: L10.6 A13.8 F72.4 mm
  Orientierung: C > S-24.0 > T-0.3
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
SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\t1_vibe_fs_tra_bh_384 *
TA: 0:18 PM: ISO Voxelgröße: 0.5×0.5×3.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Eigenschaften
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  Bilder in großes Bildsegment laden: Aus
  Inline-Anzeige automatisch öffnen: Ein
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  Start measurements: Mehrfach messen
Routine
  3D-Block-Gruppe: 1
  3D-Blöcke: 1
  Distanzfaktor: 20 %
  Position: L19.2 P8.6 F108.5 mm
  Orientierung: T > S0.5 > C-0.4
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Phasen-Oversampling: 0 %
  Schicht-Oversampling: 11,1 %
  Schichten im 3D-Block: 72
  FoV Auslese: 350 mm
  FoV Phase: 75,0 %
  Schichtdicke: 3,0 mm
  TR: 4,36 ms
  TE: 1,97 ms
  Mittelungen: 1
  Verknüpfungen: 1
  Filter: Verzeichn. Korr.(2D), Prescan Normalisierung
  Spulenelemente: BO2,3;SP3-5
Kontrast - Allgemein
  TR: 4,36 ms
  TE: 1,97 ms
  Flipwinkel: 9,0 Grad
  Fettunterdr.: Q-fettsätt.
  Lines Per Shot: 40
  Wasserunterdr.: Keine
  Dixon: Aus
Kontrast - Dynamisch
  Mittelungen: 1
  Mittelungsmodus: Kurzzeit
  Rekonstruktion: Betrag
  Messungen: 1
  Mehrere Serien: Jede Messung
Auflösung - Allgemein
  FoV Auslese: 350 mm
  FoV Phase: 75,0 %
  Schichtdicke: 3,0 mm
  Basis-Auflösung: 384
  Phasen-Auflösung: 71 %
  Schicht-Auflösung: 63 %
  Phasen Partial Fourier: 6/8
  Schicht Partial Fourier: 6/8
  Trajektorie: Kartesisch
  Gemeins. Daten: Aus
  Interpolation: Ein
Auflösung - iPAT
  PAT Modus: GRAPPA
  Beschl. Faktor PE: 2
  Ref. Zeilen PE: 26
  Beschl. Faktor 3D: 1
  Referenzmessungsm.: Integriert
Auflösung - Filter Bild
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  Prescan Normalisierung: Ein
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Auflösung - Filter Rohdaten
  Rohdaten: Aus
  Elliptischer Filter: Aus
  POCS: Aus
Geometrie - Allgemein
  3D-Block-Gruppe: 1
  3D-Blöcke: 1
  Distanzfaktor: 20 %
  Position: L19.2 P8.6 F108.5 mm
  Orientierung: T > S0.5 > C-0.4
  Phasenkod.-Richt.: A >> P
  Schicht-Oversampling: 11,1 %
  Schichten im 3D-Block: 72
  FoV Auslese: 350 mm
  FoV Phase: 75,0 %
  Schichtdicke: 3,0 mm
  TR: 4,36 ms
  Mehrschichtmodus: Sequenziell
  Serie: Aufsteigend
  Verknüpfungen: 1
Geometrie - AutoAlign
  3D-Block-Gruppe: 1
  Position: L19.2 P8.6 F108.5 mm
  Orientierung: T > S0.5 > C-0.4
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Initiale Position: L19.2 P8.6 F108.5
  L: 19,2 mm
  P: 8,6 mm
  F: 108,5 mm
  Initiale Rotation: 0,00 Grad
  Initiale Orientierung: T > S
  T > S: 0,5
  > C: -0,4
Geometrie - Sättiger
  Fettunterdr.: Q-fettsätt.
  Wasserunterdr.: Keine
  Dixon: Aus
  Spez. Sättiger: Parallel F/H
  Lücke: 10,0 mm
  Dicke: 60 mm
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: F
  Tischposition: 109 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: F
  Tischposition: 109 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: P >> A
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System - Justagevolumen
  Position: L19.2 P8.6 F108.5 mm
  Orientierung: T > S0.5 > C-0.4
  Rotation: 0,00 Grad
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 216 mm
  Zurücksetzen: Aus
System - Tx/Rx
  Frequenz 1H: 123,250091 MHz
  Korrekturfaktor: 1
  Verstärkung: Klein
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Physio - PACE
  Atemkontrolle: Aus
  Verknüpfungen: 1
Inline - Allgemein
  Gemeins. Daten: Aus
  Flipwinkel: 9,0 Grad
  Messungen: 1
  Zeitstempel im Bild: Aus
  Zeitliche Interpolation: 1
  3D zentr. Sortierung: Aus
  Zeit bis k-Raummitte: 6,4 s
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Sequenz - Teil 1
  Einleitung: Aus
  Dimension: 3D
  Elliptische Abtastung: Aus
  Sortierung: Linear
  Asymmetrisches Echo: Aus
  Kontraste: 1
  Optimierung: Min. TE
  Mehrschichtmodus: Sequenziell
  Bandbreite: 480 Hz/Px
Sequenz - Teil 2
  HF-Puls-Typ: Schnell
  Gradientenmodus: Schnell
  Anregung: 3D-Block sel.
  HF-Spoiler: Ein
  Erh. Gradienten-Spoiler: Aus
Sequenz - Assistent
  Mode: Aus
  Erlaubte Verzögerung: 60 s

SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\cine_tf2d12_retro_2K *
TA: 0:21 PM: FIX Voxelgröße: 1.0×1.0×3.0 mmPAT: 3 Rel. SNR: 1.00  : tfi
Eigenschaften
  Prio Rekonstr.: Aus
  Bilder in den Viewer laden: Ein
  Automatischer Kinostart: Ein
  Automatische Bildspeicherung: Ein
  Bilder in die Mini-Segmente laden: Ein
  Bilder in großes Bildsegment laden: Ein
  Inline-Anzeige automatisch öffnen: Aus
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  Start measurements: Einmal messen
Routine
  Schichtgruppe: 1
  Schichten: 26
  Distanzfaktor: 20 %
  Position: L0.5 P2.0 F15.3 mm
  Orientierung: T > C-0.2 > S-0.1
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Phasen-Oversampling: 100 %
  FoV Auslese: 320 mm
  FoV Phase: 92,5 %
  Schichtdicke: 3,0 mm
  TR: 46,56 ms
  TE: 1,67 ms
  Mittelungen: 1
  Verknüpfungen: 26
  Filter: Verzeichn. Korr.(2D), Prescan Normalisierung, Image Filter
  Spulenelemente: BO2;SP4
Kontrast - Allgemein
  TR: 46,56 ms
  TE: 1,67 ms
  TD: 0 ms
  Magn. Präparation: Keine
  Flipwinkel: 43 Grad
  Fettunterdr.: Keine
  Magn. Nachbehandl.: Wiederherstellen
Kontrast - Dynamisch
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  Mehrere Serien: Aus
Auflösung - Allgemein
  FoV Auslese: 320 mm
  FoV Phase: 92,5 %
  Schichtdicke: 3,0 mm
  Basis-Auflösung: 320
  Phasen-Auflösung: 82 %
  Phasen Partial Fourier: Aus
  Trajektorie: Kartesisch
  Gemeins. Daten: Aus
  Interpolation: Aus
Auflösung - iPAT
  PAT Modus: GRAPPA
  Beschl. Faktor PE: 3
  Ref. Zeilen PE: 45
  Referenzmessungsm.: Integriert
Auflösung - Filter Bild
  Image Filter: Ein
  ! Intensität: Mittel
  Kantenverstärkung: 1
  Glätten: 3
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Geometrie - Allgemein
  Schichtgruppe: 1
  Schichten: 26
  Distanzfaktor: 20 %
  Position: L0.5 P2.0 F15.3 mm
  Orientierung: T > C-0.2 > S-0.1
  Phasenkod.-Richt.: A >> P
  FoV Auslese: 320 mm
  FoV Phase: 92,5 %
  Schichtdicke: 3,0 mm
  TR: 46,56 ms
  Mehrschichtmodus: Sequenziell
  Serie: Aufsteigend
  Verknüpfungen: 26
Geometrie - AutoAlign
  Schichtgruppe: 1
  Position: L0.5 P2.0 F15.3 mm
  Orientierung: T > C-0.2 > S-0.1
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Initiale Position: L0.5 P2.0 H13.7
  L: 0,5 mm
  P: 2,0 mm
  F: 13,7 mm
  Initiale Rotation: 0,00 Grad
  Initiale Orientierung: T > C
  T > C: -0,2
  > S: -0,1
Geometrie - Sättiger
  Fettunterdr.: Keine
  Magn. Nachbehandl.: Wiederherstellen
  Spez. Sättiger: Keine
Geometrie - Navigator
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: F
  Tischposition: 29 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: FIX
  Tischposition: F
  Tischposition: 29 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: F >> H
  Kanalkombination: Quadratsumme
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System - Justagen
  B0-Shim-Modus: Herz
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System - Justagevolumen
  ! Position: L15.0 A45.0 F4.0 mm
  ! Orientierung: Sagittal
  ! Rotation: 0,00 Grad
  ! A >> P: 170 mm
  ! F >> H: 170 mm
  ! R >> L: 170 mm
  Zurücksetzen: Aus
System - Tx/Rx
  Frequenz 1H: 123,250091 MHz
  Korrekturfaktor: 1
  Verstärkung: Groß
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Physio - Signal 1
  1.Signal/Modus: Kein
  TR: 46,56 ms
  Verknüpfungen: 26
  Segmente: 12
Physio - Herz
  Hilfslinien: Keine
  Magn. Präparation: Keine
  Fettunterdr.: Keine
  Dark Blood: Aus
  FoV Auslese: 320 mm
  FoV Phase: 92,5 %
  Phasen-Auflösung: 82 %
  Cine: Ein
  Trajektorie: Kartesisch
  Gemeins. Daten: Aus
  Präp.-Herzschläge: 0
Physio - PACE
  Atemkontrolle: Aus
  Verknüpfungen: 26
Inline - Allgemein
  Subtrahieren: Aus
  Messungen: 1
  StdAbw: Aus
  Originalbilder speichern: Ein
Inline - Herz
  Inline Auswertung: Aus
  Magn. Präparation: Keine
  Kontraste: 1
  TE: 1,67 ms
  TR: 46,56 ms
  Originalbilder speichern: Ein
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Sequenz - Teil 1
  Einleitung: Aus
  Dimension: 2D
  Sortierung: Linear
  Asymmetrisches Echo: Schwach
  Kontraste: 1
  Optimierung: Min. TE TR
  Mehrschichtmodus: Sequenziell
  Echoabstand: 3,9 ms
  Sequenz Typ: Trufi
  Bandbreite: 977 Hz/Px
Sequenz - Teil 2
  Definiere: Segmente
  Segmente: 12
  Trufi Deltafreq.: 0 Hz
  HF-Puls-Typ: Normal
  Gradientenmodus: Schnell
  Anregung: Schichtsel.
  Flipwinkel Modus: Konstant
  Cine: Ein
Sequenz - Assistent
  Mode: Min. Flipwinkel
  Min. Flipwinkel: 50 Grad
  Erlaubte Verzögerung: 0 s

SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\t2_tse3d_cor_p2_trig_384 testen *
TA: 6:50 PM: ISO Voxelgröße: 0.5×0.5×2.0 mmPAT: 2 Rel. SNR: 1.00  : tseR
Eigenschaften
  Prio Rekonstr.: Aus
  Bilder in den Viewer laden: Ein
  Automatischer Kinostart: Aus
  Automatische Bildspeicherung: Ein
  Bilder in die Mini-Segmente laden: Aus
  Bilder in großes Bildsegment laden: Aus
  Inline-Anzeige automatisch öffnen: Ein
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Routine
  3D-Block-Gruppe: 1
  3D-Blöcke: 1
  Distanzfaktor: 50 %
  Position: Isozentrum
  Orientierung: Coronal
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Phasen-Oversampling: 30 %
  Schicht-Oversampling: 10,0 %
  Schichten im 3D-Block: 40
  FoV Auslese: 380 mm
  FoV Phase: 100,0 %
  Schichtdicke: 2,00 mm
  TR: 2500,0 ms
  TE: 716 ms
  Mittelungen: 1
  Verknüpfungen: 1
  Filter: Verzeichn. Korr.(2D)
  Spulenelemente: BO1-3;SP1-3
Kontrast - Allgemein
  TR: 2500,0 ms
  TE: 716 ms
  MTC: Aus
  Magn. Präparation: Keine
  Flipwinkel: 160 Grad
  Fettunterdr.: SPAIR
  Fettsät. Art: Stark
  Wasserunterdr.: Keine
  Magn. wiederherst.: Ein
Kontrast - Dynamisch
  Mittelungen: 1
  Mittelungsmodus: Langzeit
  Rekonstruktion: Betrag
  Messungen: 1
  Mehrere Serien: Jede Messung
Auflösung - Allgemein
  FoV Auslese: 380 mm
  FoV Phase: 100,0 %
  Schichtdicke: 2,00 mm
  Basis-Auflösung: 384
  Phasen-Auflösung: 98 %
  Schicht-Auflösung: 82 %
  Phasen Partial Fourier: Erlaubt
  Schicht Partial Fourier: 6/8
  Trajektorie: Kartesisch
  Interpolation: Ein
Auflösung - iPAT
  PAT Modus: GRAPPA
  Beschl. Faktor PE: 2
  Ref. Zeilen PE: 259
  Beschl. Faktor 3D: 1
  Referenzmessungsm.: Integriert
Auflösung - Filter Bild
  Image Filter: Aus
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  Prescan Normalisierung: Aus
  Normalisierung: Aus
  B1-Filter: Aus
Auflösung - Filter Rohdaten
  Rohdaten: Aus
  Elliptischer Filter: Aus
Geometrie - Allgemein
  3D-Block-Gruppe: 1
  3D-Blöcke: 1
  Distanzfaktor: 50 %
  Position: Isozentrum
  Orientierung: Coronal
  Phasenkod.-Richt.: R >> L
  Schicht-Oversampling: 10,0 %
  Schichten im 3D-Block: 40
  FoV Auslese: 380 mm
  FoV Phase: 100,0 %
  Schichtdicke: 2,00 mm
  TR: 2500,0 ms
  Mehrschichtmodus: Verschachtelt
  Serie: Verschachtelt
  Verknüpfungen: 1
Geometrie - AutoAlign
  3D-Block-Gruppe: 1
  Position: Isozentrum
  Orientierung: Coronal
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Initiale Position: Isozentrum
  L: 0,0 mm
  P: 0,0 mm
  H: 0,0 mm
  Initiale Rotation: 0,00 Grad
  Initiale Orientierung: Coronal
Geometrie - Sättiger
  Fettunterdr.: SPAIR
  Fettsät. Art: Stark
  Wasserunterdr.: Keine
  Magn. wiederherst.: Ein
  Spez. Sättiger: Keine
Geometrie - Navigator
  Navigator: 1
  Position: Isozentrum
  Orientierung: Coronal
  Rotation: 0,00 Grad
  FoV Phase: 32 mm
  FoV Auslese: 96 mm
  Dicke: 10,0 mm
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: H
  Tischposition: 0 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: H
  Tischposition: 0 mm
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  Transversal: H >> F
  Kanalkombination: Adaptive Combine
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  Spulenanwahl: Default
System - Justagen
  B0-Shim-Modus: Standard
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System - Justagevolumen
  Position: Isozentrum
  Orientierung: Coronal
  Rotation: 0,00 Grad
  R >> L: 380 mm
  F >> H: 380 mm
  A >> P: 80 mm
  Zurücksetzen: Aus
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Physio - Signal 1
  1.Signal/Modus: Kein
  TR: 2500,0 ms
  Verknüpfungen: 1
Physio - Herz
  Magn. Präparation: Keine
  Fettunterdr.: SPAIR
  Dark Blood: Aus
  FoV Auslese: 380 mm
  FoV Phase: 100,0 %
  Phasen-Auflösung: 98 %
  Trajektorie: Kartesisch
Physio - PACE
  Atemkontrolle: Trigger
  Scout Modus: Aus
  Scout TR: 150 ms
  Akzeptanzfenster ±: 2,0 mm
  Setze Akzeptanzfenster: Automatisch
  Wähle Aquisitionsfenster: Manuell
  Akquisitionsfenster: 1509 ms
  Trigger-Puls: 1
  Scout-Typ: Leberkuppen-Scout
  Verknüpfungen: 1
  Profil speichern: Ein
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Inline - MIP
  MIP-Sag: Aus
  MIP-Cor: Ein
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Sequenz - Teil 1
  Einleitung: Ein
  Dimension: 3D
  Kompensiere T2 Zerfall: Aus
  Reduz. Bewegungsempf.: Aus
  Kontraste: 1
  Flusskomp.: Nein
  Mehrschichtmodus: Verschachtelt
  Freier Echoabstand: Aus
  Echoabstand: 10,7 ms
  Bandbreite: 260 Hz/Px
Sequenz - Teil 2
  Definiere: Turbo Faktor
  Echozüge pro Schicht: 3
  Phasenkorrektur: Automatisch
  Lärmreduktion: Keine
  HF-Puls-Typ: Normal
  Gradientenmodus: Schnell
  Hyperecho: Aus
  WARP: Aus
  Red. EC Sensitivität: Aus
  Turbo Faktor: 125
Sequenz - Assistent
  Mode: Aus
  Erlaubte Verzögerung: 60 s

SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\ep2d_diff_b50_400_800_tra_p3 *
TA: 3:27 PM: ISO Voxelgröße: 2.1×2.1×5.0 mmPAT: 3 Rel. SNR: 1.00  : epse
Eigenschaften
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  Inline-Anzeige automatisch öffnen: Aus
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Routine
  Schichtgruppe: 1
  Schichten: 38
  Distanzfaktor: 20 %
  Position: L10.6 P17.3 F7.9 mm
  Orientierung: T > S-1.8 > C1.5
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Phasen-Oversampling: 0 %
  FoV Auslese: 380 mm
  FoV Phase: 100,0 %
  Schichtdicke: 5,0 mm
  TR: 6300 ms
  TE: 69,0 ms
  Verknüpfungen: 1
  Filter: Rohdaten, Korr. Dynamischer Felder, Verzeichn. Korr.(2D), Prescan Normalisierung
  Spulenelemente: BO1-3;SP3,4
Kontrast - Allgemein
  TR: 6300 ms
  TE: 69,0 ms
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Kontrast - Dynamisch
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  Verzögerung in TR: 0 ms
Auflösung - Allgemein
  FoV Auslese: 380 mm
  FoV Phase: 100,0 %
  Schichtdicke: 5,0 mm
  Basis-Auflösung: 184
  Phasen-Auflösung: 100 %
  Phasen Partial Fourier: Aus
  Interpolation: Aus
Auflösung - iPAT
  Beschl. Modus: GRAPPA
  Beschl. Faktor PE: 3
  Ref. Zeilen PE: 48
  Referenzmessungsm.: GRE/separate
Auflösung - Filter Bild
  Verzeichn. Korr.: Ein
  Modus: 2D
  Prescan Normalisierung: Ein
  Korr. Dynamischer Felder: Ein
  Ungefilterte Bilder: Aus
Auflösung - Filter Rohdaten
  Rohdaten: Ein
  Elliptischer Filter: Aus
Geometrie - Allgemein
  Schichtgruppe: 1
  Schichten: 38
  Distanzfaktor: 20 %
  Position: L10.6 P17.3 F7.9 mm
  Orientierung: T > S-1.8 > C1.5
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  Schichtdicke: 5,0 mm
  TR: 6300 ms
  Mehrschichtmodus: Verschachtelt
  Serie: Aufsteigend
  Verknüpfungen: 1
Geometrie - AutoAlign
  Schichtgruppe: 1
  Position: L10.6 P17.3 F7.9 mm
  Orientierung: T > S-1.8 > C1.5
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Initiale Position: L10.6 P17.3 F7.9
  L: 10,6 mm
  P: 17,3 mm
  F: 7,9 mm
  Initiale Rotation: 89,30 Grad
  Initiale Orientierung: T > S
  T > S: -1,8
  > C: 1,5
Geometrie - Sättiger
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Geometrie - Navigator
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: F
  Tischposition: 8 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: F
  Tischposition: 8 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: P >> A
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System - Justagen
  B0-Shim-Modus: Standard
  B1-Shim-Modus: TrueForm C
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System - Justagevolumen
  Position: L10.6 P17.3 F7.9 mm
  Orientierung: T > S-1.8 > C1.5
  Rotation: 89,30 Grad
  R >> L: 380 mm
  A >> P: 380 mm
  F >> H: 227 mm
  Zurücksetzen: Aus
System - Tx/Rx
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  Korr. Bildskal.: 3,000
  Zurücksetzen: Aus
  ? Ref. Amplitude 1H: 0,000 V
Physio - Signal 1
  1.Signal/Modus: Kein
  TR: 6300 ms
  Verknüpfungen: 1
Physio - PACE
  Atemkontrolle: Aus
  Verknüpfungen: 1
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Sequenz - Teil 1
  Einleitung: Ein
  Optimierung: Min. TE
  Mehrschichtmodus: Verschachtelt
  Freier Echoabstand: Aus
  Echoabstand: 0,71 ms
  Bandbreite: 2090 Hz/Px
Sequenz - Teil 2
  EPI Faktor: 184
  HF-Puls-Typ: Normal
  Gradientenmodus: Schnell

SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\t2_space_cor_p3_trig_siemens b *
TA: 4:41 PM: ISO Voxelgröße: 0.7×0.7×0.9 mmPAT: 3 Rel. SNR: 1.00  : spcR
Eigenschaften
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  Inline-Anzeige automatisch öffnen: Ein
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Routine
  3D-Block-Gruppe: 1
  3D-Blöcke: 1
  Position: Isozentrum
  Orientierung: Coronal
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Phasen-Oversampling: 50 %
  Schicht-Oversampling: 12,5 %
  Schichten im 3D-Block: 64
  FoV Auslese: 220 mm
  FoV Phase: 100,0 %
  Schichtdicke: 0,90 mm
  TR: 2400 ms
  TE: 702 ms
  Mittelungen: 2,0
  Verknüpfungen: 1
  Filter: Rohdaten, Verzeichn. Korr.(2D), Prescan Normalisierung
  Spulenelemente: HE1-4;NE1,2
Kontrast - Allgemein
  TR: 2400 ms
  TE: 702 ms
  MTC: Aus
  Magn. Präparation: Keine
  Flip angle: 120 Grad
  Fettunterdr.: SPAIR
  Fettsät. Art: Stark
  Blutunterdr.: Aus
  Magn. wiederherst.: Ein
Kontrast - Dynamisch
  Mittelungen: 2,0
  Rekonstruktion: Betrag
  Messungen: 1
  Mehrere Serien: Jede Messung
Auflösung - Allgemein
  FoV Auslese: 220 mm
  FoV Phase: 100,0 %
  Schichtdicke: 0,90 mm
  Basis-Auflösung: 320
  Phasen-Auflösung: 100 %
  Schicht-Auflösung: 72 %
  Phasen Partial Fourier: Erlaubt
  Schicht Partial Fourier: 7/8
  Interpolation: Aus
Auflösung - iPAT
  PAT Modus: GRAPPA
  Beschl. Faktor PE: 3
  Ref. Zeilen PE: 24
  Beschl. Faktor 3D: 1
  Referenzmessungsm.: Integriert
Auflösung - Filter Bild
  Image Filter: Aus
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  Normalisierung: Aus
  B1-Filter: Aus
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Geometrie - Allgemein
  3D-Block-Gruppe: 1
  3D-Blöcke: 1
  Position: Isozentrum
  Orientierung: Coronal
  Phasenkod.-Richt.: R >> L
  Schicht-Oversampling: 12,5 %
  Schichten im 3D-Block: 64
  FoV Auslese: 220 mm
  FoV Phase: 100,0 %
  Schichtdicke: 0,90 mm
  TR: 2400 ms
  Serie: Aufsteigend
  Verknüpfungen: 1
Geometrie - AutoAlign
  3D-Block-Gruppe: 1
  Position: Isozentrum
  Orientierung: Coronal
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Initiale Position: Isozentrum
  L: 0,0 mm
  P: 0,0 mm
  H: 0,0 mm
  Initiale Rotation: 0,00 Grad
  Initiale Orientierung: Coronal
Geometrie - Sättiger
  Fettunterdr.: SPAIR
  Fettsät. Art: Stark
  Magn. wiederherst.: Ein
  Spez. Sättiger: Keine
Geometrie - Navigator
  Navigator: 1
  Position: Isozentrum
  Orientierung: Coronal
  Rotation: 0,00 Grad
  FoV Phase: 32 mm
  FoV Auslese: 96 mm
  Dicke: 10,0 mm
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: H
  Tischposition: 0 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: H
  Tischposition: 0 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: H >> F
  Kanalkombination: Adaptive Combine
  Unkombiniert speichern: Aus
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System - Justagen
  B0-Shim-Modus: Standard
  B1-Shim-Modus: TrueForm
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System - Justagevolumen
  Position: Isozentrum
  Orientierung: Coronal
  Rotation: 0,00 Grad
  R >> L: 220 mm
  F >> H: 220 mm
  A >> P: 58 mm
  Zurücksetzen: Aus
System - Tx/Rx
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  Korr. Bildskal.: 1,000
  Zurücksetzen: Aus
  ? Ref. Amplitude 1H: 0,000 V
Physio - Signal 1
  1.Signal/Modus: Kein
  Trigger-Verzögerung: 0 ms
  TR: 2400 ms
  Verknüpfungen: 1
Physio - Herz
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  FoV Auslese: 220 mm
  FoV Phase: 100,0 %
  Phasen-Auflösung: 100 %
Physio - PACE
  Atemkontrolle: Trigger
  Scout Modus: Aus
  Scout TR: 150 ms
  Akzeptanzfenster ±: 2,0 mm
  Setze Akzeptanzfenster: Automatisch
  Akquisitionsfenster: 1200 ms
  Trigger-Puls: 1
  Scout-Typ: Leberkuppen-Scout
  Verknüpfungen: 1
  Profil speichern: Ein
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Sequenz - Teil 1
  Einleitung: Ein
  Dimension: 3D
  Elliptische Abtastung: Aus
  Sortierung: Linear
  Flusskomp.: Nein
  Echoabstand: 5,5 ms
  Adiabat. Modus: Aus
  Bandbreite: 355 Hz/Px
Sequenz - Teil 2
  Echozugdauer: 1001 ms
  HF-Puls-Typ: SAR klein
  Gradientenmodus: Schnell
  Anregung: 3D-Block sel.
  Flipwinkel Modus: Konstant
  Turbo Faktor: 180
Sequenz - Assistent
  Erlaubte Verzögerung: 30 s

SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\t2_tse3d_cor_p2_trig_siemens b *
TA: 5:05 PM: ISO Voxelgröße: 0.7×0.7×0.9 mmPAT: 2 Rel. SNR: 1.00  : tseR
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Routine
  3D-Block-Gruppe: 1
  3D-Blöcke: 1
  Distanzfaktor: 50 %
  Position: Isozentrum
  Orientierung: Coronal
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Phasen-Oversampling: 48 %
  Schicht-Oversampling: 25,0 %
  Schichten im 3D-Block: 64
  FoV Auslese: 220 mm
  FoV Phase: 100,0 %
  Schichtdicke: 0,90 mm
  TR: 2400,0 ms
  TE: 714 ms
  Mittelungen: 1
  Verknüpfungen: 1
  Filter: Verzeichn. Korr.(2D)
  Spulenelemente: HE1-4;NE1,2
Kontrast - Allgemein
  TR: 2400,0 ms
  TE: 714 ms
  MTC: Aus
  Magn. Präparation: Keine
  Flipwinkel: 160 Grad
  Fettunterdr.: SPAIR
  Fettsät. Art: Stark
  Wasserunterdr.: Keine
  Magn. wiederherst.: Ein
Kontrast - Dynamisch
  Mittelungen: 1
  Mittelungsmodus: Langzeit
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Auflösung - Allgemein
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  Schicht-Auflösung: 50 %
  Phasen Partial Fourier: Erlaubt
  Schicht Partial Fourier: 6/8
  Trajektorie: Kartesisch
  Interpolation: Aus
Auflösung - iPAT
  PAT Modus: GRAPPA
  Beschl. Faktor PE: 2
  Ref. Zeilen PE: 26
  Beschl. Faktor 3D: 1
  Referenzmessungsm.: Integriert
Auflösung - Filter Bild
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  Prescan Normalisierung: Aus
  Normalisierung: Aus
  B1-Filter: Aus
Auflösung - Filter Rohdaten
  Rohdaten: Aus
  Elliptischer Filter: Aus
Geometrie - Allgemein
  3D-Block-Gruppe: 1
  3D-Blöcke: 1
  Distanzfaktor: 50 %
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  Schicht-Oversampling: 25,0 %
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  TR: 2400,0 ms
  Mehrschichtmodus: Verschachtelt
  Serie: Verschachtelt
  Verknüpfungen: 1
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Geometrie - Sättiger
  Fettunterdr.: SPAIR
  Fettsät. Art: Stark
  Wasserunterdr.: Keine
  Magn. wiederherst.: Ein
  Spez. Sättiger: Keine
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Physio - Signal 1
  1.Signal/Modus: Kein
  TR: 2400,0 ms
  Verknüpfungen: 1
Physio - Herz
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  Trajektorie: Kartesisch
Physio - PACE
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  Wähle Aquisitionsfenster: Manuell
  Akquisitionsfenster: 1509 ms
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Sequenz - Teil 1
  Einleitung: Ein
  Dimension: 3D
  Kompensiere T2 Zerfall: Aus
  Reduz. Bewegungsempf.: Aus
  Kontraste: 1
  Flusskomp.: Nein
  Mehrschichtmodus: Verschachtelt
  Freier Echoabstand: Aus
  Echoabstand: 10,2 ms
  Bandbreite: 260 Hz/Px
Sequenz - Teil 2
  Definiere: Turbo Faktor
  Echozüge pro Schicht: 2
  Phasenkorrektur: Automatisch
  Lärmreduktion: Keine
  HF-Puls-Typ: Schnell
  Gradientenmodus: Schnell
  Hyperecho: Aus
  WARP: Aus
  Red. EC Sensitivität: Aus
  Turbo Faktor: 125
Sequenz - Assistent
  Mode: Aus
  Erlaubte Verzögerung: 60 s

SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\t2_space_cor_p3_trig_384 *
TA: 4:18 PM: ISO Voxelgröße: 0.5×0.5×1.0 mmPAT: 3 Rel. SNR: 1.00  : spcR
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Routine
  3D-Block-Gruppe: 1
  3D-Blöcke: 1
  Position: Isozentrum
  Orientierung: Coronal
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Phasen-Oversampling: 30 %
  Schicht-Oversampling: 14,3 %
  Schichten im 3D-Block: 56
  FoV Auslese: 380 mm
  FoV Phase: 100,0 %
  Schichtdicke: 1,00 mm
  TR: 2400 ms
  TE: 701 ms
  Mittelungen: 2,0
  Verknüpfungen: 1
  Filter: Rohdaten, Verzeichn. Korr.(2D)
  Spulenelemente: BO1-3;SP2,3
Kontrast - Allgemein
  TR: 2400 ms
  TE: 701 ms
  MTC: Aus
  Magn. Präparation: Keine
  Flip angle: 120 Grad
  Fettunterdr.: SPAIR
  Fettsät. Art: Stark
  Blutunterdr.: Aus
  Magn. wiederherst.: Ein
Kontrast - Dynamisch
  Mittelungen: 2,0
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Auflösung - Allgemein
  FoV Auslese: 380 mm
  FoV Phase: 100,0 %
  Schichtdicke: 1,00 mm
  Basis-Auflösung: 384
  Phasen-Auflösung: 98 %
  Schicht-Auflösung: 72 %
  Phasen Partial Fourier: Erlaubt
  Schicht Partial Fourier: 7/8
  Interpolation: Ein
Auflösung - iPAT
  PAT Modus: GRAPPA
  Beschl. Faktor PE: 3
  Ref. Zeilen PE: 24
  Beschl. Faktor 3D: 1
  Referenzmessungsm.: Integriert
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Auflösung - Filter Rohdaten
  Rohdaten: Ein
  Elliptischer Filter: Aus
Geometrie - Allgemein
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  Schicht-Oversampling: 14,3 %
  Schichten im 3D-Block: 56
  FoV Auslese: 380 mm
  FoV Phase: 100,0 %
  Schichtdicke: 1,00 mm
  TR: 2400 ms
  Serie: Verschachtelt
  Verknüpfungen: 1
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Geometrie - Sättiger
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System - Verschiedenes
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  Spulenfokus: Konstant
  AutoAlign: ---
  Spulenanwahl: Default
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System - Justagevolumen
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  R >> L: 380 mm
  F >> H: 380 mm
  A >> P: 56 mm
  Zurücksetzen: Aus
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Physio - Signal 1
  1.Signal/Modus: Kein
  Trigger-Verzögerung: 0 ms
  TR: 2400 ms
  Verknüpfungen: 1
Physio - Herz
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  FoV Auslese: 380 mm
  FoV Phase: 100,0 %
  Phasen-Auflösung: 98 %
Physio - PACE
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  Akquisitionsfenster: 1200 ms
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Sequenz - Teil 1
  Einleitung: Ein
  Dimension: 3D
  Elliptische Abtastung: Aus
  Sortierung: Linear
  Flusskomp.: Nein
  Echoabstand: 5,02 ms
  Adiabat. Modus: Aus
  Bandbreite: 352 Hz/Px
Sequenz - Teil 2
  Echozugdauer: 914 ms
  HF-Puls-Typ: SAR klein
  Gradientenmodus: Schnell
  Anregung: 3D-Block sel.
  Flipwinkel Modus: Konstant
  Turbo Faktor: 180
Sequenz - Assistent
  Erlaubte Verzögerung: 30 s

SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\t2_space_cor_p3_trig_384_iso *
TA: 4:46 PM: ISO Voxelgröße: 0.5×0.5×1.0 mmPAT: 3 Rel. SNR: 1.00  : spcR
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Routine
  3D-Block-Gruppe: 1
  3D-Blöcke: 1
  Position: Isozentrum
  Orientierung: Coronal
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Phasen-Oversampling: 30 %
  Schicht-Oversampling: 12,5 %
  Schichten im 3D-Block: 64
  FoV Auslese: 380 mm
  FoV Phase: 100,0 %
  Schichtdicke: 1,00 mm
  TR: 2400 ms
  TE: 701 ms
  Mittelungen: 2,0
  Verknüpfungen: 1
  Filter: Rohdaten, Verzeichn. Korr.(2D)
  Spulenelemente: BO1-3;SP2,3
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Geometrie - Allgemein
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  Schicht-Oversampling: 12,5 %
  Schichten im 3D-Block: 64
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System - Justagevolumen
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  A >> P: 64 mm
  Zurücksetzen: Aus
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
SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\t2_space_cor_p3_trig_384_iso *
TA: 5:55 PM: ISO Voxelgröße: 0.3×0.3×0.9 mmPAT: 3 Rel. SNR: 1.00  : spcR
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Routine
  3D-Block-Gruppe: 1
  3D-Blöcke: 1
  Position: Isozentrum
  Orientierung: Coronal
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Phasen-Oversampling: 50 %
  Schicht-Oversampling: 25,0 %
  Schichten im 3D-Block: 64
  FoV Auslese: 253 mm
  FoV Phase: 100,0 %
  Schichtdicke: 0,90 mm
  TR: 2400 ms
  TE: 702 ms
  Mittelungen: 2,0
  Verknüpfungen: 1
  Filter: Rohdaten, Verzeichn. Korr.(2D)
  Spulenelemente: BO1-3;SP2,3
Kontrast - Allgemein
  TR: 2400 ms
  TE: 702 ms
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Auflösung - Allgemein
  FoV Auslese: 253 mm
  FoV Phase: 100,0 %
  Schichtdicke: 0,90 mm
  Basis-Auflösung: 384
  Phasen-Auflösung: 98 %
  Schicht-Auflösung: 73 %
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Geometrie - Allgemein
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  Schicht-Oversampling: 25,0 %
  Schichten im 3D-Block: 64
  FoV Auslese: 253 mm
  FoV Phase: 100,0 %
  Schichtdicke: 0,90 mm
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System - Verschiedenes
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  Spulenanwahl: Ein  - AutoCoilSelect
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System - Justagevolumen
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  R >> L: 253 mm
  F >> H: 253 mm
  A >> P: 58 mm
  Zurücksetzen: Aus
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Physio - Herz
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  FoV Auslese: 253 mm
  FoV Phase: 100,0 %
  Phasen-Auflösung: 98 %
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Sequenz - Teil 1
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  Echoabstand: 5,5 ms
  Adiabat. Modus: Aus
  Bandbreite: 352 Hz/Px
Sequenz - Teil 2
  Echozugdauer: 1001 ms
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
SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\localizer *
TA: 0:28 PM: ISO Voxelgröße: 0.8×0.8×6.0 mmPAT: Aus Rel. SNR: 1.00  : fl
Eigenschaften
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  Bilder in großes Bildsegment laden: Ein
  Inline-Anzeige automatisch öffnen: Aus
  Inline-Anzeige automatisch schließen: Aus
  Start measurement without further preparation: Ein
  Auf Start duch Benutzer warten: Aus
  Start measurements: Einmal messen
Routine
  Schichtgruppe: 1
  Schichten: 5
  Distanzfaktor: 150 %
  Position: Isozentrum
  Orientierung: Transversal
  Phasenkod.-Richt.: A >> P
  Schichtgruppe: 2
  Schichten: 7
  Distanzfaktor: 30 %
  Position: L0.0 P30.0 H0.0 mm
  Orientierung: Coronal
  Phasenkod.-Richt.: R >> L
  Schichtgruppe: 3
  Schichten: 3
  Distanzfaktor: 150 %
  Position: Isozentrum
  Orientierung: Sagittal
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Phasen-Oversampling: 25 %
  FoV Auslese: 400 mm
  FoV Phase: 100,0 %
  Schichtdicke: 6,0 mm
  TR: 7,8 ms
  TE: 3,69 ms
  Mittelungen: 1
  Verknüpfungen: 15
  Filter: Verzeichn. Korr.(2D), Elliptischer Filter
  Spulenelemente: BO1-3;SP1-4
Kontrast - Allgemein
  TR: 7,8 ms
  TE: 3,69 ms
  TD: 0 ms
  MTC: Aus
  Magn. Präparation: Keine
  Flipwinkel: 20 Grad
  Fettunterdr.: Keine
  Wasserunterdr.: Keine
  SWI: Aus
Kontrast - Dynamisch
  Mittelungen: 1
  Mittelungsmodus: Kurzzeit
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Auflösung - Allgemein
  FoV Auslese: 400 mm
  FoV Phase: 100,0 %
  Schichtdicke: 6,0 mm
  Basis-Auflösung: 256
  Phasen-Auflösung: 80 %
  Phasen Partial Fourier: 7/8
  Interpolation: Ein
Auflösung - iPAT
  PAT Modus: Keiner
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Auflösung - Filter Rohdaten
  Rohdaten: Aus
  Elliptischer Filter: Ein
Geometrie - Allgemein
  Schichtgruppe: 1
  Schichten: 5
  Distanzfaktor: 150 %
  Position: Isozentrum
  Orientierung: Transversal
  Phasenkod.-Richt.: A >> P
  Schichtgruppe: 2
  Schichten: 7
  Distanzfaktor: 30 %
  Position: L0.0 P30.0 H0.0 mm
  Orientierung: Coronal
  Phasenkod.-Richt.: R >> L
  Schichtgruppe: 3
  Schichten: 3
  Distanzfaktor: 150 %
  Position: Isozentrum
  Orientierung: Sagittal
  Phasenkod.-Richt.: A >> P
  FoV Auslese: 400 mm
  FoV Phase: 100,0 %
  Schichtdicke: 6,0 mm
  TR: 7,8 ms
  Mehrschichtmodus: Sequenziell
  Serie: Verschachtelt
  Verknüpfungen: 15
Geometrie - AutoAlign
  Schichtgruppe: 1
  Position: Isozentrum
  Orientierung: Transversal
  Phasenkod.-Richt.: A >> P
  Schichtgruppe: 2
  Position: L0.0 P30.0 H0.0 mm
  Orientierung: Coronal
  Phasenkod.-Richt.: R >> L
  Schichtgruppe: 3
  Position: Isozentrum
  Orientierung: Sagittal
  Phasenkod.-Richt.: A >> P
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  Initiale Orientierung: Transversal
Geometrie - Sättiger
  Sättigungsmodus: Standard
  Fettunterdr.: Keine
  Wasserunterdr.: Keine
  Spez. Sättiger: Keine
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System - Verschiedenes
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  Coronal: P >> A
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System - Justagen
  B0-Shim-Modus: Tune-Up
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System - Justagevolumen
  Position: Isozentrum
  Orientierung: Transversal
  Rotation: 0,00 Grad
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Zurücksetzen: Aus
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Physio - Signal 1
  1.Signal/Modus: Kein
  TR: 7,8 ms
  Verknüpfungen: 15
  Segmente: 1
Physio - Herz
  Hilfslinien: Keine
  Magn. Präparation: Keine
  Fettunterdr.: Keine
  Dark Blood: Aus
  FoV Auslese: 400 mm
  FoV Phase: 100,0 %
  Phasen-Auflösung: 80 %
Physio - PACE
  Atemkontrolle: Aus
  Verknüpfungen: 15
Inline - Allgemein
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  Leber Registrierung: Aus
  Originalbilder speichern: Ein
Inline - MIP
  MIP-Sag: Aus
  MIP-Cor: Aus
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Sequenz - Teil 1
  Einleitung: Ein
  Dimension: 2D
  Phasenstabilisierung: Aus
  Asymmetrisches Echo: Aus
  Kontraste: 1
  Flusskomp.: Nein
  Mehrschichtmodus: Sequenziell
  Bandbreite: 320 Hz/Px
Sequenz - Teil 2
  Segmente: 1
  Lärmreduktion: Keine
  HF-Puls-Typ: Normal
  Gradientenmodus: Normal
  Anregung: Schichtsel.
  HF-Spoiler: Ein
Sequenz - Assistent
  Mode: Aus
  Erlaubte Verzögerung: 0 s

SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\localizer *
TA: 0:16 PM: ISO Voxelgröße: 0.8×0.8×6.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Eigenschaften
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  Start measurement without further preparation: Aus
  Auf Start duch Benutzer warten: Ein
  Start measurements: Einmal messen
Routine
  Schichtgruppe: 1
  Schichten: 5
  Distanzfaktor: 150 %
  Position: L3.9 P10.6 F81.0 mm
  Orientierung: Transversal
  Phasenkod.-Richt.: A >> P
  Schichtgruppe: 2
  Schichten: 7
  Distanzfaktor: 30 %
  Position: L12.6 A5.7 F84.7 mm
  Orientierung: C > T-1.2
  Phasenkod.-Richt.: R >> L
  Schichtgruppe: 3
  Schichten: 3
  Distanzfaktor: 150 %
  Position: R59.1 P52.2 F75.8 mm
  Orientierung: S > T1.4
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Phasen-Oversampling: 25 %
  FoV Auslese: 400 mm
  FoV Phase: 100,0 %
  Schichtdicke: 6,0 mm
  TR: 7,8 ms
  TE: 3,69 ms
  Mittelungen: 1
  Verknüpfungen: 15
  Filter: Verzeichn. Korr.(2D), Elliptischer Filter
  Spulenelemente: BO1-3;SP2-5
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Auflösung - iPAT
  PAT Modus: GRAPPA
  Beschl. Faktor PE: 2
  Ref. Zeilen PE: 24
  Referenzmessungsm.: Integriert
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Geometrie - Allgemein
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  Position: L3.9 P10.6 F81.0 mm
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  Position: L12.6 A5.7 F84.7 mm
  Orientierung: C > T-1.2
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  Position: R59.1 P52.2 F75.8 mm
  Orientierung: S > T1.4
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Geometrie - AutoAlign
  Schichtgruppe: 1
  Position: L3.9 P10.6 F81.0 mm
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  Position: L12.6 A5.7 F84.7 mm
  Orientierung: C > T-1.2
  Phasenkod.-Richt.: R >> L
  Schichtgruppe: 3
  Position: R59.1 P52.2 F75.8 mm
  Orientierung: S > T1.4
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Initiale Position: L3.9 P10.6 F81.0
  L: 3,9 mm
  P: 10,6 mm
  F: 81,0 mm
  Initiale Rotation: 0,00 Grad
  Initiale Orientierung: Transversal
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Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: F
  Tischposition: 80 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: F
  Tischposition: 80 mm
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
SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\t2_haste_cor_4mm *
TA: 1:12 PM: ISO Voxelgröße: 0.5×0.5×4.0 mmPAT: 2 Rel. SNR: 1.00  : h
Eigenschaften
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  Inline-Anzeige automatisch öffnen: Ein
  Inline-Anzeige automatisch schließen: Aus
  Start measurement without further preparation: Aus
  Auf Start duch Benutzer warten: Aus
  Start measurements: Einmal messen
Routine
  Schichtgruppe: 1
  Schichten: 50
  Distanzfaktor: 10 %
  Position: L17.1 P14.5 F103.5 mm
  Orientierung: C > T1.8 > S-0.4
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Phasen-Oversampling: 100 %
  FoV Auslese: 350 mm
  FoV Phase: 100,0 %
  Schichtdicke: 4,0 mm
  TR: 1200,0 ms
  TE: 95 ms
  Mittelungen: 1
  Verknüpfungen: 3
  Filter: Verzeichn. Korr.(2D), Prescan Normalisierung
  Spulenelemente: BO1-3;SP3-5
Kontrast - Allgemein
  TR: 1200,0 ms
  TE: 95 ms
  MTC: Aus
  Magn. Präparation: Keine
  Flipwinkel: 160 Grad
  Fettunterdr.: Keine
  Wasserunterdr.: Keine
  Magn. wiederherst.: Aus
Kontrast - Dynamisch
  Mittelungen: 1
  Mittelungsmodus: Langzeit
  Rekonstruktion: Betrag
  Messungen: 1
  Mehrere Serien: Aus
Auflösung - Allgemein
  FoV Auslese: 350 mm
  FoV Phase: 100,0 %
  Schichtdicke: 4,0 mm
  Basis-Auflösung: 320
  Phasen-Auflösung: 75 %
  Phasen Partial Fourier: 4/8
  Interpolation: Ein
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Auflösung - Filter Bild
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  Prescan Normalisierung: Ein
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Auflösung - Filter Rohdaten
  Rohdaten: Aus
  Elliptischer Filter: Aus
Geometrie - Allgemein
  Schichtgruppe: 1
  Schichten: 50
  Distanzfaktor: 10 %
  Position: L17.1 P14.5 F103.5 mm
  Orientierung: C > T1.8 > S-0.4
  Phasenkod.-Richt.: R >> L
  FoV Auslese: 350 mm
  FoV Phase: 100,0 %
  Schichtdicke: 4,0 mm
  TR: 1200,0 ms
  Mehrschichtmodus: Einzelmess.
  Serie: Absteigend
  Verknüpfungen: 3
Geometrie - AutoAlign
  Schichtgruppe: 1
  Position: L17.1 P14.5 F103.5 mm
  Orientierung: C > T1.8 > S-0.4
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Initiale Position: L17.1 P14.5 F103.5
  L: 17,1 mm
  P: 14,5 mm
  F: 103,5 mm
  Initiale Rotation: 0,00 Grad
  Initiale Orientierung: C > T
  C > T: 1,8
  > S: -0,4
Geometrie - Sättiger
  Fettunterdr.: Keine
  Wasserunterdr.: Keine
  Magn. wiederherst.: Aus
  Spez. Sättiger: Keine
Geometrie - Navigator
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: F
  Tischposition: 103 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: F
  Tischposition: 103 mm
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Physio - Signal 1
  1.Signal/Modus: Kein
  TR: 1200,0 ms
  Verknüpfungen: 3
Physio - Herz
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  FoV Auslese: 350 mm
  FoV Phase: 100,0 %
  Phasen-Auflösung: 75 %
Physio - PACE
  Atemkontrolle: Atemanhalten
  Verknüpfungen: 3
Inline - Allgemein
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Sequenz - Teil 1
  Einleitung: Aus
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  Mehrschichtmodus: Einzelmess.
  Echoabstand: 5,26 ms
  Bandbreite: 401 Hz/Px
Sequenz - Teil 2
  HF-Puls-Typ: Schnell
  Gradientenmodus: Schnell
  Hyperecho: Aus
  Turbo Faktor: 240
Sequenz - Assistent
  Mode: Aus
  Erlaubte Verzögerung: 30 s

SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\ep2d_diff_b50_400_800_tra_p3_4mm *
TA: 4:30 PM: ISO Voxelgröße: 2.0×2.0×4.0 mmPAT: 3 Rel. SNR: 1.00  : epse
Eigenschaften
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  Bilder in großes Bildsegment laden: Aus
  Inline-Anzeige automatisch öffnen: Aus
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Routine
  Schichtgruppe: 1
  Schichten: 41
  Distanzfaktor: 20 %
  Position: R19.2 P21.3 F28.9 mm
  Orientierung: Transversal
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Phasen-Oversampling: 50 %
  FoV Auslese: 380 mm
  FoV Phase: 96,9 %
  Schichtdicke: 4,0 mm
  TR: 8300 ms
  TE: 84,0 ms
  Verknüpfungen: 1
  Filter: Rohdaten, Korr. Dynamischer Felder, Verzeichn. Korr.(2D), Prescan Normalisierung
  Spulenelemente: BO1-3;SP3-5
Kontrast - Allgemein
  TR: 8300 ms
  TE: 84,0 ms
  MTC: Aus
  Magn. Präparation: Keine
  Fettunterdr.: SPAIR
  Fettsät. Art: Stark
Kontrast - Dynamisch
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  Verzögerung in TR: 0 ms
Auflösung - Allgemein
  FoV Auslese: 380 mm
  FoV Phase: 96,9 %
  Schichtdicke: 4,0 mm
  Basis-Auflösung: 192
  Phasen-Auflösung: 90 %
  Phasen Partial Fourier: Aus
  Interpolation: Aus
Auflösung - iPAT
  Beschl. Modus: GRAPPA
  Beschl. Faktor PE: 3
  Ref. Zeilen PE: 48
  Referenzmessungsm.: GRE/separate
Auflösung - Filter Bild
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  Korr. Dynamischer Felder: Ein
  Ungefilterte Bilder: Aus
Auflösung - Filter Rohdaten
  Rohdaten: Ein
  Elliptischer Filter: Aus
Geometrie - Allgemein
  Schichtgruppe: 1
  Schichten: 41
  Distanzfaktor: 20 %
  Position: R19.2 P21.3 F28.9 mm
  Orientierung: Transversal
  Phasenkod.-Richt.: R >> L
  FoV Auslese: 380 mm
  FoV Phase: 96,9 %
  Schichtdicke: 4,0 mm
  TR: 8300 ms
  Mehrschichtmodus: Verschachtelt
  Serie: Verschachtelt
  Verknüpfungen: 1
Geometrie - AutoAlign
  Schichtgruppe: 1
  Position: R19.2 P21.3 F28.9 mm
  Orientierung: Transversal
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Initiale Position: R19.2 P21.3 F28.9
  R: 19,2 mm
  P: 21,3 mm
  F: 28,9 mm
  Initiale Rotation: 90,00 Grad
  Initiale Orientierung: Transversal
Geometrie - Sättiger
  Fettunterdr.: SPAIR
  Fettsät. Art: Stark
  Spez. Sättiger: Keine
Geometrie - Navigator
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: F
  Tischposition: 29 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: F
  Tischposition: 29 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
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System - Justagen
  B0-Shim-Modus: Standard
  B1-Shim-Modus: TrueForm C
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System - Justagevolumen
  Position: R19.2 P21.3 F28.9 mm
  Orientierung: Transversal
  Rotation: 90,00 Grad
  R >> L: 369 mm
  A >> P: 380 mm
  F >> H: 196 mm
  Zurücksetzen: Aus
System - Tx/Rx
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  Korr. Bildskal.: 3,000
  Zurücksetzen: Aus
  ? Ref. Amplitude 1H: 0,000 V
Physio - Signal 1
  1.Signal/Modus: Kein
  TR: 8300 ms
  Verknüpfungen: 1
Physio - PACE
  Atemkontrolle: Aus
  Verknüpfungen: 1
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Sequenz - Teil 1
  Einleitung: Ein
  Optimierung: Min. TE
  Mehrschichtmodus: Verschachtelt
  Freier Echoabstand: Aus
  Echoabstand: 0,73 ms
  Bandbreite: 2004 Hz/Px
Sequenz - Teil 2
  EPI Faktor: 167
  HF-Puls-Typ: Normal
  Gradientenmodus: Schnell

SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\trufi_sag_ loc *
TA: 9.4 s PM: ISO Voxelgröße: 1.4×1.4×8.0 mmPAT: Aus Rel. SNR: 1.00  : tfi
Eigenschaften
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  Bilder in großes Bildsegment laden: Ein
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Routine
  Schichtgruppe: 1
  Schichten: 1
  Distanzfaktor: 20 %
  Position: R61.8 P21.6 F81.9 mm
  Orientierung: S > C0.7 > T0.2
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Phasen-Oversampling: 0 %
  FoV Auslese: 370 mm
  FoV Phase: 84,4 %
  Schichtdicke: 8,0 mm
  TR: 3,47 ms
  TE: 1,51 ms
  Mittelungen: 1
  Filter: Verzeichn. Korr.(2D)
  Spulenelemente: BO1-3;SP2-5
Kontrast - Allgemein
  TR: 3,47 ms
  TE: 1,51 ms
  Magn. Präparation: Keine
  Flipwinkel: 42 Grad
  Fettunterdr.: Keine
Kontrast - Dynamisch
  Mittelungen: 1
  Mittelungsmodus: Kurzzeit
  Rekonstruktion: Betrag
  Messungen: 10
  Pause nach Mess.. 1: 0,0 s
  Pause nach Mess.. 2: 0,0 s
  Pause nach Mess.. 3: 0,0 s
  Pause nach Mess.. 4: 0,0 s
  Pause nach Mess.. 5: 0,0 s
  Pause nach Mess.. 6: 0,0 s
  Pause nach Mess.. 7: 0,0 s
  Pause nach Mess.. 8: 0,0 s
  Pause nach Mess.. 9: 0,0 s
  Mehrere Serien: Aus
Auflösung - Allgemein
  FoV Auslese: 370 mm
  FoV Phase: 84,4 %
  Schichtdicke: 8,0 mm
  Basis-Auflösung: 256
  Phasen-Auflösung: 100 %
  Phasen Partial Fourier: Aus
  Interpolation: Aus
Auflösung - iPAT
  PAT Modus: Keiner
Auflösung - Filter Bild
  Image Filter: Aus
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  Prescan Normalisierung: Aus
  Normalisierung: Aus
  B1-Filter: Aus
Auflösung - Filter Rohdaten
  Rohdaten: Aus
  Elliptischer Filter: Aus
Geometrie - Allgemein
  Schichtgruppe: 1
  Schichten: 1
  Distanzfaktor: 20 %
  Position: R61.8 P21.6 F81.9 mm
  Orientierung: S > C0.7 > T0.2
  Phasenkod.-Richt.: A >> P
  FoV Auslese: 370 mm
  FoV Phase: 84,4 %
  Schichtdicke: 8,0 mm
  TR: 3,47 ms
  Mehrschichtmodus: Sequenziell
  Serie: Verschachtelt
Geometrie - AutoAlign
  Schichtgruppe: 1
  Position: R61.8 P21.6 F81.9 mm
  Orientierung: S > C0.7 > T0.2
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Initiale Position: R61.8 P21.6 F81.9
  R: 61,8 mm
  P: 21,6 mm
  F: 81,9 mm
  Initiale Rotation: 0,00 Grad
  Initiale Orientierung: S > C
  S > C: 0,7
  > T: 0,2
Geometrie - Navigator
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: F
  Tischposition: 82 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: F
  Tischposition: 82 mm
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  Transversal: F >> H
  Kanalkombination: Adaptive Combine
  Unkombiniert speichern: Aus
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System - Justagen
  B0-Shim-Modus: Standard
  B1-Shim-Modus: TrueForm
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System - Justagevolumen
  Position: R61.8 P21.6 F81.9 mm
  Orientierung: S > C0.7 > T0.2
  Rotation: 0,00 Grad
  A >> P: 313 mm
  F >> H: 370 mm
  R >> L: 8 mm
  Zurücksetzen: Aus
System - Tx/Rx
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  Korr. Bildskal.: 1,000
  Zurücksetzen: Aus
  ? Ref. Amplitude 1H: 0,000 V
Physio - Signal 1
  1.Signal/Modus: Kein
  TR: 3,47 ms
  Segmente: 1
Physio - PACE
  Atemkontrolle: Aus
Inline - Allgemein
  Subtrahieren: Aus
  Messungen: 10
  StdAbw: Aus
  Originalbilder speichern: Ein
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Sequenz - Teil 1
  Einleitung: Ein
  Dimension: 2D
  Sortierung: Linear
  Asymmetrisches Echo: Erlaubt
  Flusskomp.: Nein
  Mehrschichtmodus: Sequenziell
  Bandbreite: 781 Hz/Px
Sequenz - Teil 2
  Segmente: 1
  HF-Puls-Typ: Normal
  Gradientenmodus: Schnell
  Anregung: Schichtsel.
Sequenz - Assistent
  Mode: Aus

SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\trufi_cor_ loc *
TA: 0:11 PM: ISO Voxelgröße: 1.4×1.4×8.0 mmPAT: Aus Rel. SNR: 1.00  : tfi
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Routine
  Schichtgruppe: 1
  Schichten: 1
  Distanzfaktor: 20 %
  Position: L6.6 P18.0 F74.7 mm
  Orientierung: C > T1.1 > S0.1
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Phasen-Oversampling: 0 %
  FoV Auslese: 370 mm
  FoV Phase: 100,0 %
  Schichtdicke: 8,0 mm
  TR: 3,47 ms
  TE: 1,51 ms
  Mittelungen: 1
  Filter: Verzeichn. Korr.(2D)
  Spulenelemente: BO1-3;SP2-5
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Auflösung - Allgemein
  FoV Auslese: 370 mm
  FoV Phase: 100,0 %
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Geometrie - Allgemein
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  Position: L6.6 P18.0 F74.7 mm
  Orientierung: C > T1.1 > S0.1
  Phasenkod.-Richt.: R >> L
  FoV Auslese: 370 mm
  FoV Phase: 100,0 %
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Geometrie - AutoAlign
  Schichtgruppe: 1
  Position: L6.6 P18.0 F74.7 mm
  Orientierung: C > T1.1 > S0.1
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Initiale Position: L6.6 P18.0 F74.7
  L: 6,6 mm
  P: 18,0 mm
  F: 74,7 mm
  Initiale Rotation: 0,00 Grad
  Initiale Orientierung: C > T
  C > T: 1,1
  > S: 0,1
Geometrie - Navigator
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: F
  Tischposition: 75 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: F
  Tischposition: 75 mm
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System - Justagevolumen
  Position: L6.6 P18.0 F74.7 mm
  Orientierung: C > T1.1 > S0.1
  Rotation: 0,00 Grad
  R >> L: 370 mm
  F >> H: 370 mm
  A >> P: 8 mm
  Zurücksetzen: Aus
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
SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\t1_fl2d_in-opp_tra *
TA: 1:14 PM: ISO Voxelgröße: 0.5×0.5×5.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Eigenschaften
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  Inline-Anzeige automatisch öffnen: Ein
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Routine
  Schichtgruppe: 1
  Schichten: 40
  Distanzfaktor: 10 %
  Position: L18.3 P8.3 F119.5 mm
  Orientierung: T > S0.5 > C-0.4
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Phasen-Oversampling: 0 %
  FoV Auslese: 350 mm
  FoV Phase: 81,3 %
  Schichtdicke: 5,0 mm
  TR: 178,0 ms
  TE 1: 2,46 ms
  TE 2: 6,15 ms
  Mittelungen: 1
  Verknüpfungen: 3
  Filter: Verzeichn. Korr.(2D), Prescan Normalisierung
  Spulenelemente: BO2,3;SP3-5
Kontrast - Allgemein
  TR: 178,0 ms
  TE 1: 2,46 ms
  TE 2: 6,15 ms
  MTC: Aus
  Magn. Präparation: Keine
  Flipwinkel: 70 Grad
  Fettunterdr.: Keine
  Wasserunterdr.: Keine
  SWI: Aus
Kontrast - Dynamisch
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  Messungen: 1
  Mehrere Serien: Jede Messung
Auflösung - Allgemein
  FoV Auslese: 350 mm
  FoV Phase: 81,3 %
  Schichtdicke: 5,0 mm
  Basis-Auflösung: 320
  Phasen-Auflösung: 80 %
  Phasen Partial Fourier: Aus
  Interpolation: Ein
Auflösung - iPAT
  PAT Modus: GRAPPA
  Beschl. Faktor PE: 2
  Ref. Zeilen PE: 24
  Referenzmessungsm.: Integriert
Auflösung - Filter Bild
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  Prescan Normalisierung: Ein
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Geometrie - Allgemein
  Schichtgruppe: 1
  Schichten: 40
  Distanzfaktor: 10 %
  Position: L18.3 P8.3 F119.5 mm
  Orientierung: T > S0.5 > C-0.4
  Phasenkod.-Richt.: A >> P
  FoV Auslese: 350 mm
  FoV Phase: 81,3 %
  Schichtdicke: 5,0 mm
  TR: 178,0 ms
  Mehrschichtmodus: Verschachtelt
  Serie: Verschacht. in A. A.
  Verknüpfungen: 3
Geometrie - AutoAlign
  Schichtgruppe: 1
  Position: L18.3 P8.3 F119.5 mm
  Orientierung: T > S0.5 > C-0.4
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Initiale Position: L18.3 P8.3 F119.5
  L: 18,3 mm
  P: 8,3 mm
  F: 119,5 mm
  Initiale Rotation: 0,00 Grad
  Initiale Orientierung: T > S
  T > S: 0,5
  > C: -0,4
Geometrie - Sättiger
  Sättigungsmodus: Quick
  Fettunterdr.: Keine
  Wasserunterdr.: Keine
  Spez. Sättiger: Q-parallel F/H
  Lücke: 10,0 mm
  Dicke: 60 mm
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: F
  Tischposition: 119 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: F
  Tischposition: 119 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: P >> A
  Transversal: H >> F
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System - Justagevolumen
  Position: L18.3 P8.3 F119.5 mm
  Orientierung: T > S0.5 > C-0.4
  Rotation: 0,00 Grad
  A >> P: 285 mm
  R >> L: 350 mm
  F >> H: 220 mm
  Zurücksetzen: Aus
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Physio - Signal 1
  1.Signal/Modus: Kein
  TR: 178,0 ms
  Verknüpfungen: 3
  Segmente: 1
Physio - Herz
  Hilfslinien: Keine
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  FoV Phase: 81,3 %
  Phasen-Auflösung: 80 %
Physio - PACE
  Atemkontrolle: Atemanhalten
  Verknüpfungen: 3
Inline - Allgemein
  Subtrahieren: Aus
  Messungen: 1
  StdAbw: Aus
  Leber Registrierung: Aus
  Originalbilder speichern: Ein
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Sequenz - Teil 1
  Einleitung: Aus
  Dimension: 2D
  Phasenstabilisierung: Aus
  Asymmetrisches Echo: Erlaubt
  Kontraste: 2
  Flusskomp. 1: Nein
  Auslese Modus: Bipolar
  Mehrschichtmodus: Verschachtelt
  Bandbreite 1: 300 Hz/Px
  Bandbreite 2: 290 Hz/Px
Sequenz - Teil 2
  Segmente: 1
  Lärmreduktion: Keine
  HF-Puls-Typ: Schnell
  Gradientenmodus: Schnell
  Anregung: Schichtsel.
  HF-Spoiler: Ein
Sequenz - Assistent
  Mode: Aus
  Erlaubte Verzögerung: 60 s

SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\t1_vibe_fs_tra_bh_384 *
TA: 0:21 PM: ISO Voxelgröße: 0.5×0.5×3.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Eigenschaften
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  Bilder in großes Bildsegment laden: Aus
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  Auf Start duch Benutzer warten: Ein
  Start measurements: Mehrfach messen
Routine
  3D-Block-Gruppe: 1
  3D-Blöcke: 1
  Distanzfaktor: 20 %
  Position: L18.3 P8.3 F119.5 mm
  Orientierung: T > S0.5 > C-0.4
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Phasen-Oversampling: 0 %
  Schicht-Oversampling: 11,1 %
  Schichten im 3D-Block: 72
  FoV Auslese: 350 mm
  FoV Phase: 75,0 %
  Schichtdicke: 3,0 mm
  TR: 4,36 ms
  TE: 1,97 ms
  Mittelungen: 1
  Verknüpfungen: 1
  Filter: Verzeichn. Korr.(2D), Prescan Normalisierung
  Spulenelemente: BO2,3;SP3-5
Kontrast - Allgemein
  TR: 4,36 ms
  TE: 1,97 ms
  Flipwinkel: 9,0 Grad
  Fettunterdr.: Q-fettsätt.
  Lines Per Shot: 40
  Wasserunterdr.: Keine
  Dixon: Aus
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Auflösung - Allgemein
  FoV Auslese: 350 mm
  FoV Phase: 75,0 %
  Schichtdicke: 3,0 mm
  Basis-Auflösung: 384
  Phasen-Auflösung: 70 %
  Schicht-Auflösung: 63 %
  Phasen Partial Fourier: 7/8
  Schicht Partial Fourier: 6/8
  Trajektorie: Kartesisch
  Gemeins. Daten: Aus
  Interpolation: Ein
Auflösung - iPAT
  PAT Modus: GRAPPA
  Beschl. Faktor PE: 2
  Ref. Zeilen PE: 26
  Beschl. Faktor 3D: 1
  Referenzmessungsm.: Integriert
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Auflösung - Filter Rohdaten
  Rohdaten: Aus
  Elliptischer Filter: Aus
  POCS: Aus
Geometrie - Allgemein
  3D-Block-Gruppe: 1
  3D-Blöcke: 1
  Distanzfaktor: 20 %
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  Schicht-Oversampling: 11,1 %
  Schichten im 3D-Block: 72
  FoV Auslese: 350 mm
  FoV Phase: 75,0 %
  Schichtdicke: 3,0 mm
  TR: 4,36 ms
  Mehrschichtmodus: Sequenziell
  Serie: Aufsteigend
  Verknüpfungen: 1
Geometrie - AutoAlign
  3D-Block-Gruppe: 1
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Geometrie - Sättiger
  Fettunterdr.: Q-fettsätt.
  Wasserunterdr.: Keine
  Dixon: Aus
  Spez. Sättiger: Parallel F/H
  Lücke: 10,0 mm
  Dicke: 60 mm
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System - Justagevolumen
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  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 216 mm
  Zurücksetzen: Aus
System - Tx/Rx
  Frequenz 1H: 123,250091 MHz
  Korrekturfaktor: 1
  Verstärkung: Klein
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Physio - PACE
  Atemkontrolle: Aus
  Verknüpfungen: 1
Inline - Allgemein
  Gemeins. Daten: Aus
  Flipwinkel: 9,0 Grad
  Messungen: 1
  Zeitstempel im Bild: Aus
  Zeitliche Interpolation: 1
  3D zentr. Sortierung: Aus
  Zeit bis k-Raummitte: 8,9 s
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Sequenz - Teil 1
  Einleitung: Aus
  Dimension: 3D
  Elliptische Abtastung: Aus
  Sortierung: Linear
  Asymmetrisches Echo: Aus
  Kontraste: 1
  Optimierung: Min. TE
  Mehrschichtmodus: Sequenziell
  Bandbreite: 480 Hz/Px
Sequenz - Teil 2
  HF-Puls-Typ: Schnell
  Gradientenmodus: Schnell
  Anregung: 3D-Block sel.
  HF-Spoiler: Ein
  Erh. Gradienten-Spoiler: Aus
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
SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\t1_fl2d_in_tra *
TA: 1:16 PM: ISO Voxelgröße: 0.5×0.5×4.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Eigenschaften
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  Bilder in großes Bildsegment laden: Ein
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  Auf Start duch Benutzer warten: Aus
  Start measurements: Einmal messen
Routine
  Schichtgruppe: 1
  Schichten: 50
  Distanzfaktor: 10 %
  Position: L18.3 P8.3 F119.5 mm
  Orientierung: T > S0.5 > C-0.4
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Phasen-Oversampling: 15 %
  FoV Auslese: 350 mm
  FoV Phase: 81,3 %
  Schichtdicke: 4,0 mm
  TR: 208,0 ms
  TE: 2,46 ms
  Mittelungen: 1
  Verknüpfungen: 3
  Filter: Verzeichn. Korr.(2D), Prescan Normalisierung
  Spulenelemente: BO2,3;SP3-5
Kontrast - Allgemein
  TR: 208,0 ms
  TE: 2,46 ms
  MTC: Aus
  Magn. Präparation: Keine
  Flipwinkel: 70 Grad
  Fettunterdr.: Keine
  Wasserunterdr.: Keine
  SWI: Aus
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Auflösung - Allgemein
  FoV Auslese: 350 mm
  FoV Phase: 81,3 %
  Schichtdicke: 4,0 mm
  Basis-Auflösung: 320
  Phasen-Auflösung: 80 %
  Phasen Partial Fourier: 6/8
  Interpolation: Ein
Auflösung - iPAT
  PAT Modus: GRAPPA
  Beschl. Faktor PE: 2
  Ref. Zeilen PE: 24
  Referenzmessungsm.: Integriert
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Auflösung - Filter Rohdaten
  Rohdaten: Aus
  Elliptischer Filter: Aus
Geometrie - Allgemein
  Schichtgruppe: 1
  Schichten: 50
  Distanzfaktor: 10 %
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  FoV Phase: 81,3 %
  Schichtdicke: 4,0 mm
  TR: 208,0 ms
  Mehrschichtmodus: Verschachtelt
  Serie: Verschacht. in A. A.
  Verknüpfungen: 3
Geometrie - AutoAlign
  Schichtgruppe: 1
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Geometrie - Sättiger
  Sättigungsmodus: Quick
  Fettunterdr.: Keine
  Wasserunterdr.: Keine
  Spez. Sättiger: Q-parallel F/H
  Lücke: 10,0 mm
  Dicke: 60 mm
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System - Verschiedenes
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  Spulenanwahl: Aus - Beide
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System - Justagevolumen
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  A >> P: 285 mm
  R >> L: 350 mm
  F >> H: 220 mm
  Zurücksetzen: Aus
System - Tx/Rx
  Frequenz 1H: 123,250091 MHz
  Korrekturfaktor: 1
  Verstärkung: Groß
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Physio - Signal 1
  1.Signal/Modus: Kein
  TR: 208,0 ms
  Verknüpfungen: 3
  Segmente: 1
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Physio - PACE
  Atemkontrolle: Atemanhalten
  Verknüpfungen: 3
Inline - Allgemein
  Subtrahieren: Aus
  Messungen: 1
  StdAbw: Aus
  Leber Registrierung: Aus
  Originalbilder speichern: Ein
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Sequenz - Teil 1
  Einleitung: Aus
  Dimension: 2D
  Phasenstabilisierung: Aus
  Asymmetrisches Echo: Erlaubt
  Kontraste: 1
  Flusskomp.: Nein
  Mehrschichtmodus: Verschachtelt
  Bandbreite: 300 Hz/Px
Sequenz - Teil 2
  Segmente: 1
  Lärmreduktion: Keine
  HF-Puls-Typ: Schnell
  Gradientenmodus: Schnell
  Anregung: Schichtsel.
  HF-Spoiler: Ein
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
SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\t2_haste_tra_mbh *
TA: 1:13 PM: ISO Voxelgröße: 1.1×1.1×4.0 mmPAT: 2 Rel. SNR: 1.00  : h
Eigenschaften
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  Bilder in großes Bildsegment laden: Aus
  Inline-Anzeige automatisch öffnen: Ein
  Inline-Anzeige automatisch schließen: Ein
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Routine
  Schichtgruppe: 1
  Schichten: 38
  Distanzfaktor: 10 %
  Position: R10.2 P8.7 H6.1 mm
  Orientierung: T > S-3.0 > C2.6
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Phasen-Oversampling: 97 %
  FoV Auslese: 350 mm
  FoV Phase: 100,0 %
  Schichtdicke: 4,0 mm
  TR: 1600,0 ms
  TE: 96 ms
  Mittelungen: 1
  Verknüpfungen: 3
  Filter: Verzeichn. Korr.(2D), Prescan Normalisierung
  Spulenelemente: BO1-3;SP4,5
Kontrast - Allgemein
  TR: 1600,0 ms
  TE: 96 ms
  MTC: Aus
  Magn. Präparation: Keine
  Flipwinkel: 160 Grad
  Fettunterdr.: Keine
  Wasserunterdr.: Keine
  Magn. wiederherst.: Aus
Kontrast - Dynamisch
  Mittelungen: 1
  Mittelungsmodus: Langzeit
  Rekonstruktion: Betrag
  Messungen: 1
  Mehrere Serien: Aus
Auflösung - Allgemein
  FoV Auslese: 350 mm
  FoV Phase: 100,0 %
  Schichtdicke: 4,0 mm
  Basis-Auflösung: 320
  Phasen-Auflösung: 81 %
  Phasen Partial Fourier: 4/8
  Interpolation: Aus
Auflösung - iPAT
  PAT Modus: GRAPPA
  Beschl. Faktor PE: 2
  Ref. Zeilen PE: 42
  Referenzmessungsm.: Integriert
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Geometrie - Allgemein
  Schichtgruppe: 1
  Schichten: 38
  Distanzfaktor: 10 %
  Position: R10.2 P8.7 H6.1 mm
  Orientierung: T > S-3.0 > C2.6
  Phasenkod.-Richt.: A >> P
  FoV Auslese: 350 mm
  FoV Phase: 100,0 %
  Schichtdicke: 4,0 mm
  TR: 1600,0 ms
  Mehrschichtmodus: Einzelmess.
  Serie: Absteigend
  Verknüpfungen: 3
Geometrie - AutoAlign
  Schichtgruppe: 1
  Position: R10.2 P8.7 H6.1 mm
  Orientierung: T > S-3.0 > C2.6
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Initiale Position: R10.2 P8.7 H6.1
  R: 10,2 mm
  P: 8,7 mm
  H: 6,1 mm
  Initiale Rotation: 0,80 Grad
  Initiale Orientierung: T > S
  T > S: -3,0
  > C: 2,6
Geometrie - Sättiger
  Fettunterdr.: Keine
  Wasserunterdr.: Keine
  Magn. wiederherst.: Aus
  Spez. Sättiger: Parallel F/H
  Lücke: 10 mm
  Dicke: 60 mm
Geometrie - Navigator
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: H
  Tischposition: 6 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: H
  Tischposition: 6 mm
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  Spulenanwahl: Default
System - Justagen
  B0-Shim-Modus: Tune-Up
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System - Justagevolumen
  Position: Isozentrum
  Orientierung: Transversal
  Rotation: 0,00 Grad
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Zurücksetzen: Aus
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Physio - Signal 1
  1.Signal/Modus: Kein
  TR: 1600,0 ms
  Verknüpfungen: 3
Physio - Herz
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  FoV Phase: 100,0 %
  Phasen-Auflösung: 81 %
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Inline - Allgemein
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Sequenz - Teil 1
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  Mehrschichtmodus: Einzelmess.
  Echoabstand: 4,18 ms
  Bandbreite: 710 Hz/Px
Sequenz - Teil 2
  HF-Puls-Typ: Schnell
  Gradientenmodus: Schnell
  Hyperecho: Aus
  Turbo Faktor: 259
Sequenz - Assistent
  Mode: Min. Flipwinkel
  Min. Flipwinkel: 140 Grad
  Erlaubte Verzögerung: 30 s

SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\t1_vibe_fs_tra_bh_384 *
TA: 0:21 PM: ISO Voxelgröße: 0.5×0.5×3.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Eigenschaften
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  Inline-Anzeige automatisch schließen: Aus
  Start measurement without further preparation: Aus
  Auf Start duch Benutzer warten: Ein
  Start measurements: Mehrfach messen
Routine
  3D-Block-Gruppe: 1
  3D-Blöcke: 1
  Distanzfaktor: 20 %
  Position: L19.2 P8.6 F108.5 mm
  Orientierung: T > S0.5 > C-0.4
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Phasen-Oversampling: 0 %
  Schicht-Oversampling: 11,1 %
  Schichten im 3D-Block: 72
  FoV Auslese: 350 mm
  FoV Phase: 75,0 %
  Schichtdicke: 3,0 mm
  TR: 4,36 ms
  TE: 1,97 ms
  Mittelungen: 1
  Verknüpfungen: 1
  Filter: Verzeichn. Korr.(2D), Prescan Normalisierung
  Spulenelemente: BO2,3;SP3-5
Kontrast - Allgemein
  TR: 4,36 ms
  TE: 1,97 ms
  Flipwinkel: 9,0 Grad
  Fettunterdr.: Q-fettsätt.
  Lines Per Shot: 40
  Wasserunterdr.: Keine
  Dixon: Aus
Kontrast - Dynamisch
  Mittelungen: 1
  Mittelungsmodus: Kurzzeit
  Rekonstruktion: Betrag
  Messungen: 1
  Mehrere Serien: Jede Messung
Auflösung - Allgemein
  FoV Auslese: 350 mm
  FoV Phase: 75,0 %
  Schichtdicke: 3,0 mm
  Basis-Auflösung: 384
  Phasen-Auflösung: 70 %
  Schicht-Auflösung: 63 %
  Phasen Partial Fourier: 7/8
  Schicht Partial Fourier: 6/8
  Trajektorie: Kartesisch
  Gemeins. Daten: Aus
  Interpolation: Ein
Auflösung - iPAT
  PAT Modus: GRAPPA
  Beschl. Faktor PE: 2
  Ref. Zeilen PE: 26
  Beschl. Faktor 3D: 1
  Referenzmessungsm.: Integriert
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Auflösung - Filter Rohdaten
  Rohdaten: Aus
  Elliptischer Filter: Aus
  POCS: Aus
Geometrie - Allgemein
  3D-Block-Gruppe: 1
  3D-Blöcke: 1
  Distanzfaktor: 20 %
  Position: L19.2 P8.6 F108.5 mm
  Orientierung: T > S0.5 > C-0.4
  Phasenkod.-Richt.: A >> P
  Schicht-Oversampling: 11,1 %
  Schichten im 3D-Block: 72
  FoV Auslese: 350 mm
  FoV Phase: 75,0 %
  Schichtdicke: 3,0 mm
  TR: 4,36 ms
  Mehrschichtmodus: Sequenziell
  Serie: Aufsteigend
  Verknüpfungen: 1
Geometrie - AutoAlign
  3D-Block-Gruppe: 1
  Position: L19.2 P8.6 F108.5 mm
  Orientierung: T > S0.5 > C-0.4
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Initiale Position: L19.2 P8.6 F108.5
  L: 19,2 mm
  P: 8,6 mm
  F: 108,5 mm
  Initiale Rotation: 0,00 Grad
  Initiale Orientierung: T > S
  T > S: 0,5
  > C: -0,4
Geometrie - Sättiger
  Fettunterdr.: Q-fettsätt.
  Wasserunterdr.: Keine
  Dixon: Aus
  Spez. Sättiger: Parallel F/H
  Lücke: 10,0 mm
  Dicke: 60 mm
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: F
  Tischposition: 109 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: F
  Tischposition: 109 mm
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  Spulenanwahl: Ein  - AutoCoilSelect
System - Justagen
  B0-Shim-Modus: Standard
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System - Justagevolumen
  Position: L19.2 P8.6 F108.5 mm
  Orientierung: T > S0.5 > C-0.4
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  F >> H: 216 mm
  Zurücksetzen: Aus
System - Tx/Rx
  Frequenz 1H: 123,250091 MHz
  Korrekturfaktor: 1
  Verstärkung: Klein
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Physio - PACE
  Atemkontrolle: Aus
  Verknüpfungen: 1
Inline - Allgemein
  Gemeins. Daten: Aus
  Flipwinkel: 9,0 Grad
  Messungen: 1
  Zeitstempel im Bild: Aus
  Zeitliche Interpolation: 1
  3D zentr. Sortierung: Aus
  Zeit bis k-Raummitte: 8,9 s
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Sequenz - Teil 1
  Einleitung: Aus
  Dimension: 3D
  Elliptische Abtastung: Aus
  Sortierung: Linear
  Asymmetrisches Echo: Aus
  Kontraste: 1
  Optimierung: Min. TE
  Mehrschichtmodus: Sequenziell
  Bandbreite: 480 Hz/Px
Sequenz - Teil 2
  HF-Puls-Typ: Schnell
  Gradientenmodus: Schnell
  Anregung: 3D-Block sel.
  HF-Spoiler: Ein
  Erh. Gradienten-Spoiler: Aus
Sequenz - Assistent
  Mode: Aus
  Erlaubte Verzögerung: 60 s

SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\t1_vibe_fs_cor_KM *
TA: 0:22 PM: ISO Voxelgröße: 0.5×0.5×2.5 mmPAT: 2 Rel. SNR: 1.00  : fl
Eigenschaften
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  Bilder in großes Bildsegment laden: Ein
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Routine
  3D-Block-Gruppe: 1
  3D-Blöcke: 1
  Distanzfaktor: 20 %
  Position: L17.1 P14.5 F103.5 mm
  Orientierung: C > T1.8 > S-0.4
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Phasen-Oversampling: 29 %
  Schicht-Oversampling: 10,0 %
  Schichten im 3D-Block: 80
  FoV Auslese: 350 mm
  FoV Phase: 99,4 %
  Schichtdicke: 2,5 mm
  TR: 3,62 ms
  TE: 1,3 ms
  Mittelungen: 1
  Verknüpfungen: 1
  Filter: Verzeichn. Korr.(2D), Prescan Normalisierung
  Spulenelemente: BO1-3;SP3-5
Kontrast - Allgemein
  TR: 3,62 ms
  TE: 1,3 ms
  Flipwinkel: 9,0 Grad
  Fettunterdr.: Q-fettsätt.
  Lines Per Shot: 45
  Wasserunterdr.: Keine
  Dixon: Aus
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Auflösung - Allgemein
  FoV Auslese: 350 mm
  FoV Phase: 99,4 %
  Schichtdicke: 2,5 mm
  Basis-Auflösung: 352
  Phasen-Auflösung: 64 %
  Schicht-Auflösung: 61 %
  Phasen Partial Fourier: 6/8
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Auflösung - iPAT
  PAT Modus: GRAPPA
  Beschl. Faktor PE: 2
  Ref. Zeilen PE: 24
  Beschl. Faktor 3D: 1
  Referenzmessungsm.: Integriert
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Geometrie - Allgemein
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  Position: L17.1 P14.5 F103.5 mm
  Orientierung: C > T1.8 > S-0.4
  Phasenkod.-Richt.: R >> L
  Schicht-Oversampling: 10,0 %
  Schichten im 3D-Block: 80
  FoV Auslese: 350 mm
  FoV Phase: 99,4 %
  Schichtdicke: 2,5 mm
  TR: 3,62 ms
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Geometrie - AutoAlign
  3D-Block-Gruppe: 1
  Position: L17.1 P14.5 F103.5 mm
  Orientierung: C > T1.8 > S-0.4
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Initiale Position: L17.1 P14.5 F103.5
  L: 17,1 mm
  P: 14,5 mm
  F: 103,5 mm
  Initiale Rotation: 0,00 Grad
  Initiale Orientierung: C > T
  C > T: 1,8
  > S: -0,4
Geometrie - Sättiger
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  Spez. Sättiger: Keine
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: F
  Tischposition: 103 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: F
  Tischposition: 103 mm
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System - Justagevolumen
  Position: L17.1 P14.5 F103.5 mm
  Orientierung: C > T1.8 > S-0.4
  Rotation: 0,00 Grad
  R >> L: 349 mm
  F >> H: 350 mm
  A >> P: 200 mm
  Zurücksetzen: Aus
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Inline - Allgemein
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  Zeit bis k-Raummitte: 7,7 s
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Sequenz - Teil 1
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  Asymmetrisches Echo: Schwach
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  Bandbreite: 510 Hz/Px
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
SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\t1_vibe_fs_tra_bh_384 *
TA: 0:21 PM: ISO Voxelgröße: 0.5×0.5×3.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Eigenschaften
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  Bilder in großes Bildsegment laden: Aus
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Routine
  3D-Block-Gruppe: 1
  3D-Blöcke: 1
  Distanzfaktor: 20 %
  Position: L19.2 P8.6 F108.5 mm
  Orientierung: T > S0.5 > C-0.4
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Phasen-Oversampling: 0 %
  Schicht-Oversampling: 11,1 %
  Schichten im 3D-Block: 72
  FoV Auslese: 350 mm
  FoV Phase: 75,0 %
  Schichtdicke: 3,0 mm
  TR: 4,36 ms
  TE: 1,97 ms
  Mittelungen: 1
  Verknüpfungen: 1
  Filter: Verzeichn. Korr.(2D), Prescan Normalisierung
  Spulenelemente: BO2,3;SP3-5
Kontrast - Allgemein
  TR: 4,36 ms
  TE: 1,97 ms
  Flipwinkel: 9,0 Grad
  Fettunterdr.: Q-fettsätt.
  Lines Per Shot: 40
  Wasserunterdr.: Keine
  Dixon: Aus
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Auflösung - Allgemein
  FoV Auslese: 350 mm
  FoV Phase: 75,0 %
  Schichtdicke: 3,0 mm
  Basis-Auflösung: 384
  Phasen-Auflösung: 70 %
  Schicht-Auflösung: 63 %
  Phasen Partial Fourier: 7/8
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Auflösung - iPAT
  PAT Modus: GRAPPA
  Beschl. Faktor PE: 2
  Ref. Zeilen PE: 26
  Beschl. Faktor 3D: 1
  Referenzmessungsm.: Integriert
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Geometrie - Allgemein
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  Position: L19.2 P8.6 F108.5 mm
  Orientierung: T > S0.5 > C-0.4
  Phasenkod.-Richt.: A >> P
  Schicht-Oversampling: 11,1 %
  Schichten im 3D-Block: 72
  FoV Auslese: 350 mm
  FoV Phase: 75,0 %
  Schichtdicke: 3,0 mm
  TR: 4,36 ms
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Geometrie - AutoAlign
  3D-Block-Gruppe: 1
  Position: L19.2 P8.6 F108.5 mm
  Orientierung: T > S0.5 > C-0.4
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Initiale Position: L19.2 P8.6 F108.5
  L: 19,2 mm
  P: 8,6 mm
  F: 108,5 mm
  Initiale Rotation: 0,00 Grad
  Initiale Orientierung: T > S
  T > S: 0,5
  > C: -0,4
Geometrie - Sättiger
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  Spez. Sättiger: Parallel F/H
  Lücke: 10,0 mm
  Dicke: 60 mm
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: F
  Tischposition: 109 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: F
  Tischposition: 109 mm
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System - Justagevolumen
  Position: L19.2 P8.6 F108.5 mm
  Orientierung: T > S0.5 > C-0.4
  Rotation: 0,00 Grad
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 216 mm
  Zurücksetzen: Aus
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Inline - Allgemein
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  Zeit bis k-Raummitte: 8,9 s
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Sequenz - Teil 1
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  Asymmetrisches Echo: Aus
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  Bandbreite: 480 Hz/Px
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
SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\localizer *
TA: 0:28 PM: ISO Voxelgröße: 0.8×0.8×6.0 mmPAT: Aus Rel. SNR: 1.00  : fl
Eigenschaften
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  Bilder in großes Bildsegment laden: Ein
  Inline-Anzeige automatisch öffnen: Aus
  Inline-Anzeige automatisch schließen: Aus
  Start measurement without further preparation: Ein
  Auf Start duch Benutzer warten: Aus
  Start measurements: Einmal messen
Routine
  Schichtgruppe: 1
  Schichten: 5
  Distanzfaktor: 150 %
  Position: Isozentrum
  Orientierung: Transversal
  Phasenkod.-Richt.: A >> P
  Schichtgruppe: 2
  Schichten: 7
  Distanzfaktor: 30 %
  Position: L0.0 P30.0 H0.0 mm
  Orientierung: Coronal
  Phasenkod.-Richt.: R >> L
  Schichtgruppe: 3
  Schichten: 3
  Distanzfaktor: 150 %
  Position: Isozentrum
  Orientierung: Sagittal
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Phasen-Oversampling: 25 %
  FoV Auslese: 400 mm
  FoV Phase: 100,0 %
  Schichtdicke: 6,0 mm
  TR: 7,8 ms
  TE: 3,69 ms
  Mittelungen: 1
  Verknüpfungen: 15
  Filter: Verzeichn. Korr.(2D), Elliptischer Filter
  Spulenelemente: BO1-3;SP1-4
Kontrast - Allgemein
  TR: 7,8 ms
  TE: 3,69 ms
  TD: 0 ms
  MTC: Aus
  Magn. Präparation: Keine
  Flipwinkel: 20 Grad
  Fettunterdr.: Keine
  Wasserunterdr.: Keine
  SWI: Aus
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Auflösung - Allgemein
  FoV Auslese: 400 mm
  FoV Phase: 100,0 %
  Schichtdicke: 6,0 mm
  Basis-Auflösung: 256
  Phasen-Auflösung: 80 %
  Phasen Partial Fourier: 7/8
  Interpolation: Ein
Auflösung - iPAT
  PAT Modus: Keiner
Auflösung - Filter Bild
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  Prescan Normalisierung: Aus
  Normalisierung: Aus
  B1-Filter: Aus
Auflösung - Filter Rohdaten
  Rohdaten: Aus
  Elliptischer Filter: Ein
Geometrie - Allgemein
  Schichtgruppe: 1
  Schichten: 5
  Distanzfaktor: 150 %
  Position: Isozentrum
  Orientierung: Transversal
  Phasenkod.-Richt.: A >> P
  Schichtgruppe: 2
  Schichten: 7
  Distanzfaktor: 30 %
  Position: L0.0 P30.0 H0.0 mm
  Orientierung: Coronal
  Phasenkod.-Richt.: R >> L
  Schichtgruppe: 3
  Schichten: 3
  Distanzfaktor: 150 %
  Position: Isozentrum
  Orientierung: Sagittal
  Phasenkod.-Richt.: A >> P
  FoV Auslese: 400 mm
  FoV Phase: 100,0 %
  Schichtdicke: 6,0 mm
  TR: 7,8 ms
  Mehrschichtmodus: Sequenziell
  Serie: Verschachtelt
  Verknüpfungen: 15
Geometrie - AutoAlign
  Schichtgruppe: 1
  Position: Isozentrum
  Orientierung: Transversal
  Phasenkod.-Richt.: A >> P
  Schichtgruppe: 2
  Position: L0.0 P30.0 H0.0 mm
  Orientierung: Coronal
  Phasenkod.-Richt.: R >> L
  Schichtgruppe: 3
  Position: Isozentrum
  Orientierung: Sagittal
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Initiale Position: Isozentrum
  L: 0,0 mm
  P: 0,0 mm
  H: 0,0 mm
  Initiale Rotation: 0,00 Grad
  Initiale Orientierung: Transversal
Geometrie - Sättiger
  Sättigungsmodus: Standard
  Fettunterdr.: Keine
  Wasserunterdr.: Keine
  Spez. Sättiger: Keine
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: H
  Tischposition: 0 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: H
  Tischposition: 0 mm
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System - Justagen
  B0-Shim-Modus: Tune-Up
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System - Justagevolumen
  Position: Isozentrum
  Orientierung: Transversal
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  F >> H: 350 mm
  Zurücksetzen: Aus
System - Tx/Rx
  Frequenz 1H: 123,250091 MHz
  Korrekturfaktor: 1
  Verstärkung: Groß
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Physio - Signal 1
  1.Signal/Modus: Kein
  TR: 7,8 ms
  Verknüpfungen: 15
  Segmente: 1
Physio - Herz
  Hilfslinien: Keine
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  FoV Auslese: 400 mm
  FoV Phase: 100,0 %
  Phasen-Auflösung: 80 %
Physio - PACE
  Atemkontrolle: Aus
  Verknüpfungen: 15
Inline - Allgemein
  Subtrahieren: Aus
  Messungen: 1
  StdAbw: Aus
  Leber Registrierung: Aus
  Originalbilder speichern: Ein
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Sequenz - Teil 1
  Einleitung: Ein
  Dimension: 2D
  Phasenstabilisierung: Aus
  Asymmetrisches Echo: Aus
  Kontraste: 1
  Flusskomp.: Nein
  Mehrschichtmodus: Sequenziell
  Bandbreite: 320 Hz/Px
Sequenz - Teil 2
  Segmente: 1
  Lärmreduktion: Keine
  HF-Puls-Typ: Normal
  Gradientenmodus: Normal
  Anregung: Schichtsel.
  HF-Spoiler: Ein
Sequenz - Assistent
  Mode: Aus
  Erlaubte Verzögerung: 0 s

SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\localizer *
TA: 0:16 PM: ISO Voxelgröße: 0.8×0.8×6.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Eigenschaften
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  Start measurement without further preparation: Aus
  Auf Start duch Benutzer warten: Ein
  Start measurements: Einmal messen
Routine
  Schichtgruppe: 1
  Schichten: 5
  Distanzfaktor: 150 %
  Position: L3.9 P10.6 F81.0 mm
  Orientierung: Transversal
  Phasenkod.-Richt.: A >> P
  Schichtgruppe: 2
  Schichten: 7
  Distanzfaktor: 30 %
  Position: L12.6 A5.7 F84.7 mm
  Orientierung: C > T-1.2
  Phasenkod.-Richt.: R >> L
  Schichtgruppe: 3
  Schichten: 3
  Distanzfaktor: 150 %
  Position: R59.1 P52.2 F75.8 mm
  Orientierung: S > T1.4
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Phasen-Oversampling: 25 %
  FoV Auslese: 400 mm
  FoV Phase: 100,0 %
  Schichtdicke: 6,0 mm
  TR: 7,8 ms
  TE: 3,69 ms
  Mittelungen: 1
  Verknüpfungen: 15
  Filter: Verzeichn. Korr.(2D), Elliptischer Filter
  Spulenelemente: BO1-3;SP2-5
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Auflösung - iPAT
  PAT Modus: GRAPPA
  Beschl. Faktor PE: 2
  Ref. Zeilen PE: 24
  Referenzmessungsm.: Integriert
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Geometrie - Allgemein
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  Position: L3.9 P10.6 F81.0 mm
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  Position: L12.6 A5.7 F84.7 mm
  Orientierung: C > T-1.2
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  Position: R59.1 P52.2 F75.8 mm
  Orientierung: S > T1.4
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Geometrie - AutoAlign
  Schichtgruppe: 1
  Position: L3.9 P10.6 F81.0 mm
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  Position: L12.6 A5.7 F84.7 mm
  Orientierung: C > T-1.2
  Phasenkod.-Richt.: R >> L
  Schichtgruppe: 3
  Position: R59.1 P52.2 F75.8 mm
  Orientierung: S > T1.4
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Initiale Position: L3.9 P10.6 F81.0
  L: 3,9 mm
  P: 10,6 mm
  F: 81,0 mm
  Initiale Rotation: 0,00 Grad
  Initiale Orientierung: Transversal
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Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: F
  Tischposition: 80 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: F
  Tischposition: 80 mm
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
SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\t2_haste_cor_4mm *
TA: 1:12 PM: ISO Voxelgröße: 0.5×0.5×4.0 mmPAT: 2 Rel. SNR: 1.00  : h
Eigenschaften
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  Inline-Anzeige automatisch öffnen: Ein
  Inline-Anzeige automatisch schließen: Aus
  Start measurement without further preparation: Aus
  Auf Start duch Benutzer warten: Aus
  Start measurements: Einmal messen
Routine
  Schichtgruppe: 1
  Schichten: 50
  Distanzfaktor: 10 %
  Position: L17.1 P14.5 F103.5 mm
  Orientierung: C > T1.8 > S-0.4
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Phasen-Oversampling: 100 %
  FoV Auslese: 350 mm
  FoV Phase: 100,0 %
  Schichtdicke: 4,0 mm
  TR: 1200,0 ms
  TE: 95 ms
  Mittelungen: 1
  Verknüpfungen: 3
  Filter: Verzeichn. Korr.(2D), Prescan Normalisierung
  Spulenelemente: BO1-3;SP3-5
Kontrast - Allgemein
  TR: 1200,0 ms
  TE: 95 ms
  MTC: Aus
  Magn. Präparation: Keine
  Flipwinkel: 160 Grad
  Fettunterdr.: Keine
  Wasserunterdr.: Keine
  Magn. wiederherst.: Aus
Kontrast - Dynamisch
  Mittelungen: 1
  Mittelungsmodus: Langzeit
  Rekonstruktion: Betrag
  Messungen: 1
  Mehrere Serien: Aus
Auflösung - Allgemein
  FoV Auslese: 350 mm
  FoV Phase: 100,0 %
  Schichtdicke: 4,0 mm
  Basis-Auflösung: 320
  Phasen-Auflösung: 75 %
  Phasen Partial Fourier: 4/8
  Interpolation: Ein
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Auflösung - Filter Bild
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  Prescan Normalisierung: Ein
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Auflösung - Filter Rohdaten
  Rohdaten: Aus
  Elliptischer Filter: Aus
Geometrie - Allgemein
  Schichtgruppe: 1
  Schichten: 50
  Distanzfaktor: 10 %
  Position: L17.1 P14.5 F103.5 mm
  Orientierung: C > T1.8 > S-0.4
  Phasenkod.-Richt.: R >> L
  FoV Auslese: 350 mm
  FoV Phase: 100,0 %
  Schichtdicke: 4,0 mm
  TR: 1200,0 ms
  Mehrschichtmodus: Einzelmess.
  Serie: Absteigend
  Verknüpfungen: 3
Geometrie - AutoAlign
  Schichtgruppe: 1
  Position: L17.1 P14.5 F103.5 mm
  Orientierung: C > T1.8 > S-0.4
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Initiale Position: L17.1 P14.5 F103.5
  L: 17,1 mm
  P: 14,5 mm
  F: 103,5 mm
  Initiale Rotation: 0,00 Grad
  Initiale Orientierung: C > T
  C > T: 1,8
  > S: -0,4
Geometrie - Sättiger
  Fettunterdr.: Keine
  Wasserunterdr.: Keine
  Magn. wiederherst.: Aus
  Spez. Sättiger: Keine
Geometrie - Navigator
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: F
  Tischposition: 103 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: F
  Tischposition: 103 mm
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Physio - Signal 1
  1.Signal/Modus: Kein
  TR: 1200,0 ms
  Verknüpfungen: 3
Physio - Herz
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  FoV Auslese: 350 mm
  FoV Phase: 100,0 %
  Phasen-Auflösung: 75 %
Physio - PACE
  Atemkontrolle: Atemanhalten
  Verknüpfungen: 3
Inline - Allgemein
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Sequenz - Teil 1
  Einleitung: Aus
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  Mehrschichtmodus: Einzelmess.
  Echoabstand: 5,26 ms
  Bandbreite: 401 Hz/Px
Sequenz - Teil 2
  HF-Puls-Typ: Schnell
  Gradientenmodus: Schnell
  Hyperecho: Aus
  Turbo Faktor: 240
Sequenz - Assistent
  Mode: Aus
  Erlaubte Verzögerung: 30 s

SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\t2_haste_tra_mbh *
TA: 1:13 PM: ISO Voxelgröße: 1.1×1.1×4.0 mmPAT: 2 Rel. SNR: 1.00  : h
Eigenschaften
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  Bilder in großes Bildsegment laden: Aus
  Inline-Anzeige automatisch öffnen: Ein
  Inline-Anzeige automatisch schließen: Ein
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Routine
  Schichtgruppe: 1
  Schichten: 38
  Distanzfaktor: 10 %
  Position: R10.2 P8.7 H6.1 mm
  Orientierung: T > S-3.0 > C2.6
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Phasen-Oversampling: 97 %
  FoV Auslese: 350 mm
  FoV Phase: 100,0 %
  Schichtdicke: 4,0 mm
  TR: 1600,0 ms
  TE: 110 ms
  Mittelungen: 1
  Verknüpfungen: 3
  Filter: Verzeichn. Korr.(2D), Prescan Normalisierung
  Spulenelemente: BO1-3;SP4,5
Kontrast - Allgemein
  TR: 1600,0 ms
  TE: 110 ms
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Auflösung - Allgemein
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  Phasen-Auflösung: 81 %
  Phasen Partial Fourier: 4/8
  Interpolation: Aus
Auflösung - iPAT
  PAT Modus: GRAPPA
  Beschl. Faktor PE: 2
  Ref. Zeilen PE: 42
  Referenzmessungsm.: Integriert
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Geometrie - Allgemein
  Schichtgruppe: 1
  Schichten: 38
  Distanzfaktor: 10 %
  Position: R10.2 P8.7 H6.1 mm
  Orientierung: T > S-3.0 > C2.6
  Phasenkod.-Richt.: A >> P
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  TR: 1600,0 ms
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Geometrie - AutoAlign
  Schichtgruppe: 1
  Position: R10.2 P8.7 H6.1 mm
  Orientierung: T > S-3.0 > C2.6
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Initiale Position: R10.2 P8.7 H6.1
  R: 10,2 mm
  P: 8,7 mm
  H: 6,1 mm
  Initiale Rotation: 0,80 Grad
  Initiale Orientierung: T > S
  T > S: -3,0
  > C: 2,6
Geometrie - Sättiger
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  Spez. Sättiger: Parallel F/H
  Lücke: 10 mm
  Dicke: 60 mm
Geometrie - Navigator
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: H
  Tischposition: 6 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: H
  Tischposition: 6 mm
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  Spulenanwahl: Default
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Physio - Signal 1
  1.Signal/Modus: Kein
  TR: 1600,0 ms
  Verknüpfungen: 3
Physio - Herz
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  Phasen-Auflösung: 81 %
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Sequenz - Teil 2
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  Turbo Faktor: 259
Sequenz - Assistent
  Mode: Min. Flipwinkel
  Min. Flipwinkel: 140 Grad
  Erlaubte Verzögerung: 30 s

SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\t1_fl2d_in-opp_tra *
TA: 1:12 PM: ISO Voxelgröße: 0.5×0.5×4.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Eigenschaften
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  Bilder in großes Bildsegment laden: Ein
  Inline-Anzeige automatisch öffnen: Ein
  Inline-Anzeige automatisch schließen: Aus
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Routine
  Schichtgruppe: 1
  Schichten: 30
  Distanzfaktor: 10 %
  Position: L18.3 P8.3 F119.5 mm
  Orientierung: T > S0.5 > C-0.4
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Phasen-Oversampling: 35 %
  FoV Auslese: 350 mm
  FoV Phase: 81,3 %
  Schichtdicke: 4,0 mm
  TR: 170,0 ms
  TE 1: 2,46 ms
  TE 2: 6,15 ms
  Mittelungen: 1
  Verknüpfungen: 3
  Filter: Verzeichn. Korr.(2D), Prescan Normalisierung
  Spulenelemente: BO2,3;SP3-5
Kontrast - Allgemein
  TR: 170,0 ms
  TE 1: 2,46 ms
  TE 2: 6,15 ms
  MTC: Aus
  Magn. Präparation: Keine
  Flipwinkel: 70 Grad
  Fettunterdr.: Keine
  Wasserunterdr.: Keine
  SWI: Aus
Kontrast - Dynamisch
  Mittelungen: 1
  Mittelungsmodus: Kurzzeit
  Rekonstruktion: Betrag
  Messungen: 1
  Mehrere Serien: Jede Messung
Auflösung - Allgemein
  FoV Auslese: 350 mm
  FoV Phase: 81,3 %
  Schichtdicke: 4,0 mm
  Basis-Auflösung: 320
  Phasen-Auflösung: 80 %
  Phasen Partial Fourier: 6/8
  Interpolation: Ein
Auflösung - iPAT
  PAT Modus: GRAPPA
  Beschl. Faktor PE: 2
  Ref. Zeilen PE: 24
  Referenzmessungsm.: Integriert
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Geometrie - Allgemein
  Schichtgruppe: 1
  Schichten: 30
  Distanzfaktor: 10 %
  Position: L18.3 P8.3 F119.5 mm
  Orientierung: T > S0.5 > C-0.4
  Phasenkod.-Richt.: A >> P
  FoV Auslese: 350 mm
  FoV Phase: 81,3 %
  Schichtdicke: 4,0 mm
  TR: 170,0 ms
  Mehrschichtmodus: Verschachtelt
  Serie: Verschacht. in A. A.
  Verknüpfungen: 3
Geometrie - AutoAlign
  Schichtgruppe: 1
  Position: L18.3 P8.3 F119.5 mm
  Orientierung: T > S0.5 > C-0.4
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Initiale Position: L18.3 P8.3 F119.5
  L: 18,3 mm
  P: 8,3 mm
  F: 119,5 mm
  Initiale Rotation: 0,00 Grad
  Initiale Orientierung: T > S
  T > S: 0,5
  > C: -0,4
Geometrie - Sättiger
  Sättigungsmodus: Quick
  Fettunterdr.: Keine
  Wasserunterdr.: Keine
  Spez. Sättiger: Q-parallel F/H
  Lücke: 10,0 mm
  Dicke: 60 mm
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: F
  Tischposition: 119 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: F
  Tischposition: 119 mm
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  Spulenanwahl: Ein  - AutoCoilSelect
System - Justagen
  B0-Shim-Modus: Standard
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System - Justagevolumen
  Position: L18.3 P8.3 F119.5 mm
  Orientierung: T > S0.5 > C-0.4
  Rotation: 0,00 Grad
  A >> P: 285 mm
  R >> L: 350 mm
  F >> H: 132 mm
  Zurücksetzen: Aus
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Physio - Signal 1
  1.Signal/Modus: Kein
  TR: 170,0 ms
  Verknüpfungen: 3
  Segmente: 1
Physio - Herz
  Hilfslinien: Keine
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  FoV Phase: 81,3 %
  Phasen-Auflösung: 80 %
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Inline - Allgemein
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  Leber Registrierung: Aus
  Originalbilder speichern: Ein
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Sequenz - Teil 1
  Einleitung: Aus
  Dimension: 2D
  Phasenstabilisierung: Aus
  Asymmetrisches Echo: Erlaubt
  Kontraste: 2
  Flusskomp. 1: Nein
  Auslese Modus: Bipolar
  Mehrschichtmodus: Verschachtelt
  Bandbreite 1: 300 Hz/Px
  Bandbreite 2: 290 Hz/Px
Sequenz - Teil 2
  Segmente: 1
  Lärmreduktion: Keine
  HF-Puls-Typ: Schnell
  Gradientenmodus: Schnell
  Anregung: Schichtsel.
  HF-Spoiler: Ein
Sequenz - Assistent
  Mode: Aus
  Erlaubte Verzögerung: 60 s

SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\t2_tirm_cor_mbh *
TA: 1:27 PM: ISO Voxelgröße: 0.5×0.5×4.0 mmPAT: 3 Rel. SNR: 1.00  : tir
Eigenschaften
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  Bilder in großes Bildsegment laden: Aus
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Routine
  Schichtgruppe: 1
  Schichten: 30
  Distanzfaktor: 10 %
  Position: L17.1 P14.5 F103.5 mm
  Orientierung: C > T1.8 > S-0.4
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Phasen-Oversampling: 12 %
  FoV Auslese: 350 mm
  FoV Phase: 81,3 %
  Schichtdicke: 4,0 mm
  TR: 3600,0 ms
  TE: 108,0 ms
  Mittelungen: 1
  Verknüpfungen: 4
  Filter: Verzeichn. Korr.(2D), Prescan Normalisierung
  Spulenelemente: BO1-3;SP3-5
Kontrast - Allgemein
  TR: 3600,0 ms
  TE: 108,0 ms
  MTC: Aus
  Magn. Präparation: Schichtsel. IR
  TI: 220 ms
  Flipwinkel: 140 Grad
  Fettunterdr.: Keine
  Wasserunterdr.: Keine
  Magn. wiederherst.: Aus
  Halte unterdrücktes Gewebe: Aus
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Auflösung - Allgemein
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  Phasen Partial Fourier: Aus
  Trajektorie: Kartesisch
  Interpolation: Ein
Auflösung - iPAT
  PAT Modus: GRAPPA
  Beschl. Faktor PE: 3
  Ref. Zeilen PE: 50
  Referenzmessungsm.: Integriert
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Geometrie - Allgemein
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  Position: L17.1 P14.5 F103.5 mm
  Orientierung: C > T1.8 > S-0.4
  Phasenkod.-Richt.: R >> L
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  TR: 3600,0 ms
  Mehrschichtmodus: Verschachtelt
  Serie: Verschacht. in A. A.
  Verknüpfungen: 4
Geometrie - AutoAlign
  Schichtgruppe: 1
  Position: L17.1 P14.5 F103.5 mm
  Orientierung: C > T1.8 > S-0.4
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Initiale Position: L17.1 P14.5 F103.5
  L: 17,1 mm
  P: 14,5 mm
  F: 103,5 mm
  Initiale Rotation: 0,00 Grad
  Initiale Orientierung: C > T
  C > T: 1,8
  > S: -0,4
Geometrie - Sättiger
  Fettunterdr.: Keine
  Wasserunterdr.: Keine
  Magn. wiederherst.: Aus
  Spez. Sättiger: Keine
Geometrie - Navigator
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: F
  Tischposition: 103 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: F
  Tischposition: 103 mm
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System - Justagevolumen
  Position: L17.1 P14.5 F103.5 mm
  Orientierung: C > T1.8 > S-0.4
  Rotation: 0,00 Grad
  R >> L: 285 mm
  F >> H: 350 mm
  A >> P: 132 mm
  Zurücksetzen: Aus
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Physio - Signal 1
  1.Signal/Modus: Kein
  TR: 3600,0 ms
  Verknüpfungen: 4
Physio - Herz
  Magn. Präparation: Schichtsel. IR
  TI: 220 ms
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  Trajektorie: Kartesisch
Physio - PACE
  Atemkontrolle: Atemanhalten
  Verknüpfungen: 4
Inline - Allgemein
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Sequenz - Teil 1
  Einleitung: Aus
  Dimension: 2D
  Kompensiere T2 Zerfall: Aus
  Reduz. Bewegungsempf.: Ein
  Kontraste: 1
  Flusskomp.: Nein
  Mehrschichtmodus: Verschachtelt
  Freier Echoabstand: Aus
  Echoabstand: 8,34 ms
  Bandbreite: 347 Hz/Px
Sequenz - Teil 2
  Definiere: Turbo Faktor
  Echozüge pro Schicht: 5
  Phasenkorrektur: Automatisch
  Lärmreduktion: Keine
  HF-Puls-Typ: Normal
  Gradientenmodus: Normal
  Hyperecho: Aus
  WARP: Aus
  Red. EC Sensitivität: Aus
  Turbo Faktor: 22
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
SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\t1_vibe_fs_tra_bh_384 *
TA: 0:21 PM: ISO Voxelgröße: 0.5×0.5×3.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Eigenschaften
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  Auf Start duch Benutzer warten: Ein
  Start measurements: Mehrfach messen
Routine
  3D-Block-Gruppe: 1
  3D-Blöcke: 1
  Distanzfaktor: 20 %
  Position: L18.3 P8.3 F119.5 mm
  Orientierung: T > S0.5 > C-0.4
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Phasen-Oversampling: 0 %
  Schicht-Oversampling: 11,1 %
  Schichten im 3D-Block: 72
  FoV Auslese: 350 mm
  FoV Phase: 75,0 %
  Schichtdicke: 3,0 mm
  TR: 4,36 ms
  TE: 1,97 ms
  Mittelungen: 1
  Verknüpfungen: 1
  Filter: Verzeichn. Korr.(2D), Prescan Normalisierung
  Spulenelemente: BO2,3;SP3-5
Kontrast - Allgemein
  TR: 4,36 ms
  TE: 1,97 ms
  Flipwinkel: 9,0 Grad
  Fettunterdr.: Q-fettsätt.
  Lines Per Shot: 40
  Wasserunterdr.: Keine
  Dixon: Aus
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Auflösung - Allgemein
  FoV Auslese: 350 mm
  FoV Phase: 75,0 %
  Schichtdicke: 3,0 mm
  Basis-Auflösung: 384
  Phasen-Auflösung: 70 %
  Schicht-Auflösung: 63 %
  Phasen Partial Fourier: 7/8
  Schicht Partial Fourier: 6/8
  Trajektorie: Kartesisch
  Gemeins. Daten: Aus
  Interpolation: Ein
Auflösung - iPAT
  PAT Modus: GRAPPA
  Beschl. Faktor PE: 2
  Ref. Zeilen PE: 26
  Beschl. Faktor 3D: 1
  Referenzmessungsm.: Integriert
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Auflösung - Filter Rohdaten
  Rohdaten: Aus
  Elliptischer Filter: Aus
  POCS: Aus
Geometrie - Allgemein
  3D-Block-Gruppe: 1
  3D-Blöcke: 1
  Distanzfaktor: 20 %
  Position: L18.3 P8.3 F119.5 mm
  Orientierung: T > S0.5 > C-0.4
  Phasenkod.-Richt.: A >> P
  Schicht-Oversampling: 11,1 %
  Schichten im 3D-Block: 72
  FoV Auslese: 350 mm
  FoV Phase: 75,0 %
  Schichtdicke: 3,0 mm
  TR: 4,36 ms
  Mehrschichtmodus: Sequenziell
  Serie: Aufsteigend
  Verknüpfungen: 1
Geometrie - AutoAlign
  3D-Block-Gruppe: 1
  Position: L18.3 P8.3 F119.5 mm
  Orientierung: T > S0.5 > C-0.4
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Initiale Position: L18.3 P8.3 F119.5
  L: 18,3 mm
  P: 8,3 mm
  F: 119,5 mm
  Initiale Rotation: 0,00 Grad
  Initiale Orientierung: T > S
  T > S: 0,5
  > C: -0,4
Geometrie - Sättiger
  Fettunterdr.: Q-fettsätt.
  Wasserunterdr.: Keine
  Dixon: Aus
  Spez. Sättiger: Parallel F/H
  Lücke: 10,0 mm
  Dicke: 60 mm
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: F
  Tischposition: 119 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: F
  Tischposition: 119 mm
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System - Justagevolumen
  Position: L18.3 P8.3 F119.5 mm
  Orientierung: T > S0.5 > C-0.4
  Rotation: 0,00 Grad
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 216 mm
  Zurücksetzen: Aus
System - Tx/Rx
  Frequenz 1H: 123,250091 MHz
  Korrekturfaktor: 1
  Verstärkung: Klein
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Physio - PACE
  Atemkontrolle: Aus
  Verknüpfungen: 1
Inline - Allgemein
  Gemeins. Daten: Aus
  Flipwinkel: 9,0 Grad
  Messungen: 1
  Zeitstempel im Bild: Aus
  Zeitliche Interpolation: 1
  3D zentr. Sortierung: Aus
  Zeit bis k-Raummitte: 8,9 s
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Sequenz - Teil 1
  Einleitung: Aus
  Dimension: 3D
  Elliptische Abtastung: Aus
  Sortierung: Linear
  Asymmetrisches Echo: Aus
  Kontraste: 1
  Optimierung: Min. TE
  Mehrschichtmodus: Sequenziell
  Bandbreite: 480 Hz/Px
Sequenz - Teil 2
  HF-Puls-Typ: Schnell
  Gradientenmodus: Schnell
  Anregung: 3D-Block sel.
  HF-Spoiler: Ein
  Erh. Gradienten-Spoiler: Aus
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
SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\t1_vibe_fs_tra_bh_384 *
TA: 0:21 PM: ISO Voxelgröße: 0.5×0.5×3.0 mmPAT: 2 Rel. SNR: 1.00  : fl
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Routine
  3D-Block-Gruppe: 1
  3D-Blöcke: 1
  Distanzfaktor: 20 %
  Position: L19.2 P8.6 F108.5 mm
  Orientierung: T > S0.5 > C-0.4
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Phasen-Oversampling: 0 %
  Schicht-Oversampling: 11,1 %
  Schichten im 3D-Block: 72
  FoV Auslese: 350 mm
  FoV Phase: 75,0 %
  Schichtdicke: 3,0 mm
  TR: 4,36 ms
  TE: 1,97 ms
  Mittelungen: 1
  Verknüpfungen: 1
  Filter: Verzeichn. Korr.(2D), Prescan Normalisierung
  Spulenelemente: BO2,3;SP3-5
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Geometrie - Allgemein
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  Position: L19.2 P8.6 F108.5 mm
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Geometrie - AutoAlign
  3D-Block-Gruppe: 1
  Position: L19.2 P8.6 F108.5 mm
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  Initiale Position: L19.2 P8.6 F108.5
  L: 19,2 mm
  P: 8,6 mm
  F: 108,5 mm
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Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: F
  Tischposition: 109 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: F
  Tischposition: 109 mm
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System - Justagevolumen
  Position: L19.2 P8.6 F108.5 mm
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
SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\t1_vibe_fs_cor_KM *
TA: 0:22 PM: ISO Voxelgröße: 0.5×0.5×2.5 mmPAT: 2 Rel. SNR: 1.00  : fl
Eigenschaften
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  Bilder in großes Bildsegment laden: Ein
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Routine
  3D-Block-Gruppe: 1
  3D-Blöcke: 1
  Distanzfaktor: 20 %
  Position: L17.1 P14.5 F103.5 mm
  Orientierung: C > T1.8 > S-0.4
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Phasen-Oversampling: 29 %
  Schicht-Oversampling: 10,0 %
  Schichten im 3D-Block: 80
  FoV Auslese: 350 mm
  FoV Phase: 99,4 %
  Schichtdicke: 2,5 mm
  TR: 3,62 ms
  TE: 1,3 ms
  Mittelungen: 1
  Verknüpfungen: 1
  Filter: Verzeichn. Korr.(2D), Prescan Normalisierung
  Spulenelemente: BO1-3;SP3-5
Kontrast - Allgemein
  TR: 3,62 ms
  TE: 1,3 ms
  Flipwinkel: 9,0 Grad
  Fettunterdr.: Q-fettsätt.
  Lines Per Shot: 45
  Wasserunterdr.: Keine
  Dixon: Aus
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Auflösung - Allgemein
  FoV Auslese: 350 mm
  FoV Phase: 99,4 %
  Schichtdicke: 2,5 mm
  Basis-Auflösung: 352
  Phasen-Auflösung: 64 %
  Schicht-Auflösung: 61 %
  Phasen Partial Fourier: 6/8
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Auflösung - iPAT
  PAT Modus: GRAPPA
  Beschl. Faktor PE: 2
  Ref. Zeilen PE: 24
  Beschl. Faktor 3D: 1
  Referenzmessungsm.: Integriert
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Geometrie - Allgemein
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  Position: L17.1 P14.5 F103.5 mm
  Orientierung: C > T1.8 > S-0.4
  Phasenkod.-Richt.: R >> L
  Schicht-Oversampling: 10,0 %
  Schichten im 3D-Block: 80
  FoV Auslese: 350 mm
  FoV Phase: 99,4 %
  Schichtdicke: 2,5 mm
  TR: 3,62 ms
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Geometrie - AutoAlign
  3D-Block-Gruppe: 1
  Position: L17.1 P14.5 F103.5 mm
  Orientierung: C > T1.8 > S-0.4
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Initiale Position: L17.1 P14.5 F103.5
  L: 17,1 mm
  P: 14,5 mm
  F: 103,5 mm
  Initiale Rotation: 0,00 Grad
  Initiale Orientierung: C > T
  C > T: 1,8
  > S: -0,4
Geometrie - Sättiger
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  Spez. Sättiger: Keine
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: F
  Tischposition: 103 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: F
  Tischposition: 103 mm
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System - Justagevolumen
  Position: L17.1 P14.5 F103.5 mm
  Orientierung: C > T1.8 > S-0.4
  Rotation: 0,00 Grad
  R >> L: 349 mm
  F >> H: 350 mm
  A >> P: 200 mm
  Zurücksetzen: Aus
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Inline - Allgemein
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  Zeit bis k-Raummitte: 7,7 s
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Sequenz - Teil 1
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  Asymmetrisches Echo: Schwach
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  Bandbreite: 510 Hz/Px
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
SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\t1_vibe_fs_sag_KM *
TA: 0:22 PM: ISO Voxelgröße: 0.5×0.5×2.5 mmPAT: 2 Rel. SNR: 1.00  : fl
Eigenschaften
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  Bilder in großes Bildsegment laden: Aus
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  Start measurements: Einmal messen
Routine
  3D-Block-Gruppe: 1
  3D-Blöcke: 1
  Distanzfaktor: 20 %
  Position: L6.7 P16.3 H1.0 mm
  Orientierung: S > T1.1 > C-0.5
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Phasen-Oversampling: 0 %
  Schicht-Oversampling: 7,7 %
  Schichten im 3D-Block: 104
  FoV Auslese: 330 mm
  FoV Phase: 87,5 %
  Schichtdicke: 2,5 mm
  TR: 4,33 ms
  TE: 1,52 ms
  Mittelungen: 1
  Verknüpfungen: 1
  Filter: Verzeichn. Korr.(2D), Prescan Normalisierung
  Spulenelemente: BO1-3;SP5-7
Kontrast - Allgemein
  TR: 4,33 ms
  TE: 1,52 ms
  Flipwinkel: 9,0 Grad
  Fettunterdr.: Q-fettsätt.
  Lines Per Shot: 54
  Wasserunterdr.: Keine
  Dixon: Aus
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Auflösung - Allgemein
  FoV Auslese: 330 mm
  FoV Phase: 87,5 %
  Schichtdicke: 2,5 mm
  Basis-Auflösung: 320
  Phasen-Auflösung: 73 %
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Geometrie - Allgemein
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  Position: L6.7 P16.3 H1.0 mm
  Orientierung: S > T1.1 > C-0.5
  Phasenkod.-Richt.: A >> P
  Schicht-Oversampling: 7,7 %
  Schichten im 3D-Block: 104
  FoV Auslese: 330 mm
  FoV Phase: 87,5 %
  Schichtdicke: 2,5 mm
  TR: 4,33 ms
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Geometrie - AutoAlign
  3D-Block-Gruppe: 1
  Position: L6.7 P16.3 H1.0 mm
  Orientierung: S > T1.1 > C-0.5
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Initiale Position: Isozentrum
  L: 0,0 mm
  P: 0,0 mm
  H: 0,0 mm
  Initiale Rotation: 0,00 Grad
  Initiale Orientierung: Transversal
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Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: H
  Tischposition: 1 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: H
  Tischposition: 1 mm
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System - Justagevolumen
  Position: L6.7 P16.3 H1.0 mm
  Orientierung: S > T1.1 > C-0.5
  Rotation: -4,00 Grad
  A >> P: 289 mm
  F >> H: 330 mm
  R >> L: 260 mm
  Zurücksetzen: Aus
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Inline - Allgemein
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  Zeit bis k-Raummitte: 7,9 s
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Sequenz - Teil 1
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  Bandbreite: 350 Hz/Px
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
SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\t1_vibe_fs_tra_bh_384 *
TA: 0:21 PM: ISO Voxelgröße: 0.5×0.5×3.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Eigenschaften
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  Start measurements: Mehrfach messen
Routine
  3D-Block-Gruppe: 1
  3D-Blöcke: 1
  Distanzfaktor: 20 %
  Position: L19.2 P8.6 F108.5 mm
  Orientierung: T > S0.5 > C-0.4
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Phasen-Oversampling: 0 %
  Schicht-Oversampling: 11,1 %
  Schichten im 3D-Block: 72
  FoV Auslese: 350 mm
  FoV Phase: 75,0 %
  Schichtdicke: 3,0 mm
  TR: 4,36 ms
  TE: 1,97 ms
  Mittelungen: 1
  Verknüpfungen: 1
  Filter: Verzeichn. Korr.(2D), Prescan Normalisierung
  Spulenelemente: BO2,3;SP3-5
Kontrast - Allgemein
  TR: 4,36 ms
  TE: 1,97 ms
  Flipwinkel: 9,0 Grad
  Fettunterdr.: Q-fettsätt.
  Lines Per Shot: 40
  Wasserunterdr.: Keine
  Dixon: Aus
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Auflösung - Allgemein
  FoV Auslese: 350 mm
  FoV Phase: 75,0 %
  Schichtdicke: 3,0 mm
  Basis-Auflösung: 384
  Phasen-Auflösung: 70 %
  Schicht-Auflösung: 63 %
  Phasen Partial Fourier: 7/8
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Auflösung - iPAT
  PAT Modus: GRAPPA
  Beschl. Faktor PE: 2
  Ref. Zeilen PE: 26
  Beschl. Faktor 3D: 1
  Referenzmessungsm.: Integriert
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Geometrie - Allgemein
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  Position: L19.2 P8.6 F108.5 mm
  Orientierung: T > S0.5 > C-0.4
  Phasenkod.-Richt.: A >> P
  Schicht-Oversampling: 11,1 %
  Schichten im 3D-Block: 72
  FoV Auslese: 350 mm
  FoV Phase: 75,0 %
  Schichtdicke: 3,0 mm
  TR: 4,36 ms
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Geometrie - AutoAlign
  3D-Block-Gruppe: 1
  Position: L19.2 P8.6 F108.5 mm
  Orientierung: T > S0.5 > C-0.4
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Initiale Position: L19.2 P8.6 F108.5
  L: 19,2 mm
  P: 8,6 mm
  F: 108,5 mm
  Initiale Rotation: 0,00 Grad
  Initiale Orientierung: T > S
  T > S: 0,5
  > C: -0,4
Geometrie - Sättiger
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  Spez. Sättiger: Parallel F/H
  Lücke: 10,0 mm
  Dicke: 60 mm
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: F
  Tischposition: 109 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: F
  Tischposition: 109 mm
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System - Justagevolumen
  Position: L19.2 P8.6 F108.5 mm
  Orientierung: T > S0.5 > C-0.4
  Rotation: 0,00 Grad
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 216 mm
  Zurücksetzen: Aus
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Inline - Allgemein
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  Zeit bis k-Raummitte: 8,9 s
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Sequenz - Teil 1
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  Asymmetrisches Echo: Aus
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  Bandbreite: 480 Hz/Px
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
SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\t1_vibe_fs_cor_p2_bh_384_uro *
TA: 0:23 PM: ISO Voxelgröße: 0.9×0.9×2.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Eigenschaften
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  Auf Start duch Benutzer warten: Aus
  Start measurements: Einmal messen
Routine
  3D-Block-Gruppe: 1
  3D-Blöcke: 1
  Distanzfaktor: 20 %
  Position: R13.7 P35.5 F64.3 mm
  Orientierung: C > T1.6 > S1.1
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Phasen-Oversampling: 50 %
  Schicht-Oversampling: 33,3 %
  Schichten im 3D-Block: 48
  FoV Auslese: 360 mm
  FoV Phase: 100,0 %
  Schichtdicke: 2,0 mm
  TR: 3,71 ms
  TE: 1,44 ms
  Mittelungen: 1
  Verknüpfungen: 1
  Filter: Verzeichn. Korr.(2D), Prescan Normalisierung
  Spulenelemente: BO1,2;BO2,3;SP3-6
Kontrast - Allgemein
  TR: 3,71 ms
  TE: 1,44 ms
  Flipwinkel: 40,0 Grad
  Fettunterdr.: Q-fettsätt.
  Lines Per Shot: 26
  Wasserunterdr.: Keine
  Dixon: Aus
Kontrast - Dynamisch
  Mittelungen: 1
  Mittelungsmodus: Langzeit
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Auflösung - Allgemein
  FoV Auslese: 360 mm
  FoV Phase: 100,0 %
  Schichtdicke: 2,0 mm
  Basis-Auflösung: 384
  Phasen-Auflösung: 80 %
  Schicht-Auflösung: 50 %
  Phasen Partial Fourier: 6/8
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  Interpolation: Aus
Auflösung - iPAT
  PAT Modus: GRAPPA
  Beschl. Faktor PE: 2
  Ref. Zeilen PE: 24
  Beschl. Faktor 3D: 1
  Referenzmessungsm.: Integriert
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Geometrie - Allgemein
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  Position: R13.7 P35.5 F64.3 mm
  Orientierung: C > T1.6 > S1.1
  Phasenkod.-Richt.: R >> L
  Schicht-Oversampling: 33,3 %
  Schichten im 3D-Block: 48
  FoV Auslese: 360 mm
  FoV Phase: 100,0 %
  Schichtdicke: 2,0 mm
  TR: 3,71 ms
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Geometrie - AutoAlign
  3D-Block-Gruppe: 1
  Position: R13.7 P35.5 F64.3 mm
  Orientierung: C > T1.6 > S1.1
  Phasenkod.-Richt.: R >> L
  AutoAlign: ---
  Initiale Position: R13.7 P35.5 F64.3
  R: 13,7 mm
  P: 35,5 mm
  F: 64,3 mm
  Initiale Rotation: 0,00 Grad
  Initiale Orientierung: C > T
  C > T: 1,6
  > S: 1,1
Geometrie - Sättiger
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  Spez. Sättiger: Keine
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: F
  Tischposition: 64 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: F
  Tischposition: 64 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
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  Spulenanwahl: Default
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System - Justagevolumen
  Position: R13.7 P35.5 F64.3 mm
  Orientierung: C > T1.6 > S1.1
  Rotation: 0,00 Grad
  R >> L: 360 mm
  F >> H: 360 mm
  A >> P: 96 mm
  Zurücksetzen: Aus
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Physio - PACE
  Atemkontrolle: Atemanhalten
  Verknüpfungen: 1
Inline - Allgemein
  Gemeins. Daten: Aus
  Flipwinkel: 40,0 Grad
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  Zeit bis k-Raummitte: 7,7 s
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Inline - MIP
  MIP-Sag: Aus
  MIP-Cor: Ein
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Sequenz - Teil 1
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  Sortierung: Zentrisch
  Asymmetrisches Echo: Schwach
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  Bandbreite: 620 Hz/Px
Sequenz - Teil 2
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  Erh. Gradienten-Spoiler: Ein
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
SIEMENS MAGNETOM Skyra_fit
\\Benutzer\Abdomen\Oberbauch\DOT\MULTI ECHOS APNEE BODY 20° *
TA: 0:13 PM: ISO Voxelgröße: 1.6×1.6×7.0 mmPAT: Aus Rel. SNR: 1.00  : fl
Eigenschaften
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  Auf Start duch Benutzer warten: Ein
  Start measurements: Einmal messen
Routine
  Schichtgruppe: 1
  Schichten: 5
  Distanzfaktor: 114 %
  Position: L4.9 A20.8 H36.5 mm
  Orientierung: Transversal
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Phasen-Oversampling: 0 %
  FoV Auslese: 408 mm
  FoV Phase: 84,4 %
  Schichtdicke: 7,0 mm
  TR: 120,0 ms
  TE 1: 1,23 ms
  TE 2: 2,46 ms
  TE 3: 3,68 ms
  TE 4: 4,92 ms
  TE 5: 6,15 ms
  TE 6: 7,38 ms
  TE 7: 8,61 ms
  TE 8: 9,84 ms
  TE 9: 11,07 ms
  TE 10: 12,30 ms
  TE 11: 13,53 ms
  Mittelungen: 1
  Verknüpfungen: 1
  Filter: Verzeichn. Korr.(2D), Normalisierung
  Spulenelemente: BC
Kontrast - Allgemein
  TR: 120,0 ms
  TE 1: 1,23 ms
  TE 2: 2,46 ms
  TE 3: 3,68 ms
  TE 4: 4,92 ms
  TE 5: 6,15 ms
  TE 6: 7,38 ms
  TE 7: 8,61 ms
  TE 8: 9,84 ms
  TE 9: 11,07 ms
  TE 10: 12,30 ms
  TE 11: 13,53 ms
  MTC: Aus
  Magn. Präparation: Keine
  Flipwinkel: 20 Grad
  Fettunterdr.: Keine
  Wasserunterdr.: Keine
  SWI: Aus
Kontrast - Dynamisch
  Mittelungen: 1
  Mittelungsmodus: Kurzzeit
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Auflösung - Allgemein
  FoV Auslese: 408 mm
  FoV Phase: 84,4 %
  Schichtdicke: 7,0 mm
  Basis-Auflösung: 128
  Phasen-Auflösung: 100 %
  Phasen Partial Fourier: Aus
  Interpolation: Ein
Auflösung - iPAT
  PAT Modus: Keiner
Auflösung - Filter Bild
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  Prescan Normalisierung: Aus
  Normalisierung: Ein
  Ungefilterte Bilder: Aus
  B1-Filter: Aus
Auflösung - Filter Rohdaten
  Rohdaten: Aus
  Elliptischer Filter: Aus
Geometrie - Allgemein
  Schichtgruppe: 1
  Schichten: 5
  Distanzfaktor: 114 %
  Position: L4.9 A20.8 H36.5 mm
  Orientierung: Transversal
  Phasenkod.-Richt.: A >> P
  FoV Auslese: 408 mm
  FoV Phase: 84,4 %
  Schichtdicke: 7,0 mm
  TR: 120,0 ms
  Mehrschichtmodus: Verschachtelt
  Serie: Verschachtelt
  Verknüpfungen: 1
Geometrie - AutoAlign
  Schichtgruppe: 1
  Position: L4.9 A20.8 H36.5 mm
  Orientierung: Transversal
  Phasenkod.-Richt.: A >> P
  AutoAlign: ---
  Initiale Position: L4.9 A20.8 H36.5
  L: 4,9 mm
  A: 20,8 mm
  H: 36,5 mm
  Initiale Rotation: 0,00 Grad
  Initiale Orientierung: Transversal
Geometrie - Sättiger
  Sättigungsmodus: Quick
  Fettunterdr.: Keine
  Wasserunterdr.: Keine
  Spez. Sättiger: Q-parallel F/H
  Lücke: 20,0 mm
  Dicke: 80 mm
Geometrie - Tim Planning Suite
  Set-n-Go Protokoll: Aus
  Tischposition: H
  Tischposition: 36 mm
  Inline Composing: Aus
System - Verschiedenes
  Positionierungsmodus: ISO
  Tischposition: H
  Tischposition: 36 mm
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  Transversal: F >> H
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  Spulenanwahl: Aus - AutoCoilSelect
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System - Justagevolumen
  Position: L4.9 A20.8 H36.5 mm
  Orientierung: Transversal
  Rotation: 0,00 Grad
  A >> P: 345 mm
  R >> L: 408 mm
  F >> H: 67 mm
  Zurücksetzen: Aus
System - Tx/Rx
  Frequenz 1H: 123,250091 MHz
  Korrekturfaktor: 1
  Verstärkung: Groß
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Physio - Signal 1
  1.Signal/Modus: Kein
  TR: 120,0 ms
  Verknüpfungen: 1
  Segmente: 1
Physio - Herz
  Hilfslinien: Keine
  Magn. Präparation: Keine
  Fettunterdr.: Keine
  Dark Blood: Aus
  FoV Auslese: 408 mm
  FoV Phase: 84,4 %
  Phasen-Auflösung: 100 %
Physio - PACE
  Atemkontrolle: Aus
  Verknüpfungen: 1
Inline - Allgemein
  Subtrahieren: Aus
  Messungen: 1
  StdAbw: Aus
  Leber Registrierung: Aus
  Originalbilder speichern: Ein
Inline - MIP
  MIP-Sag: Aus
  MIP-Cor: Aus
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Sequenz - Teil 1
  Einleitung: Aus
  Dimension: 2D
  Phasenstabilisierung: Aus
  Asymmetrisches Echo: Erlaubt
  Kontraste: 11
  Flusskomp. 1: Nein
  Auslese Modus: Bipolar
  Mehrschichtmodus: Verschachtelt
  Bandbreite 1: 1180 Hz/Px
  Bandbreite 2: 1030 Hz/Px
  Bandbreite 3: 1030 Hz/Px
  Bandbreite 4: 1030 Hz/Px
  Bandbreite 5: 1030 Hz/Px
  Bandbreite 6: 1030 Hz/Px
  Bandbreite 7: 1030 Hz/Px
  Bandbreite 8: 1030 Hz/Px
  Bandbreite 9: 1030 Hz/Px
  Bandbreite 10: 1030 Hz/Px
  Bandbreite 11: 1030 Hz/Px
Sequenz - Teil 2
  Segmente: 1
  Lärmreduktion: Keine
  HF-Puls-Typ: Schnell
  Gradientenmodus: Schnell
  Anregung: Schichtsel.
  HF-Spoiler: Ein
Sequenz - Assistent
  Mode: Aus
  Erlaubte Verzögerung: 0 s
